//////////////////// Table of contents ///////////////////////////////////
/*
    Line 36:            Version info
    Line 53:            Params
    Line 63:            Utils
    Line 265:           Prerequisites
    Line 306:           Sections
    Line 330:           Imported section names
    Line 351:           Section references
    Line 402:           Topology
    Line 472:           Geometry, nseg, Ra
    Line 2192:          Distance centre
    Line 2201:          DLL check, "Import & Edit" measures
    Line 2435:          Inhom and stoch library
    Line 3020:          Biophys: Compartments
    Line 3144:          Biophys: Homogen vars
    Line 3288:          Biophys: Homogen vars
    Line 3436:          Templates for taps
    Line 3552:          Templates for gap juncs
    Line 3862:          GJ set #1: Locations
    Line 3954:          GJ set #1: Compartments
    Line 3963:          GJ set #1: Homogen vars
    Line 3991:          GJ set #1: "Import & Edit" measures
    Line 3999:          GJ set #1: Main part
    Line 4011:          Templates for synapses
    Line 4709:          Syn set #1: Locations
    Line 4716:          Syn set #1: Compartments
    Line 4726:          Syn set #1: Homogen vars
    Line 4780:          Syn set #1: "Import & Edit" measures
    Line 4795:          Syn set #1: Main part
    Line 4807:          Cleanup
    Line 4832:          APCount-s
*/
//////////////////////////////////////////////////////////////////////////

//////////////////// Start of version info ///////////////////////////////
/*
    This HOC file was generated using:
      * BrainCell version: 2.0
      * NEURON version:    8.2.3
      * Python version:    3.11.5
*/
//////////////////// End of version info /////////////////////////////////

if (unix_mac_pc() == 1) {
    load_file("stdrun.hoc")
}

//////////////////////////////////////////////////////////////////////////

isAstrocyteOrNeuron = 0

//////////////////// Start of params /////////////////////////////////////

celsius = 34.0    // (degC)
v_init = -64.65    // (mV)
tstop = 100.0    // (ms)
dt = 0.1    // (ms)
steps_per_ms = 10.0

//////////////////// End of params ///////////////////////////////////////

//////////////////// Start of utils //////////////////////////////////////

objref nil

// Print the message, print the call stack, raise the error
// $s1 - The message
proc printMsgAndRaiseError() {
    strdef msg
    sprint(msg, "\n\n    %s\n", $s1)
    execerror(msg)
}

// Print "Not implemented" message, print the call stack, raise the error
proc printNotImplementedMsgAndRaiseError() {
    strdef msg1, msg2
    sprint(msg1, "\n\n    %s", $s1)
    msg2 = "\n    Not implemented.\n    If required, please ask the developer to prioritize.\n"
    execerror(msg1, msg2)
}

// Report the bug, print the call stack, raise the error
proc codeContractViolation() {
    execerror("\n\n    Bug in BrainCell program: Code contract violation", "\n    Please report this problem to the developer along with the call stack shown below\n")
}

// An iterator to simplify looping over all elements of the List a bit.
// Basically, we replace this:
//     local idx localobj item
//     for idx = 0, list.count() - 1 {
//         item = list.o(idx)
//         do_smth(item)
//     }
// with this:
//     localobj item
//     for eachItemInList(item, list) {
//         do_smth(item)
//     }
// There are some limitations:
//  1. iterator_statement cannot contain "return" (otherwise we'll catch Segmentation violation)
//  2. We cannot create another iterator which calls eachItemInList inside (otherwise the outer iterator "forgets" its input arguments on 2nd iteration)
// Also, calling "execerror" inside the iterator crashes NEURON
// $o1 (output) - An element of the List
// $o2 - The List
// $3 (optional) - The first index (0 by default)
iterator eachItemInList() { local numArg, firstIdx, idx localobj list
    list = $o2
    numArg = numarg()
    if (numArg == 2) {
        firstIdx = 0
    } else if (numArg == 3) {
        firstIdx = $3
    } else {
        codeContractViolation()
    }
    for idx = firstIdx, list.count() - 1 {
        $o1 = list.o(idx)
        iterator_statement
    }
}


// See also: eachSecInList, eachSegmInSecList

// Check if given string is empty
// $s1 - The string
// Returns 0/1 flag
func stringEmpty() { localobj strFuncs
    strFuncs = new StringFunctions()
    return strFuncs.len($s1) == 0
}

// Check if given two strings are equal
// $s1 - The first string
// $s2 - The second string
// Returns 0/1 flag
func stringsEqual() {
    return strcmp($s1, $s2) == 0
}

// Create a List of SectionRef-s containing references to all the sections given name or regex
// $s1 - The name or regex
// $2 - 0/1 flag indicating whether to look for top-level sections or the sections owned by objects (template instances)
// Returns: The List of SectionRef-s
obfunc createListOfSectionRefs() { local isOwnedByObjects localobj list_ref
    strdef secNameOrRegex
    
    secNameOrRegex = $s1
    isOwnedByObjects = $2
    
    if (isOwnedByObjects) {
        sprint(secNameOrRegex, ".*].%s", secNameOrRegex)
        // !! the format string ".*]\\.%s" looks more correct (using "verbatim" dot instead of "any char" dot), but doesn't work for unknown reason
        //    the format string ".*]\.%s" doesn't look correct even though works fine (perhaps the unknown escape sequence "\." is interpreted as ".")
    }
    
    list_ref = new List()
    
    // forsec secNameOrRegex {                  // - These two don't require that match must start at the beginning of the string
    // forall ifsec secNameOrRegex {            // /
    forall if (issection(secNameOrRegex)) {     // - This does
        list_ref.append(new SectionRef())
    }
    
    return list_ref
}

// Be careful using this iterator after plotShape.push_selected() or in "forsec" block to avoid this error:
//  "The sectionstack index should be 1 but it is 2"
// (!! need to investigate what exactly causes the error)
// See also: eachSecInListIfExists
iterator eachSecInList() { local numArg, i, secIdx localobj list_ref
    numArg = numarg()
    for i = 1, numArg {
        list_ref = $oi
        // Don't replace with eachItemInList to avoid Segmentation violation
        for secIdx = 0, list_ref.count() - 1 {
            list_ref.o(secIdx).sec {
                iterator_statement
            }
        }
    }
}

// Be careful using this iterator after plotShape.push_selected() or in "forsec" block to avoid this error:
//  "The sectionstack index should be 1 but it is 2"
// (!! need to investigate what exactly causes the error)
iterator eachSegmInSecList() { local secIdx, x localobj list_ref
    list_ref = $o2
    // Don't replace with eachItemInList or eachSecInList to avoid Segmentation violation
    for secIdx = 0, list_ref.count() - 1 {
        list_ref.o(secIdx).sec {
            for (x, 0) {
                $&1 = x
                iterator_statement
            }
        }
    }
}

func makeSureDeclared() { local numArg, isCustomDeclaration, i localobj hocCommandTempls
    strdef name, hocCommand
    
    numArg = numarg()
    
    if (numArg == 0) {
        codeContractViolation()
    }
    
    name = $s1
    if (name_declared(name)) {
        return 1
    }
    
    isCustomDeclaration = (numArg > 1)
    
    hocCommandTempls = new List()
    if (!isCustomDeclaration) {
        hocCommandTempls.append(new String("objref %s"))
    } else {
        for i = 2, numArg {
            hocCommandTempls.append(new String($si))
        }
    }
    
    for i = 0, hocCommandTempls.count() - 1 {
        sprint(hocCommand, hocCommandTempls.o(i).s, name)
        // execute(hocCommand)  // This works for objref, but doesn't work for iterator
        execute1(hocCommand)    // This works for both objref and iterator
    }
    
    return 0
}

begintemplate ReducedBasicMath

    public inf, nan
    public max, isNaN
    
    inf = -1
    nan = -1
    
    proc init() {
        sscanf("inf", "%f", &inf)
        sscanf("nan", "%f", &nan)
    }
    
    func max() {
        if ($1 > $2) {
            return $1
        } else {
            return $2
        }
    }
    
    func isNaN() {
        return !($1 == $1)  // Do not replace with "!="
    }
    
endtemplate ReducedBasicMath

//////////////////// End of utils ////////////////////////////////////////

//////////////////// Start of prerequisites //////////////////////////////

if (!nrnpython("")) {
    printMsgAndRaiseError("Sorry, this HOC file requires Python for some operations. Please install Python.")
}

objref pyObj
pyObj = new PythonObject()

{ nrnpython("ev = lambda arg : eval(arg)") }


proc _callPythonStringFunc() { local status
    strdef inStr, pyStringFunc, pyCommand
    
    inStr = $s1
    pyStringFunc = $s2
    
    sprint(pyCommand, "pyRes = '%s'.%s", inStr, pyStringFunc)
    status = nrnpython(pyCommand)
    if (!status) {
        // !! printPythonErrMsgAndStop
        printMsgAndRaiseError("Exception raised in Python code (caught in _callPythonStringFunc)")
    }
}

// Check if the given string starts with the given prefix
// $s1 - The tested string
// $s2 - The prefix
// Returns 0/1 flag
func stringStartsWith() {
    strdef inStr, inPrefix, pyMembCall
    inStr = $s1
    inPrefix = $s2
    sprint(pyMembCall, "startswith('%s')", inPrefix)
    _callPythonStringFunc(inStr, pyMembCall)
    return pyObj.pyRes
}

//////////////////// End of prerequisites ////////////////////////////////

//////////////////// Start of sections ///////////////////////////////////

create soma, dendrite[52], axon[11]

 NumberDendrites = 52
NumberNanoBranches = 1

begintemplate NeuronNanoBranch
    public spine_neck, spine_head
    create spine_neck, spine_head
endtemplate NeuronNanoBranch

if (NumberNanoBranches != 0) {
    objref neuronNanoBranch[NumberNanoBranches]
} else {
    objref neuronNanoBranch[1]
}

for idx = 0, NumberNanoBranches - 1 {
    neuronNanoBranch[idx] = new NeuronNanoBranch()
}

//////////////////// End of sections /////////////////////////////////////

//////////////////// Start of imported section names /////////////////////

// These names are stored here just to be able to import this file back into the main program and then export again

// Soma
objref usedNamesForSoma
usedNamesForSoma = new List()
{ usedNamesForSoma.append(new String("soma")) }

// Dendrites
objref usedNamesForDendrites
usedNamesForDendrites = new List()
{ usedNamesForDendrites.append(new String("dendrite")) }

// Axon
objref usedNamesForAxon
usedNamesForAxon = new List()
{ usedNamesForAxon.append(new String("axon")) }

//////////////////// End of imported section names ///////////////////////

//////////////////// Start of section references /////////////////////////

// dendrite_ref and axon_ref are not used in this file, but required to import it back into the main program
objref soma_ref, dendrite_ref, axon_ref

// Soma
soma_ref = new List()
soma soma_ref.append(new SectionRef())

// Dendrites
dendrite_ref = new List()
for idx = 0, 51 {
    dendrite[idx] dendrite_ref.append(new SectionRef())
}

// Axon
axon_ref = new List()
for idx = 0, 10 {
    axon[idx] axon_ref.append(new SectionRef())
}

// Nanogeometry

// Two List-s of SectionRef containing references to all the sections of nano geometry
objref nanoProximal_ref, nanoDistal_ref

// Create two List-s of SectionRef containing references to all the sections of nano geometry
// Input: isAstrocyteOrNeuron (taken from the top level)
// Output: nanoProximal_ref, nanoDistal_ref (initialized on the top level)
// !! deprecated: collect the references when creating sections rather than search for sections with regex afterwards
proc createRefsForNanoGeometry_deprecated() {
    nanoProximal_ref = new List()
    nanoDistal_ref = new List()
    
    if (isAstrocyteOrNeuron) {
        nanoProximal_ref = createListOfSectionRefs("SmallGlia[.*", 1)
        nanoDistal_ref = createListOfSectionRefs("LargeGlia[.*", 1)
    } else {
        nanoProximal_ref = createListOfSectionRefs("spine_neck", 1)
        nanoDistal_ref = createListOfSectionRefs("spine_head", 1)
    }
    
    if (nanoProximal_ref.count() != nanoDistal_ref.count()) {
        codeContractViolation()
    }
}

createRefsForNanoGeometry_deprecated()

//////////////////// End of section references ///////////////////////////

//////////////////// Start of topology ///////////////////////////////////

soma connect dendrite[0](0.0), 0.5
dendrite[0] connect dendrite[1](0.0), 1.0
dendrite[0] connect dendrite[2](0.0), 1.0
dendrite[2] connect dendrite[3](0.0), 1.0
dendrite[2] connect dendrite[4](0.0), 1.0
soma connect dendrite[5](0.0), 0.5
dendrite[5] connect dendrite[6](0.0), 1.0
dendrite[5] connect dendrite[7](0.0), 1.0
soma connect dendrite[8](0.0), 0.5
soma connect dendrite[9](0.0), 0.5
dendrite[9] connect dendrite[10](0.0), 1.0
dendrite[10] connect dendrite[11](0.0), 1.0
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NeuronNanoBranch[0].spine_neck connect NeuronNanoBranch[0].spine_head(0.0), 1.0

//////////////////// End of topology /////////////////////////////////////

//////////////////// Start of geometry, nseg, Ra /////////////////////////

soma {
    pt3dclear()
    pt3dadd(0.0, 0.0, 0.0, 21.34000015258789)
    pt3dadd(3.1500000953674316, 4.590000152587891, -6.0, 10.837800025939941)
    pt3dadd(2.1500000953674316, 2.5299999713897705, -4.0, 13.192000389099121)
    pt3dadd(0.47999998927116394, 1.409999966621399, -2.0, 17.067399978637695)
    pt3dadd(1.190000057220459, 1.6200000047683716, 0.0, 20.329999923706055)
    pt3dadd(2.619999885559082, 1.4600000381469727, 2.0, 19.581199645996094)
    pt3dadd(3.369999885559082, -0.17000000178813934, 4.0, 16.219999313354492)
    pt3dadd(2.4800000190734863, 2.25, 6.0, 7.544400215148926)
    nseg = 10
    Ra = 100.0
}
dendrite[0] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 0.8299999833106995)
    pt3dadd(-1.3399999141693115, 0.5950000286102295, 4.0, 0.8299999833106995)
    pt3dadd(-3.5200002193450928, 1.1649999618530273, 4.0, 0.8299999833106995)
    pt3dadd(-5.430000305175781, 1.5049998760223389, 5.0, 0.8299999833106995)
    pt3dadd(-7.5, 2.015000104904175, 6.0, 0.8299999833106995)
    pt3dadd(-10.190000534057617, 3.0350000858306885, 8.0, 0.8299999833106995)
    pt3dadd(-13.040000915527344, 4.045000076293945, 10.0, 0.8299999833106995)
    pt3dadd(-15.920000076293945, 4.744999885559082, 12.0, 0.8299999833106995)
    pt3dadd(-19.280000686645508, 7.204999923706055, 14.0, 0.8299999833106995)
    pt3dadd(-20.860000610351562, 7.054999828338623, 15.0, 0.8299999833106995)
    pt3dadd(-22.489999771118164, 7.864999771118164, 17.0, 0.8299999833106995)
    pt3dadd(-23.149999618530273, 8.244999885559082, 17.0, 0.6200000047683716)
    pt3dadd(-24.76000213623047, 9.104999542236328, 19.0, 1.1399999856948853)
    pt3dadd(-26.270000457763672, 9.524999618530273, 20.0, 1.1399999856948853)
    pt3dadd(-27.979999542236328, 8.875, 21.0, 1.1399999856948853)
    pt3dadd(-29.779998779296875, 8.154999732971191, 21.0, 1.1399999856948853)
    pt3dadd(-31.959999084472656, 7.404999732971191, 21.0, 1.1399999856948853)
    pt3dadd(-33.470001220703125, 7.684999942779541, 21.0, 1.1399999856948853)
    nseg = 10
    Ra = 100.0
}
dendrite[1] {
    pt3dclear()
    pt3dadd(-33.470001220703125, 7.684999942779541, 21.0, 1.1399999856948853)
    pt3dadd(-35.310001373291016, 8.885000228881836, 21.0, 1.0399999618530273)
    pt3dadd(-37.290000915527344, 9.595000267028809, 22.0, 0.9300000071525574)
    pt3dadd(-38.92000198364258, 10.704999923706055, 22.0, 0.9300000071525574)
    pt3dadd(-40.47999954223633, 11.734999656677246, 22.0, 0.9300000071525574)
    pt3dadd(-42.209999084472656, 13.144999504089355, 22.0, 0.9300000071525574)
    pt3dadd(-42.43000030517578, 13.764999389648438, 22.0, 0.9300000071525574)
    pt3dadd(-44.349998474121094, 14.904999732971191, 23.0, 0.9300000071525574)
    pt3dadd(-45.11000061035156, 15.904999732971191, 24.0, 0.9300000071525574)
    pt3dadd(-47.650001525878906, 17.354999542236328, 25.0, 0.9300000071525574)
    pt3dadd(-48.619998931884766, 18.96500015258789, 26.0, 0.9300000071525574)
    pt3dadd(-50.459999084472656, 20.165000915527344, 26.0, 0.9300000071525574)
    pt3dadd(-52.72999954223633, 21.435001373291016, 26.0, 0.9300000071525574)
    pt3dadd(-54.2400016784668, 21.19499969482422, 28.0, 0.9300000071525574)
    pt3dadd(-55.08000183105469, 21.604999542236328, 30.0, 0.9300000071525574)
    nseg = 10
    Ra = 100.0
}
dendrite[2] {
    pt3dclear()
    pt3dadd(-33.470001220703125, 7.684999942779541, 21.0, 1.1399999856948853)
    pt3dadd(-35.25, 7.105000019073486, 21.0, 1.1399999856948853)
    pt3dadd(-36.650001525878906, 7.214999675750732, 22.0, 1.1399999856948853)
    pt3dadd(-38.029998779296875, 7.324999809265137, 22.0, 1.1399999856948853)
    pt3dadd(-39.36000061035156, 7.355000019073486, 23.0, 1.1399999856948853)
    pt3dadd(-41.310001373291016, 6.654999732971191, 24.0, 1.1399999856948853)
    pt3dadd(-42.380001068115234, 5.835000038146973, 25.0, 1.1399999856948853)
    pt3dadd(-44.17000198364258, 5.774999618530273, 25.0, 1.1399999856948853)
    pt3dadd(-46.040000915527344, 5.664999961853027, 26.0, 1.1399999856948853)
    pt3dadd(-47.31999969482422, 5.454999923706055, 26.0, 1.1399999856948853)
    pt3dadd(-49.029998779296875, 5.984999656677246, 26.0, 1.1399999856948853)
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    nseg = 10
    Ra = 100.0
}
dendrite[3] {
    pt3dclear()
    pt3dadd(-144.66000366210938, -66.2750015258789, 34.0, 0.8299999833106995)
    pt3dadd(-143.77000427246094, -67.95500183105469, 34.0, 0.8299999833106995)
    pt3dadd(-141.82000732421875, -68.95500183105469, 34.0, 0.8299999833106995)
    pt3dadd(-142.15000915527344, -70.83500671386719, 36.0, 0.4699999988079071)
    pt3dadd(-141.37001037597656, -71.6050033569336, 36.0, 0.4699999988079071)
    pt3dadd(-140.54000854492188, -71.49500274658203, 36.0, 0.4699999988079071)
    pt3dadd(-139.1800079345703, -71.30500030517578, 37.0, 0.4699999988079071)
    pt3dadd(-137.760009765625, -70.93500518798828, 37.0, 0.4699999988079071)
    pt3dadd(-136.91000366210938, -70.875, 37.0, 0.4699999988079071)
    pt3dadd(-136.17001342773438, -69.8550033569336, 37.0, 0.4699999988079071)
    pt3dadd(-135.86000061035156, -68.9050064086914, 37.0, 0.4699999988079071)
    pt3dadd(-136.23001098632812, -67.99500274658203, 38.0, 0.4699999988079071)
    pt3dadd(-136.52000427246094, -67.70500183105469, 38.0, 0.4699999988079071)
    nseg = 10
    Ra = 100.0
}
dendrite[4] {
    pt3dclear()
    pt3dadd(-144.66000366210938, -66.2750015258789, 34.0, 0.8299999833106995)
    pt3dadd(-145.0800018310547, -67.26499938964844, 33.0, 0.8299999833106995)
    pt3dadd(-145.8400115966797, -68.16500091552734, 33.0, 0.8299999833106995)
    pt3dadd(-146.48001098632812, -69.70500183105469, 33.0, 0.8299999833106995)
    pt3dadd(-147.0900115966797, -71.98500061035156, 33.0, 0.8299999833106995)
    pt3dadd(-147.32000732421875, -74.2550048828125, 34.0, 0.8299999833106995)
    pt3dadd(-147.8900146484375, -76.91500091552734, 34.0, 0.8299999833106995)
    pt3dadd(-147.94000244140625, -78.9050064086914, 35.0, 0.8299999833106995)
    pt3dadd(-149.10000610351562, -79.79500579833984, 35.0, 0.8299999833106995)
    pt3dadd(-150.00001525878906, -80.48500061035156, 36.0, 0.8299999833106995)
    pt3dadd(-151.61000061035156, -83.1550064086914, 36.0, 0.8299999833106995)
    pt3dadd(-152.00001525878906, -83.83500671386719, 36.0, 0.8299999833106995)
    pt3dadd(-152.95001220703125, -85.34500122070312, 35.0, 0.8299999833106995)
    pt3dadd(-153.02000427246094, -86.96500396728516, 34.0, 0.8299999833106995)
    pt3dadd(-153.19000244140625, -88.2750015258789, 34.0, 0.8299999833106995)
    pt3dadd(-154.0800018310547, -90.5250015258789, 35.0, 0.8299999833106995)
    pt3dadd(-155.24000549316406, -91.4050064086914, 36.0, 0.8299999833106995)
    pt3dadd(-155.66000366210938, -92.9050064086914, 36.0, 0.8299999833106995)
    pt3dadd(-155.74000549316406, -94.0050048828125, 37.0, 0.8299999833106995)
    pt3dadd(-154.91000366210938, -95.07500457763672, 37.0, 0.8299999833106995)
    pt3dadd(-154.65000915527344, -96.44499969482422, 37.0, 0.8299999833106995)
    pt3dadd(-155.24000549316406, -98.59500122070312, 37.0, 0.8299999833106995)
    nseg = 10
    Ra = 100.0
}
dendrite[5] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 0.9300000071525574)
    pt3dadd(3.9499995708465576, 4.404999732971191, 3.0, 0.9300000071525574)
    pt3dadd(6.190000534057617, 5.595000267028809, 0.0, 0.9300000071525574)
    pt3dadd(7.630000114440918, 7.774999618530273, -1.0, 0.9300000071525574)
    pt3dadd(7.680000305175781, 7.9850006103515625, -1.0, 0.9300000071525574)
    nseg = 10
    Ra = 100.0
}
dendrite[6] {
    pt3dclear()
    pt3dadd(7.680000305175781, 7.9850006103515625, -1.0, 0.9300000071525574)
    pt3dadd(7.949999809265137, 10.295000076293945, -1.0, 1.090000033378601)
    pt3dadd(7.279999732971191, 13.46500015258789, -2.0, 1.090000033378601)
    pt3dadd(7.710000038146973, 16.174999237060547, -1.0, 0.9300000071525574)
    pt3dadd(8.65000057220459, 18.645000457763672, -1.0, 0.9300000071525574)
    pt3dadd(11.519999504089355, 19.385000228881836, -2.0, 0.7799999713897705)
    pt3dadd(13.519999504089355, 20.075000762939453, -3.0, 0.7799999713897705)
    pt3dadd(15.619999885559082, 22.315000534057617, -1.0, 0.7799999713897705)
    pt3dadd(17.56999969482422, 23.815000534057617, -1.0, 0.7799999713897705)
    nseg = 10
    Ra = 100.0
}
dendrite[7] {
    pt3dclear()
    pt3dadd(7.680000305175781, 7.9850006103515625, -1.0, 0.9300000071525574)
    pt3dadd(9.119999885559082, 9.575000762939453, -3.0, 0.8999999761581421)
    nseg = 10
    Ra = 100.0
}
dendrite[8] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 0.7799999713897705)
    pt3dadd(-1.3199999332427979, 0.25499963760375977, 3.0, 0.7799999713897705)
    pt3dadd(-4.180000305175781, -0.8850002288818359, 2.0, 0.7799999713897705)
    pt3dadd(-6.890000343322754, -2.255000114440918, 2.0, 0.7799999713897705)
    pt3dadd(-9.319999694824219, -3.375000238418579, 1.0, 0.7799999713897705)
    pt3dadd(-11.769999504089355, -4.414999961853027, 1.0, 0.7799999713897705)
    pt3dadd(-14.460000038146973, -6.485000133514404, 0.0, 0.7799999713897705)
    pt3dadd(-15.779999732971191, -7.744999885559082, -1.0, 0.7799999713897705)
    pt3dadd(-17.09000015258789, -9.28499984741211, -2.0, 0.7799999713897705)
    pt3dadd(-18.040000915527344, -12.195000648498535, -3.0, 0.7799999713897705)
    pt3dadd(-18.459999084472656, -14.53499984741211, -5.0, 0.7799999713897705)
    pt3dadd(-18.400001525878906, -16.235000610351562, -8.0, 0.6200000047683716)
    pt3dadd(-17.770000457763672, -19.154998779296875, -7.0, 0.4699999988079071)
    pt3dadd(-17.599998474121094, -21.654998779296875, -8.0, 0.4699999988079071)
    pt3dadd(-17.240001678466797, -24.744998931884766, -8.0, 0.4699999988079071)
    pt3dadd(-16.68000030517578, -27.94499969482422, -9.0, 0.4699999988079071)
    pt3dadd(-15.890000343322754, -30.28499984741211, -9.0, 0.4699999988079071)
    pt3dadd(-13.999999046325684, -33.54500198364258, -9.0, 0.4699999988079071)
    nseg = 10
    Ra = 100.0
}
dendrite[9] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 10.239999771118164)
    pt3dadd(1.7700002193450928, 3.515000343322754, 3.0, 8.289999961853027)
    pt3dadd(2.500000238418579, 7.155000686645508, 3.0, 5.889999866485596)
    pt3dadd(2.7800004482269287, 9.685001373291016, 3.0, 5.480000019073486)
    pt3dadd(2.879999876022339, 10.225000381469727, 3.0, 5.480000019073486)
    nseg = 10
    Ra = 100.0
}
dendrite[10] {
    pt3dclear()
    pt3dadd(2.879999876022339, 10.225000381469727, 3.0, 5.480000019073486)
    pt3dadd(2.370000123977661, 11.415000915527344, 3.0, 3.9000000953674316)
    pt3dadd(1.9199998378753662, 12.815000534057617, 4.0, 2.9000000953674316)
    pt3dadd(1.5899999141693115, 13.53499984741211, 4.0, 1.399999976158142)
    pt3dadd(0.5499999523162842, 16.645000457763672, 5.0, 1.399999976158142)
    pt3dadd(-1.1200001239776611, 18.96500015258789, 5.0, 1.090000033378601)
    pt3dadd(-2.200000047683716, 21.095001220703125, 6.0, 1.090000033378601)
    pt3dadd(-4.050000190734863, 23.69499969482422, 7.0, 1.090000033378601)
    pt3dadd(-6.050000190734863, 25.935001373291016, 8.0, 1.090000033378601)
    pt3dadd(-8.059999465942383, 28.115001678466797, 8.0, 1.090000033378601)
    pt3dadd(-9.889999389648438, 29.665000915527344, 9.0, 1.090000033378601)
    pt3dadd(-12.0, 32.23500061035156, 10.0, 1.090000033378601)
    pt3dadd(-13.50999927520752, 33.96500015258789, 10.0, 1.090000033378601)
    nseg = 10
    Ra = 100.0
}
dendrite[11] {
    pt3dclear()
    pt3dadd(-13.50999927520752, 33.96500015258789, 10.0, 1.090000033378601)
    pt3dadd(-14.09999942779541, 36.845001220703125, 11.0, 0.5699999928474426)
    pt3dadd(-14.199999809265137, 39.26499938964844, 11.0, 0.5699999928474426)
    pt3dadd(-14.819999694824219, 42.69499969482422, 12.0, 0.5699999928474426)
    pt3dadd(-16.020000457763672, 46.345001220703125, 12.0, 0.5699999928474426)
    pt3dadd(-17.040000915527344, 49.53499984741211, 12.0, 0.5699999928474426)
    pt3dadd(-17.770000457763672, 51.63500213623047, 11.0, 0.5699999928474426)
    pt3dadd(-18.020000457763672, 53.845001220703125, 12.0, 0.5699999928474426)
    pt3dadd(-19.09000015258789, 56.67499923706055, 11.0, 0.5699999928474426)
    pt3dadd(-20.259998321533203, 58.935001373291016, 12.0, 0.5699999928474426)
    pt3dadd(-21.69999885559082, 61.35499954223633, 13.0, 0.5699999928474426)
    pt3dadd(-21.739999771118164, 62.505001068115234, 12.0, 1.100000023841858)
    pt3dadd(-22.670000076293945, 64.65499877929688, 12.0, 1.100000023841858)
    pt3dadd(-22.489999771118164, 66.77499389648438, 14.0, 1.100000023841858)
    pt3dadd(-22.959999084472656, 68.13499450683594, 14.0, 1.100000023841858)
    pt3dadd(-23.68000030517578, 70.34500122070312, 14.0, 1.100000023841858)
    nseg = 10
    Ra = 100.0
}
dendrite[12] {
    pt3dclear()
    pt3dadd(-23.68000030517578, 70.34500122070312, 14.0, 1.100000023841858)
    pt3dadd(-22.639999389648438, 72.74500274658203, 15.0, 1.100000023841858)
    pt3dadd(-21.59000015258789, 75.26500701904297, 15.0, 1.100000023841858)
    pt3dadd(-21.40999984741211, 76.95500183105469, 15.0, 1.100000023841858)
    pt3dadd(-20.809999465942383, 78.22500610351562, 15.0, 1.100000023841858)
    pt3dadd(-20.399999618530273, 80.97500610351562, 14.0, 1.100000023841858)
    pt3dadd(-21.0, 82.9050064086914, 14.0, 1.100000023841858)
    pt3dadd(-21.259998321533203, 84.04500579833984, 14.0, 1.100000023841858)
    pt3dadd(-20.709999084472656, 86.08500671386719, 14.0, 1.100000023841858)
    pt3dadd(-20.759998321533203, 87.29500579833984, 14.0, 1.100000023841858)
    pt3dadd(-20.559999465942383, 89.70500183105469, 15.0, 1.100000023841858)
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    nseg = 10
    Ra = 100.0
}
dendrite[13] {
    pt3dclear()
    pt3dadd(-21.399999618530273, 239.19500732421875, 16.0, 0.41999998688697815)
    pt3dadd(-21.670000076293945, 239.7050018310547, 16.0, 0.41999998688697815)
    pt3dadd(-22.729999542236328, 241.0550079345703, 15.0, 0.41999998688697815)
    pt3dadd(-23.799999237060547, 242.5449981689453, 15.0, 0.41999998688697815)
    pt3dadd(-25.899999618530273, 243.8350067138672, 15.0, 0.41999998688697815)
    pt3dadd(-26.81999969482422, 245.03500366210938, 14.0, 0.41999998688697815)
    pt3dadd(-27.489999771118164, 246.40499877929688, 14.0, 0.41999998688697815)
    pt3dadd(-28.420000076293945, 247.3150177001953, 13.0, 0.41999998688697815)
    pt3dadd(-29.78999900817871, 248.87501525878906, 13.0, 0.41999998688697815)
    pt3dadd(-31.190000534057617, 250.3450164794922, 14.0, 0.41999998688697815)
    pt3dadd(-31.729999542236328, 252.26499938964844, 14.0, 0.41999998688697815)
    pt3dadd(-32.040000915527344, 253.3350067138672, 13.0, 0.41999998688697815)
    pt3dadd(-33.369998931884766, 254.50498962402344, 13.0, 0.41999998688697815)
    pt3dadd(-34.69000244140625, 254.60499572753906, 12.0, 0.41999998688697815)
    pt3dadd(-35.56999969482422, 255.98500061035156, 11.0, 0.41999998688697815)
    pt3dadd(-35.459999084472656, 257.96502685546875, 10.0, 0.41999998688697815)
    pt3dadd(-36.02000045776367, 259.21502685546875, 9.0, 0.41999998688697815)
    pt3dadd(-37.0, 261.0050048828125, 9.0, 0.41999998688697815)
    pt3dadd(-37.220001220703125, 262.7349853515625, 7.0, 0.41999998688697815)
    nseg = 10
    Ra = 100.0
}
dendrite[14] {
    pt3dclear()
    pt3dadd(-37.220001220703125, 262.7349853515625, 7.0, 0.41999998688697815)
    pt3dadd(-39.45000457763672, 263.41497802734375, 8.0, 0.36000001430511475)
    pt3dadd(-41.040000915527344, 263.18499755859375, 7.0, 0.36000001430511475)
    pt3dadd(-43.099998474121094, 262.9449768066406, 7.0, 0.36000001430511475)
    pt3dadd(-44.720001220703125, 262.05499267578125, 10.0, 0.36000001430511475)
    pt3dadd(-46.900001525878906, 261.7149963378906, 10.0, 0.36000001430511475)
    pt3dadd(-48.6300048828125, 261.81500244140625, 10.0, 0.36000001430511475)
    nseg = 10
    Ra = 100.0
}
dendrite[15] {
    pt3dclear()
    pt3dadd(-37.220001220703125, 262.7349853515625, 7.0, 0.41999998688697815)
    pt3dadd(-37.45000457763672, 264.8249816894531, 7.0, 0.41999998688697815)
    pt3dadd(-38.05000305175781, 266.1949768066406, 7.0, 0.41999998688697815)
    pt3dadd(-39.6300048828125, 266.04498291015625, 6.0, 0.36000001430511475)
    pt3dadd(-41.91999816894531, 267.0950012207031, 7.0, 0.36000001430511475)
    pt3dadd(-43.1300048828125, 268.66497802734375, 7.0, 0.36000001430511475)
    pt3dadd(-42.5, 270.4849853515625, 6.0, 0.36000001430511475)
    pt3dadd(-41.18000030517578, 272.0249938964844, 5.0, 0.36000001430511475)
    pt3dadd(-42.540000915527344, 273.9649963378906, 7.0, 0.36000001430511475)
    pt3dadd(-42.93000030517578, 276.10498046875, 5.0, 0.36000001430511475)
    pt3dadd(-42.61000061035156, 278.7749938964844, 6.0, 0.36000001430511475)
    nseg = 10
    Ra = 100.0
}
dendrite[16] {
    pt3dclear()
    pt3dadd(-21.399999618530273, 239.19500732421875, 16.0, 0.41999998688697815)
    pt3dadd(-21.110000610351562, 239.5050048828125, 16.0, 0.46000000834465027)
    pt3dadd(-20.880001068115234, 240.385009765625, 23.0, 0.44999998807907104)
    pt3dadd(-18.209999084472656, 238.2550048828125, 23.0, 0.44999998807907104)
    pt3dadd(-15.069999694824219, 240.64500427246094, 23.0, 0.44999998807907104)
    pt3dadd(-11.219999313354492, 240.7150115966797, 24.0, 0.44999998807907104)
    pt3dadd(-6.84999942779541, 241.16500854492188, 24.0, 0.44999998807907104)
    pt3dadd(-2.799999713897705, 241.66500854492188, 24.0, 0.44999998807907104)
    pt3dadd(-0.17999982833862305, 241.31500244140625, 24.0, 0.44999998807907104)
    pt3dadd(2.869999885559082, 243.125, 24.0, 0.44999998807907104)
    pt3dadd(3.869999885559082, 242.84500122070312, 24.0, 0.44999998807907104)
    pt3dadd(6.15000057220459, 243.28500366210938, 24.0, 0.44999998807907104)
    pt3dadd(6.220000267028809, 244.89500427246094, 27.0, 0.44999998807907104)
    pt3dadd(5.050000190734863, 246.0850067138672, 28.0, 0.44999998807907104)
    pt3dadd(2.5900001525878906, 246.56500244140625, 30.0, 0.44999998807907104)
    pt3dadd(3.190000534057617, 248.85499572753906, 31.0, 0.44999998807907104)
    pt3dadd(2.380000114440918, 251.63499450683594, 31.0, 0.44999998807907104)
    nseg = 10
    Ra = 100.0
}
dendrite[17] {
    pt3dclear()
    pt3dadd(-23.68000030517578, 70.34500122070312, 14.0, 1.100000023841858)
    pt3dadd(-24.06999969482422, 71.28500366210938, 16.0, 0.75)
    pt3dadd(-24.520000457763672, 72.7750015258789, 17.0, 0.75)
    pt3dadd(-24.619998931884766, 73.84500122070312, 17.0, 0.75)
    pt3dadd(-24.719999313354492, 74.44500732421875, 18.0, 0.75)
    pt3dadd(-25.139999389648438, 75.24500274658203, 18.0, 0.75)
    pt3dadd(-25.8799991607666, 75.41500091552734, 19.0, 0.7099999785423279)
    pt3dadd(-26.84000015258789, 75.76500701904297, 20.0, 0.7099999785423279)
    pt3dadd(-27.600000381469727, 76.18500518798828, 20.0, 0.7099999785423279)
    pt3dadd(-27.889999389648438, 76.66500091552734, 21.0, 0.7099999785423279)
    pt3dadd(-28.079999923706055, 77.6550064086914, 21.0, 0.7099999785423279)
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    nseg = 10
    Ra = 100.0
}
dendrite[18] {
    pt3dclear()
    pt3dadd(-53.54999923706055, 160.14500427246094, 33.0, 1.0399999618530273)
    pt3dadd(-53.630001068115234, 161.78500366210938, 33.0, 0.8299999833106995)
    pt3dadd(-53.43000030517578, 162.72500610351562, 33.0, 0.8299999833106995)
    pt3dadd(-53.939998626708984, 164.40499877929688, 33.0, 0.8299999833106995)
    pt3dadd(-53.06999969482422, 165.99501037597656, 33.0, 0.8299999833106995)
    pt3dadd(-52.38999938964844, 167.16500854492188, 33.0, 0.8299999833106995)
    pt3dadd(-52.04999923706055, 168.60501098632812, 33.0, 0.8299999833106995)
    pt3dadd(-52.47999954223633, 170.36500549316406, 33.0, 0.8299999833106995)
    pt3dadd(-53.70000076293945, 171.26499938964844, 34.0, 0.8299999833106995)
    pt3dadd(-54.25, 172.66500854492188, 35.0, 0.8299999833106995)
    pt3dadd(-54.689998626708984, 173.77500915527344, 35.0, 0.8299999833106995)
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    nseg = 10
    Ra = 100.0
}
dendrite[19] {
    pt3dclear()
    pt3dadd(-53.54999923706055, 160.14500427246094, 33.0, 1.0399999618530273)
    pt3dadd(-55.52000045776367, 161.18499755859375, 33.0, 0.7300000190734863)
    pt3dadd(-56.599998474121094, 162.5850067138672, 34.0, 0.7300000190734863)
    pt3dadd(-59.02000045776367, 164.385009765625, 34.0, 0.7300000190734863)
    pt3dadd(-59.959999084472656, 165.10501098632812, 34.0, 0.7300000190734863)
    pt3dadd(-62.22999954223633, 165.85501098632812, 36.0, 0.7300000190734863)
    pt3dadd(-64.05999755859375, 166.5449981689453, 36.0, 0.7300000190734863)
    pt3dadd(-65.8499984741211, 167.52500915527344, 37.0, 0.7300000190734863)
    pt3dadd(-67.9000015258789, 168.8350067138672, 37.0, 0.7300000190734863)
    pt3dadd(-69.97000122070312, 170.51499938964844, 38.0, 0.7300000190734863)
    pt3dadd(-72.48999786376953, 172.11500549316406, 38.0, 0.7300000190734863)
    pt3dadd(-74.88999938964844, 173.02500915527344, 38.0, 0.7300000190734863)
    pt3dadd(-77.62000274658203, 173.69500732421875, 38.0, 0.7300000190734863)
    pt3dadd(-79.33000183105469, 175.24501037597656, 38.0, 0.7300000190734863)
    pt3dadd(-81.36000061035156, 175.52500915527344, 39.0, 0.6200000047683716)
    pt3dadd(-82.79000091552734, 176.52500915527344, 40.0, 0.6200000047683716)
    pt3dadd(-84.62000274658203, 179.43499755859375, 40.0, 0.6200000047683716)
    pt3dadd(-87.5999984741211, 181.4650115966797, 40.0, 0.6200000047683716)
    nseg = 10
    Ra = 100.0
}
dendrite[20] {
    pt3dclear()
    pt3dadd(-13.50999927520752, 33.96500015258789, 10.0, 1.090000033378601)
    pt3dadd(-15.559999465942383, 34.165000915527344, 10.0, 0.5699999928474426)
    pt3dadd(-18.09000015258789, 35.46500015258789, 10.0, 0.5699999928474426)
    pt3dadd(-20.380001068115234, 36.8650016784668, 9.0, 0.5699999928474426)
    pt3dadd(-21.559999465942383, 37.96500015258789, 8.0, 0.5699999928474426)
    pt3dadd(-22.31999969482422, 38.03499984741211, 8.0, 0.8799999952316284)
    pt3dadd(-23.729999542236328, 38.54500198364258, 8.0, 0.8299999833106995)
    pt3dadd(-24.93000030517578, 39.1150016784668, 8.0, 0.8299999833106995)
    pt3dadd(-26.44999885559082, 39.96500015258789, 8.0, 0.8299999833106995)
    pt3dadd(-27.529998779296875, 40.79500198364258, 8.0, 0.8299999833106995)
    pt3dadd(-28.809999465942383, 41.30500030517578, 9.0, 0.8299999833106995)
    pt3dadd(-30.559999465942383, 41.92499923706055, 9.0, 0.8299999833106995)
    pt3dadd(-32.08000183105469, 42.76499938964844, 9.0, 0.8299999833106995)
    pt3dadd(-33.98999786376953, 42.73500061035156, 10.0, 0.8299999833106995)
    pt3dadd(-35.779998779296875, 42.88500213623047, 10.0, 0.8299999833106995)
    pt3dadd(-37.970001220703125, 43.45500183105469, 10.0, 0.7799999713897705)
    pt3dadd(-40.0099983215332, 44.084999084472656, 10.0, 0.7799999713897705)
    pt3dadd(-41.84000015258789, 44.564998626708984, 11.0, 0.7799999713897705)
    pt3dadd(-45.09000015258789, 45.19499969482422, 11.0, 0.7799999713897705)
    nseg = 10
    Ra = 100.0
}
dendrite[21] {
    pt3dclear()
    pt3dadd(-45.09000015258789, 45.19499969482422, 11.0, 0.7799999713897705)
    pt3dadd(-46.720001220703125, 44.564998626708984, 11.0, 0.7300000190734863)
    pt3dadd(-48.02000045776367, 44.26499938964844, 11.0, 0.7300000190734863)
    pt3dadd(-49.32999801635742, 44.44499969482422, 11.0, 0.7300000190734863)
    pt3dadd(-50.65999984741211, 43.73500061035156, 11.0, 0.7300000190734863)
    pt3dadd(-52.0099983215332, 42.80500030517578, 9.0, 0.7300000190734863)
    nseg = 10
    Ra = 100.0
}
dendrite[22] {
    pt3dclear()
    pt3dadd(-45.09000015258789, 45.19499969482422, 11.0, 0.7799999713897705)
    pt3dadd(-49.27000045776367, 47.005001068115234, 11.0, 0.7300000190734863)
    pt3dadd(-50.61000061035156, 47.875, 11.0, 0.7300000190734863)
    pt3dadd(-51.90999984741211, 48.57500076293945, 11.0, 0.7300000190734863)
    pt3dadd(-53.47999954223633, 49.154998779296875, 11.0, 0.7300000190734863)
    pt3dadd(-54.82999801635742, 49.665000915527344, 11.0, 0.7300000190734863)
    pt3dadd(-56.130001068115234, 50.435001373291016, 11.0, 0.7300000190734863)
    pt3dadd(-59.15999984741211, 51.19499969482422, 12.0, 0.7300000190734863)
    pt3dadd(-60.61000061035156, 51.80500030517578, 12.0, 0.7300000190734863)
    pt3dadd(-61.36000061035156, 53.04500198364258, 12.0, 0.7300000190734863)
    pt3dadd(-62.07999801635742, 53.57500076293945, 12.0, 0.7300000190734863)
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    nseg = 10
    Ra = 100.0
}
dendrite[23] {
    pt3dclear()
    pt3dadd(-147.95001220703125, 93.57499694824219, 23.0, 0.6200000047683716)
    pt3dadd(-149.36000061035156, 93.0949935913086, 23.0, 0.5199999809265137)
    pt3dadd(-152.760009765625, 93.43499755859375, 23.0, 0.5199999809265137)
    pt3dadd(-154.4300079345703, 94.125, 24.0, 0.5199999809265137)
    pt3dadd(-157.010009765625, 95.4749984741211, 24.0, 0.5199999809265137)
    pt3dadd(-157.78001403808594, 95.88499450683594, 24.0, 0.5199999809265137)
    pt3dadd(-161.0500030517578, 97.06499481201172, 24.0, 0.5199999809265137)
    pt3dadd(-164.24000549316406, 98.90499877929688, 24.0, 0.5199999809265137)
    pt3dadd(-165.5500030517578, 99.36499786376953, 24.0, 0.5199999809265137)
    pt3dadd(-167.5, 100.65499877929688, 23.0, 0.5199999809265137)
    pt3dadd(-168.94000244140625, 101.86499786376953, 23.0, 0.5199999809265137)
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    nseg = 10
    Ra = 100.0
}
dendrite[24] {
    pt3dclear()
    pt3dadd(-207.5800018310547, 118.2249984741211, 32.0, 0.41999998688697815)
    pt3dadd(-207.260009765625, 119.90499114990234, 33.0, 0.41999998688697815)
    pt3dadd(-205.3000030517578, 120.82498931884766, 33.0, 0.41999998688697815)
    pt3dadd(-203.1400146484375, 121.37499237060547, 34.0, 0.41999998688697815)
    pt3dadd(-201.69000244140625, 122.24500274658203, 35.0, 0.41999998688697815)
    pt3dadd(-199.69000244140625, 122.65499114990234, 36.0, 0.41999998688697815)
    nseg = 10
    Ra = 100.0
}
dendrite[25] {
    pt3dclear()
    pt3dadd(-199.69000244140625, 122.65499114990234, 36.0, 0.41999998688697815)
    pt3dadd(-198.4600067138672, 123.4749984741211, 36.0, 0.41999998688697815)
    pt3dadd(-197.70001220703125, 124.16500091552734, 36.0, 0.41999998688697815)
    pt3dadd(-197.74000549316406, 126.07498931884766, 37.0, 0.41999998688697815)
    pt3dadd(-197.94000244140625, 127.8550033569336, 37.0, 0.41999998688697815)
    nseg = 10
    Ra = 100.0
}
dendrite[26] {
    pt3dclear()
    pt3dadd(-199.69000244140625, 122.65499114990234, 36.0, 0.41999998688697815)
    pt3dadd(-197.54000854492188, 121.65499114990234, 36.0, 0.41999998688697815)
    pt3dadd(-196.73001098632812, 121.54499053955078, 36.0, 0.41999998688697815)
    nseg = 10
    Ra = 100.0
}
dendrite[27] {
    pt3dclear()
    pt3dadd(-207.5800018310547, 118.2249984741211, 32.0, 0.41999998688697815)
    pt3dadd(-209.3000030517578, 118.91500091552734, 30.0, 0.41999998688697815)
    pt3dadd(-211.19000244140625, 119.15499114990234, 31.0, 0.41999998688697815)
    pt3dadd(-212.36000061035156, 120.7649917602539, 32.0, 0.41999998688697815)
    pt3dadd(-214.1400146484375, 121.81499481201172, 33.0, 0.41999998688697815)
    pt3dadd(-216.25, 123.54499053955078, 33.0, 0.41999998688697815)
    pt3dadd(-217.61000061035156, 124.2750015258789, 34.0, 0.41999998688697815)
    pt3dadd(-219.47000122070312, 125.1050033569336, 35.0, 0.41999998688697815)
    pt3dadd(-220.6400146484375, 126.71500396728516, 33.0, 0.41999998688697815)
    pt3dadd(-222.32000732421875, 128.27499389648438, 34.0, 0.41999998688697815)
    pt3dadd(-223.8400115966797, 128.72500610351562, 34.0, 0.41999998688697815)
    pt3dadd(-225.8900146484375, 130.2349853515625, 34.0, 0.41999998688697815)
    pt3dadd(-227.45001220703125, 129.94500732421875, 33.0, 0.41999998688697815)
    pt3dadd(-230.0, 130.45498657226562, 33.0, 0.41999998688697815)
    pt3dadd(-231.90000915527344, 131.80499267578125, 34.0, 0.41999998688697815)
    nseg = 10
    Ra = 100.0
}
dendrite[28] {
    pt3dclear()
    pt3dadd(-147.95001220703125, 93.57499694824219, 23.0, 0.6200000047683716)
    pt3dadd(-148.3300018310547, 95.01499938964844, 23.0, 0.5199999809265137)
    pt3dadd(-149.0800018310547, 97.38499450683594, 23.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[29] {
    pt3dclear()
    pt3dadd(2.879999876022339, 10.225000381469727, 3.0, 5.480000019073486)
    pt3dadd(4.40000057220459, 10.735000610351562, 3.0, 2.859999895095825)
    pt3dadd(6.40000057220459, 11.685001373291016, 3.0, 1.5)
    pt3dadd(7.140000343322754, 12.255001068115234, 3.0, 1.399999976158142)
    pt3dadd(9.100000381469727, 14.125, 3.0, 1.25)
    pt3dadd(10.440000534057617, 15.415000915527344, 4.0, 1.25)
    pt3dadd(13.329999923706055, 16.385000228881836, 4.0, 1.25)
    pt3dadd(15.770000457763672, 17.354999542236328, 4.0, 1.25)
    pt3dadd(17.80000114440918, 18.005001068115234, 4.0, 1.25)
    pt3dadd(21.389999389648438, 19.135000228881836, 3.0, 1.25)
    nseg = 10
    Ra = 100.0
}
dendrite[30] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 3.319999933242798)
    pt3dadd(1.809999704360962, 0.7349998950958252, 4.0, 2.5899999141693115)
    pt3dadd(3.5799992084503174, -0.5850002765655518, 4.0, 2.2799999713897705)
    pt3dadd(4.69999885559082, -1.7450001239776611, 4.0, 2.2799999713897705)
    pt3dadd(5.739999771118164, -2.8350002765655518, 4.0, 2.2799999713897705)
    pt3dadd(6.479999542236328, -4.135000228881836, 4.0, 2.2799999713897705)
    nseg = 10
    Ra = 100.0
}
dendrite[31] {
    pt3dclear()
    pt3dadd(6.479999542236328, -4.135000228881836, 4.0, 2.2799999713897705)
    pt3dadd(8.09000015258789, -4.535000801086426, 4.0, 0.7799999713897705)
    pt3dadd(9.579999923706055, -4.975000381469727, 4.0, 0.5699999928474426)
    pt3dadd(11.299999237060547, -4.975000381469727, 4.0, 0.5699999928474426)
    pt3dadd(12.369998931884766, -5.265000343322754, 4.0, 0.5699999928474426)
    pt3dadd(13.779998779296875, -5.765000343322754, 5.0, 0.5699999928474426)
    pt3dadd(15.229999542236328, -6.465000152587891, 4.0, 0.5699999928474426)
    pt3dadd(16.260000228881836, -6.77500057220459, 4.0, 0.5699999928474426)
    nseg = 10
    Ra = 100.0
}
dendrite[32] {
    pt3dclear()
    pt3dadd(6.479999542236328, -4.135000228881836, 4.0, 2.2799999713897705)
    pt3dadd(6.840000152587891, -5.875, 5.0, 1.4500000476837158)
    pt3dadd(7.439998626708984, -7.244999885559082, 5.0, 1.25)
    pt3dadd(8.629999160766602, -8.035000801086426, 6.0, 1.25)
    pt3dadd(9.929998397827148, -9.244999885559082, 7.0, 1.25)
    pt3dadd(10.739999771118164, -10.61500072479248, 7.0, 1.25)
    pt3dadd(12.369998931884766, -11.494999885559082, 8.0, 1.25)
    pt3dadd(13.179998397827148, -12.945000648498535, 8.0, 1.25)
    pt3dadd(13.469999313354492, -14.605000495910645, 8.0, 1.1399999856948853)
    pt3dadd(13.94999885559082, -16.375, 8.0, 1.1399999856948853)
    pt3dadd(14.60999870300293, -18.115001678466797, 8.0, 1.1399999856948853)
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    nseg = 10
    Ra = 100.0
}
dendrite[33] {
    pt3dclear()
    pt3dadd(30.76999855041504, -77.18499755859375, 26.0, 1.190000057220459)
    pt3dadd(31.78999900817871, -77.4749984741211, 27.0, 0.7300000190734863)
    pt3dadd(32.55000305175781, -77.76499938964844, 27.0, 0.7300000190734863)
    pt3dadd(32.769996643066406, -78.94499969482422, 27.0, 0.7300000190734863)
    pt3dadd(31.85999870300293, -80.7750015258789, 27.0, 0.7300000190734863)
    pt3dadd(31.51999855041504, -83.09500122070312, 27.0, 0.7300000190734863)
    pt3dadd(32.62000274658203, -85.07499694824219, 28.0, 0.7300000190734863)
    pt3dadd(34.13999938964844, -85.90499877929688, 28.0, 0.7300000190734863)
    pt3dadd(34.900001525878906, -88.32499694824219, 29.0, 0.7300000190734863)
    pt3dadd(35.779998779296875, -92.625, 29.0, 0.7300000190734863)
    pt3dadd(36.650001525878906, -97.17500305175781, 28.0, 0.7300000190734863)
    pt3dadd(37.80000305175781, -99.34500122070312, 28.0, 0.7300000190734863)
    pt3dadd(38.769996643066406, -101.32499694824219, 29.0, 0.7300000190734863)
    pt3dadd(38.69999694824219, -105.26499938964844, 29.0, 0.7300000190734863)
    pt3dadd(38.599998474121094, -106.23500061035156, 29.0, 0.7300000190734863)
    pt3dadd(40.18000030517578, -107.125, 29.0, 0.7300000190734863)
    pt3dadd(42.220001220703125, -107.9749984741211, 30.0, 0.7300000190734863)
    pt3dadd(43.220001220703125, -108.91500091552734, 31.0, 0.7300000190734863)
    pt3dadd(44.409996032714844, -110.05500030517578, 31.0, 0.7300000190734863)
    nseg = 10
    Ra = 100.0
}
dendrite[34] {
    pt3dclear()
    pt3dadd(30.76999855041504, -77.18499755859375, 26.0, 1.190000057220459)
    pt3dadd(30.229997634887695, -77.81500244140625, 27.0, 0.9100000262260437)
    pt3dadd(29.42999839782715, -76.43499755859375, 27.0, 0.9100000262260437)
    pt3dadd(27.850000381469727, -77.40499877929688, 28.0, 0.9100000262260437)
    pt3dadd(27.239999771118164, -80.10499572753906, 28.0, 0.9100000262260437)
    pt3dadd(26.350000381469727, -81.43499755859375, 29.0, 0.9100000262260437)
    pt3dadd(26.149999618530273, -83.23500061035156, 30.0, 0.9100000262260437)
    pt3dadd(25.139997482299805, -86.42500305175781, 30.0, 0.9100000262260437)
    pt3dadd(25.35999870300293, -89.34500122070312, 30.0, 0.9100000262260437)
    pt3dadd(25.010000228881836, -92.05500030517578, 30.0, 0.9100000262260437)
    pt3dadd(24.42999839782715, -95.70500183105469, 30.0, 0.9100000262260437)
    pt3dadd(24.399999618530273, -97.96499633789062, 30.0, 0.9100000262260437)
    nseg = 10
    Ra = 100.0
}
dendrite[35] {
    pt3dclear()
    pt3dadd(24.399999618530273, -97.96499633789062, 30.0, 0.9100000262260437)
    pt3dadd(24.559999465942383, -98.95500183105469, 31.0, 0.9100000262260437)
    nseg = 10
    Ra = 100.0
}
dendrite[36] {
    pt3dclear()
    pt3dadd(24.399999618530273, -97.96499633789062, 30.0, 0.9100000262260437)
    pt3dadd(23.780000686645508, -97.56500244140625, 32.0, 0.8199999928474426)
    pt3dadd(22.260000228881836, -98.34500122070312, 33.0, 0.8199999928474426)
    pt3dadd(21.999998092651367, -100.08499908447266, 33.0, 0.8199999928474426)
    pt3dadd(20.8700008392334, -101.1449966430664, 34.0, 0.8199999928474426)
    pt3dadd(19.719999313354492, -102.59500122070312, 34.0, 0.8199999928474426)
    pt3dadd(18.5, -102.48500061035156, 35.0, 0.8199999928474426)
    pt3dadd(16.65999984741211, -103.19499969482422, 35.0, 0.8199999928474426)
    pt3dadd(15.779998779296875, -104.13500213623047, 36.0, 0.8199999928474426)
    pt3dadd(15.829999923706055, -104.84500122070312, 36.0, 0.8199999928474426)
    pt3dadd(15.269998550415039, -105.86499786376953, 37.0, 0.8199999928474426)
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    nseg = 10
    Ra = 100.0
}
dendrite[37] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 2.200000047683716)
    pt3dadd(0.23000025749206543, -0.3249998092651367, 3.0, 1.7300000190734863)
    pt3dadd(-1.2000000476837158, -2.0149998664855957, 4.0, 1.7300000190734863)
    pt3dadd(-2.3899996280670166, -3.945000171661377, 4.0, 1.7300000190734863)
    pt3dadd(-3.7900002002716064, -6.0849995613098145, 3.0, 1.7300000190734863)
    pt3dadd(-5.1399993896484375, -9.934999465942383, 3.0, 1.7300000190734863)
    pt3dadd(-6.689999580383301, -13.424999237060547, 3.0, 1.7300000190734863)
    pt3dadd(-7.940000534057617, -16.375, 3.0, 1.6200000047683716)
    pt3dadd(-9.65999984741211, -20.0049991607666, 3.0, 1.6200000047683716)
    pt3dadd(-10.529998779296875, -22.125, 2.0, 1.5)
    nseg = 10
    Ra = 100.0
}
dendrite[38] {
    pt3dclear()
    pt3dadd(-10.529998779296875, -22.125, 2.0, 1.5)
    pt3dadd(-9.979999542236328, -24.014999389648438, 2.0, 0.6899999976158142)
    pt3dadd(-9.789999008178711, -26.30500030517578, 2.0, 0.6899999976158142)
    pt3dadd(-9.639999389648438, -28.564998626708984, 1.0, 0.6899999976158142)
    pt3dadd(-9.389999389648438, -31.674999237060547, 1.0, 0.6899999976158142)
    pt3dadd(-9.229999542236328, -34.084999084472656, 1.0, 0.6899999976158142)
    pt3dadd(-9.920000076293945, -35.46500015258789, 1.0, 0.6899999976158142)
    pt3dadd(-10.049999237060547, -38.42499923706055, 0.0, 0.6899999976158142)
    pt3dadd(-9.729999542236328, -41.005001068115234, 0.0, 0.6899999976158142)
    pt3dadd(-9.719999313354492, -42.35499954223633, 0.0, 0.6899999976158142)
    pt3dadd(-9.479999542236328, -44.28499984741211, 0.0, 0.6899999976158142)
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    nseg = 10
    Ra = 100.0
}
dendrite[39] {
    pt3dclear()
    pt3dadd(-10.529998779296875, -22.125, 2.0, 1.5)
    pt3dadd(-11.920000076293945, -23.5049991607666, 2.0, 1.100000023841858)
    pt3dadd(-13.270000457763672, -25.514999389648438, 2.0, 1.100000023841858)
    pt3dadd(-13.969999313354492, -27.78499984741211, 2.0, 1.100000023841858)
    pt3dadd(-15.279998779296875, -29.19499969482422, 2.0, 1.100000023841858)
    pt3dadd(-15.65999984741211, -31.875, 2.0, 1.100000023841858)
    pt3dadd(-16.8799991607666, -34.8849983215332, 2.0, 1.100000023841858)
    pt3dadd(-17.529998779296875, -36.86499786376953, 2.0, 1.100000023841858)
    pt3dadd(-18.670000076293945, -38.32500076293945, 2.0, 1.0399999618530273)
    pt3dadd(-19.869998931884766, -39.915000915527344, 2.0, 1.0399999618530273)
    pt3dadd(-21.59000015258789, -41.125, 3.0, 1.0399999618530273)
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    nseg = 10
    Ra = 100.0
}
dendrite[40] {
    pt3dclear()
    pt3dadd(-62.68000030517578, -84.65499877929688, 16.0, 0.9300000071525574)
    pt3dadd(-64.27999877929688, -84.18499755859375, 18.0, 0.8299999833106995)
    pt3dadd(-65.20000457763672, -82.75499725341797, 18.0, 0.8299999833106995)
    pt3dadd(-65.6300048828125, -81.875, 18.0, 0.8299999833106995)
    pt3dadd(-65.84000396728516, -81.35499572753906, 20.0, 0.8299999833106995)
    nseg = 10
    Ra = 100.0
}
dendrite[41] {
    pt3dclear()
    pt3dadd(-62.68000030517578, -84.65499877929688, 16.0, 0.9300000071525574)
    pt3dadd(-62.63999938964844, -86.34500122070312, 17.0, 0.9300000071525574)
    pt3dadd(-65.18000030517578, -88.33499908447266, 17.0, 0.9300000071525574)
    pt3dadd(-66.76000213623047, -90.28499603271484, 18.0, 0.9300000071525574)
    pt3dadd(-68.43000030517578, -92.60499572753906, 18.0, 0.9300000071525574)
    pt3dadd(-70.22000122070312, -93.73500061035156, 18.0, 0.9300000071525574)
    pt3dadd(-72.62000274658203, -96.32499694824219, 18.0, 0.9300000071525574)
    pt3dadd(-74.6300048828125, -97.38500213623047, 18.0, 0.9300000071525574)
    pt3dadd(-75.66000366210938, -100.51499938964844, 18.0, 0.9300000071525574)
    pt3dadd(-76.20999908447266, -102.33499908447266, 18.0, 0.9300000071525574)
    pt3dadd(-79.0999984741211, -105.32499694824219, 19.0, 0.9300000071525574)
    pt3dadd(-79.13999938964844, -105.42500305175781, 19.0, 0.9300000071525574)
    nseg = 10
    Ra = 100.0
}
dendrite[42] {
    pt3dclear()
    pt3dadd(-79.13999938964844, -105.42500305175781, 19.0, 0.9300000071525574)
    pt3dadd(-79.61000061035156, -108.24500274658203, 17.0, 0.8299999833106995)
    pt3dadd(-81.4800033569336, -109.8949966430664, 16.0, 0.8299999833106995)
    pt3dadd(-80.94000244140625, -111.95500183105469, 16.0, 0.8299999833106995)
    pt3dadd(-81.70999908447266, -113.55500030517578, 16.0, 0.8299999833106995)
    pt3dadd(-82.26000213623047, -115.08499908447266, 18.0, 0.5199999809265137)
    pt3dadd(-82.4800033569336, -119.32499694824219, 19.0, 0.5199999809265137)
    pt3dadd(-83.9800033569336, -122.9949951171875, 19.0, 0.5199999809265137)
    pt3dadd(-84.86000061035156, -126.90499877929688, 20.0, 0.5199999809265137)
    pt3dadd(-86.01000213623047, -130.68499755859375, 20.0, 0.5199999809265137)
    pt3dadd(-89.05000305175781, -134.3249969482422, 21.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[43] {
    pt3dclear()
    pt3dadd(-89.05000305175781, -134.3249969482422, 21.0, 0.5199999809265137)
    pt3dadd(-90.4000015258789, -136.9449920654297, 21.0, 0.5199999809265137)
    pt3dadd(-89.86000061035156, -139.8249969482422, 22.0, 0.5199999809265137)
    pt3dadd(-91.04000091552734, -141.86500549316406, 21.0, 0.5199999809265137)
    pt3dadd(-91.76000213623047, -143.30499267578125, 23.0, 0.5199999809265137)
    pt3dadd(-93.4000015258789, -145.60499572753906, 23.0, 0.5199999809265137)
    pt3dadd(-95.37000274658203, -146.59500122070312, 23.0, 0.5199999809265137)
    pt3dadd(-97.76000213623047, -147.61500549316406, 24.0, 0.5199999809265137)
    pt3dadd(-99.63999938964844, -148.90499877929688, 25.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[44] {
    pt3dclear()
    pt3dadd(-99.63999938964844, -148.90499877929688, 25.0, 0.5199999809265137)
    pt3dadd(-101.5, -150.5050048828125, 25.0, 0.5199999809265137)
    pt3dadd(-103.63999938964844, -152.31500244140625, 27.0, 0.5199999809265137)
    pt3dadd(-106.06000518798828, -154.875, 28.0, 0.5199999809265137)
    pt3dadd(-106.62000274658203, -157.7949981689453, 29.0, 0.5199999809265137)
    pt3dadd(-108.02000427246094, -158.81500244140625, 28.0, 0.5199999809265137)
    pt3dadd(-108.91000366210938, -161.4149932861328, 27.0, 0.5199999809265137)
    pt3dadd(-109.45999908447266, -163.35499572753906, 27.0, 0.5199999809265137)
    pt3dadd(-110.20999908447266, -166.0050048828125, 28.0, 0.5199999809265137)
    pt3dadd(-110.80000305175781, -167.18499755859375, 27.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[45] {
    pt3dclear()
    pt3dadd(-110.80000305175781, -167.18499755859375, 27.0, 0.5199999809265137)
    pt3dadd(-112.08000183105469, -168.27499389648438, 28.0, 0.5199999809265137)
    pt3dadd(-113.02999877929688, -170.01499938964844, 29.0, 0.5199999809265137)
    pt3dadd(-113.0, -172.7449951171875, 30.0, 0.5199999809265137)
    pt3dadd(-113.45000457763672, -175.625, 30.0, 0.5199999809265137)
    pt3dadd(-113.45000457763672, -177.59500122070312, 31.0, 0.5199999809265137)
    pt3dadd(-113.94000244140625, -178.7449951171875, 31.0, 0.5199999809265137)
    pt3dadd(-116.13999938964844, -179.375, 31.0, 0.5199999809265137)
    pt3dadd(-117.8499984741211, -181.47500610351562, 30.0, 0.5199999809265137)
    pt3dadd(-117.45000457763672, -183.30499267578125, 32.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[46] {
    pt3dclear()
    pt3dadd(-117.45000457763672, -183.30499267578125, 32.0, 0.5199999809265137)
    pt3dadd(-116.02999877929688, -184.5850067138672, 32.0, 0.5199999809265137)
    pt3dadd(-113.66999816894531, -184.78500366210938, 33.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[47] {
    pt3dclear()
    pt3dadd(-117.45000457763672, -183.30499267578125, 32.0, 0.5199999809265137)
    pt3dadd(-118.30000305175781, -183.375, 31.0, 0.5199999809265137)
    pt3dadd(-118.56000518798828, -184.88499450683594, 31.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[48] {
    pt3dclear()
    pt3dadd(-110.80000305175781, -167.18499755859375, 27.0, 0.5199999809265137)
    pt3dadd(-110.93000030517578, -169.0850067138672, 28.0, 0.5199999809265137)
    pt3dadd(-110.93000030517578, -172.0449981689453, 29.0, 0.5199999809265137)
    pt3dadd(-111.06000518798828, -174.28500366210938, 29.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[49] {
    pt3dclear()
    pt3dadd(-99.63999938964844, -148.90499877929688, 25.0, 0.5199999809265137)
    pt3dadd(-103.20999908447266, -149.65499877929688, 27.0, 0.5199999809265137)
    pt3dadd(-106.20000457763672, -150.5449981689453, 27.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[50] {
    pt3dclear()
    pt3dadd(-89.05000305175781, -134.3249969482422, 21.0, 0.5199999809265137)
    pt3dadd(-91.25, -136.02499389648438, 21.0, 0.5199999809265137)
    pt3dadd(-94.48999786376953, -137.76499938964844, 22.0, 0.5199999809265137)
    pt3dadd(-97.1500015258789, -138.3249969482422, 22.0, 0.5199999809265137)
    pt3dadd(-99.55000305175781, -138.35499572753906, 23.0, 0.5199999809265137)
    pt3dadd(-102.87000274658203, -137.27499389648438, 23.0, 0.5199999809265137)
    pt3dadd(-104.6300048828125, -137.5449981689453, 22.0, 0.5199999809265137)
    pt3dadd(-104.66999816894531, -136.13499450683594, 22.0, 0.5199999809265137)
    pt3dadd(-106.51000213623047, -135.21499633789062, 24.0, 0.5199999809265137)
    nseg = 10
    Ra = 100.0
}
dendrite[51] {
    pt3dclear()
    pt3dadd(-79.13999938964844, -105.42500305175781, 19.0, 0.9300000071525574)
    pt3dadd(-81.51000213623047, -107.2249984741211, 21.0, 0.7300000190734863)
    pt3dadd(-83.01000213623047, -108.44499969482422, 21.0, 0.6700000166893005)
    pt3dadd(-83.69000244140625, -109.23500061035156, 21.0, 0.6700000166893005)
    pt3dadd(-84.04000091552734, -110.65499877929688, 21.0, 0.6700000166893005)
    pt3dadd(-85.02999877929688, -111.88500213623047, 22.0, 0.6700000166893005)
    pt3dadd(-86.25, -114.13500213623047, 22.0, 0.6700000166893005)
    pt3dadd(-87.81000518798828, -116.26499938964844, 25.0, 0.6700000166893005)
    pt3dadd(-90.63999938964844, -118.17500305175781, 25.0, 0.6700000166893005)
    nseg = 10
    Ra = 100.0
}
axon[0] {
    pt3dclear()
    pt3dadd(1.2400000095367432, 1.125, 3.0, 0.8299999833106995)
    pt3dadd(2.490000009536743, 2.895000457763672, 3.0, 0.8299999833106995)
    pt3dadd(3.200000524520874, 5.434999465942383, 2.0, 0.7300000190734863)
    pt3dadd(3.2099997997283936, 7.815000534057617, 1.0, 0.5699999928474426)
    pt3dadd(3.379999876022339, 10.045000076293945, 0.0, 0.5699999928474426)
    pt3dadd(2.870000123977661, 11.934999465942383, -1.0, 0.5699999928474426)
    pt3dadd(3.0899999141693115, 13.885000228881836, -1.0, 0.5699999928474426)
    pt3dadd(3.129999876022339, 15.42500114440918, -1.0, 0.5199999809265137)
    pt3dadd(2.569999933242798, 18.035001754760742, -2.0, 0.5199999809265137)
    pt3dadd(2.5400002002716064, 19.875001907348633, -2.0, 0.5199999809265137)
    pt3dadd(2.200000047683716, 21.274999618530273, -3.0, 0.5199999809265137)
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    Ra = 150.0
}
axon[1] {
    pt3dclear()
    pt3dadd(284.3800048828125, 409.4850158691406, 27.0, 0.4699999988079071)
    pt3dadd(284.5, 409.5250244140625, 28.0, 0.4699999988079071)
    pt3dadd(287.75, 414.4850158691406, 28.0, 0.20999999344348907)
    pt3dadd(292.1700134277344, 418.6150207519531, 29.0, 0.20999999344348907)
    pt3dadd(294.9800109863281, 419.70501708984375, 28.0, 0.20999999344348907)
    pt3dadd(296.82000732421875, 417.9750061035156, 27.0, 0.20999999344348907)
    pt3dadd(300.510009765625, 419.9850158691406, 28.0, 0.20999999344348907)
    pt3dadd(302.6100158691406, 423.39501953125, 28.0, 0.20999999344348907)
    pt3dadd(304.4700012207031, 425.06500244140625, 28.0, 0.20999999344348907)
    pt3dadd(308.1600036621094, 427.08502197265625, 29.0, 0.20999999344348907)
    pt3dadd(310.4100036621094, 428.39501953125, 29.0, 0.10000000149011612)
    pt3dadd(310.280029296875, 429.5950012207031, 31.0, 0.10000000149011612)
    pt3dadd(309.59002685546875, 429.9950256347656, 32.0, 0.10000000149011612)
    pt3dadd(310.2300109863281, 431.385009765625, 32.0, 0.10000000149011612)
    pt3dadd(309.760009765625, 432.8650207519531, 33.0, 0.10000000149011612)
    pt3dadd(308.58001708984375, 434.4250183105469, 34.0, 0.10000000149011612)
    pt3dadd(310.1000061035156, 435.8450012207031, 36.0, 0.10000000149011612)
    pt3dadd(310.7300109863281, 437.2450256347656, 38.0, 0.10000000149011612)
    pt3dadd(311.44000244140625, 438.5550231933594, 40.0, 0.10000000149011612)
    pt3dadd(312.1000061035156, 439.0550231933594, 42.0, 0.10000000149011612)
    pt3dadd(312.57000732421875, 440.32501220703125, 44.0, 0.10000000149011612)
    pt3dadd(313.44000244140625, 441.2450256347656, 44.0, 0.10000000149011612)
    Ra = 150.0
}
axon[2] {
    pt3dclear()
    pt3dadd(313.44000244140625, 441.2450256347656, 44.0, 0.10000000149011612)
    pt3dadd(322.0500183105469, 448.1750183105469, 49.0, 0.3100000023841858)
    pt3dadd(321.5, 448.875, 49.0, 0.3100000023841858)
    pt3dadd(320.8800048828125, 449.2750244140625, 51.0, 0.3100000023841858)
    pt3dadd(320.83001708984375, 449.9350280761719, 52.0, 0.3100000023841858)
    pt3dadd(321.4000244140625, 450.81500244140625, 53.0, 0.3100000023841858)
    pt3dadd(321.08001708984375, 451.7850036621094, 54.0, 0.3100000023841858)
    pt3dadd(321.07000732421875, 453.1150207519531, 55.0, 0.3100000023841858)
    pt3dadd(321.260009765625, 454.1150207519531, 56.0, 0.3100000023841858)
    pt3dadd(322.1200256347656, 454.5350036621094, 59.0, 0.3100000023841858)
    pt3dadd(323.3600158691406, 455.57501220703125, 60.0, 0.3100000023841858)
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    Ra = 150.0
}
axon[3] {
    pt3dclear()
    pt3dadd(347.8800048828125, 462.9150085449219, 102.0, 0.36000001430511475)
    pt3dadd(348.52001953125, 460.9150085449219, 100.0, 0.36000001430511475)
    pt3dadd(347.2200012207031, 459.9750061035156, 100.0, 0.36000001430511475)
    pt3dadd(346.8800048828125, 459.07501220703125, 98.0, 0.36000001430511475)
    pt3dadd(347.6500244140625, 458.57501220703125, 96.0, 0.36000001430511475)
    pt3dadd(347.52001953125, 457.7450256347656, 96.0, 0.36000001430511475)
    pt3dadd(346.4100036621094, 457.07501220703125, 96.0, 0.36000001430511475)
    pt3dadd(346.19000244140625, 456.1750183105469, 96.0, 0.36000001430511475)
    pt3dadd(346.5400085449219, 456.2850036621094, 96.0, 0.36000001430511475)
    pt3dadd(347.3900146484375, 455.7850036621094, 94.0, 0.36000001430511475)
    pt3dadd(348.1600036621094, 454.625, 94.0, 0.36000001430511475)
    pt3dadd(348.6100158691406, 453.6650085449219, 92.0, 0.36000001430511475)
    Ra = 150.0
}
axon[4] {
    pt3dclear()
    pt3dadd(347.8800048828125, 462.9150085449219, 102.0, 0.36000001430511475)
    pt3dadd(357.21002197265625, 464.19500732421875, 102.0, 0.36000001430511475)
    pt3dadd(356.6000061035156, 464.0950012207031, 104.0, 0.36000001430511475)
    pt3dadd(355.34002685546875, 463.6850280761719, 106.0, 0.36000001430511475)
    pt3dadd(353.96002197265625, 462.6549987792969, 108.0, 0.36000001430511475)
    pt3dadd(353.6500244140625, 463.20501708984375, 110.0, 0.36000001430511475)
    pt3dadd(354.75, 463.0550231933594, 112.0, 0.36000001430511475)
    pt3dadd(354.8600158691406, 463.70501708984375, 114.0, 0.36000001430511475)
    pt3dadd(355.6600036621094, 464.39501953125, 116.0, 0.36000001430511475)
    pt3dadd(355.20001220703125, 465.20501708984375, 118.0, 0.36000001430511475)
    pt3dadd(355.8100280761719, 464.6549987792969, 120.0, 0.36000001430511475)
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    Ra = 150.0
}
axon[5] {
    pt3dclear()
    pt3dadd(376.44000244140625, 470.385009765625, 149.0, 0.36000001430511475)
    pt3dadd(377.25, 471.1150207519531, 150.0, 0.36000001430511475)
    Ra = 150.0
}
axon[6] {
    pt3dclear()
    pt3dadd(377.25, 471.1150207519531, 150.0, 0.36000001430511475)
    pt3dadd(378.3100280761719, 470.9950256347656, 151.0, 0.36000001430511475)
    pt3dadd(379.70001220703125, 470.33502197265625, 152.0, 0.36000001430511475)
    pt3dadd(380.32000732421875, 469.70501708984375, 153.0, 0.36000001430511475)
    pt3dadd(381.1300048828125, 469.4750061035156, 154.0, 0.36000001430511475)
    pt3dadd(381.82000732421875, 469.2950134277344, 155.0, 0.36000001430511475)
    pt3dadd(382.33001708984375, 468.7750244140625, 156.0, 0.36000001430511475)
    Ra = 150.0
}
axon[7] {
    pt3dclear()
    pt3dadd(377.25, 471.1150207519531, 150.0, 0.36000001430511475)
    pt3dadd(376.3700256347656, 472.21502685546875, 150.0, 0.36000001430511475)
    pt3dadd(375.83001708984375, 473.3550109863281, 150.0, 0.36000001430511475)
    pt3dadd(375.4000244140625, 475.0550231933594, 150.0, 0.36000001430511475)
    pt3dadd(375.6200256347656, 475.8550109863281, 149.0, 0.36000001430511475)
    pt3dadd(375.5400085449219, 476.58502197265625, 150.0, 0.36000001430511475)
    pt3dadd(374.71002197265625, 477.7350158691406, 150.0, 0.36000001430511475)
    pt3dadd(373.8000183105469, 478.7250061035156, 151.0, 0.36000001430511475)
    pt3dadd(372.59002685546875, 480.1650085449219, 152.0, 0.36000001430511475)
    pt3dadd(371.57000732421875, 481.0450134277344, 153.0, 0.36000001430511475)
    pt3dadd(370.6200256347656, 482.08502197265625, 153.0, 0.36000001430511475)
    pt3dadd(370.25, 482.95501708984375, 154.0, 0.36000001430511475)
    pt3dadd(369.5600280761719, 483.58502197265625, 155.0, 0.36000001430511475)
    Ra = 150.0
}
axon[8] {
    pt3dclear()
    pt3dadd(376.44000244140625, 470.385009765625, 149.0, 0.36000001430511475)
    pt3dadd(375.70001220703125, 470.5350036621094, 148.0, 0.36000001430511475)
    pt3dadd(374.9700012207031, 471.125, 148.0, 0.36000001430511475)
    pt3dadd(374.09002685546875, 470.6150207519531, 149.0, 0.36000001430511475)
    pt3dadd(373.0600280761719, 470.5550231933594, 150.0, 0.36000001430511475)
    Ra = 150.0
}
axon[9] {
    pt3dclear()
    pt3dadd(313.44000244140625, 441.2450256347656, 44.0, 0.10000000149011612)
    pt3dadd(312.3100280761719, 442.20501708984375, 44.0, 0.10000000149011612)
    pt3dadd(311.1100158691406, 442.08502197265625, 45.0, 0.10000000149011612)
    Ra = 150.0
}
axon[10] {
    pt3dclear()
    pt3dadd(284.3800048828125, 409.4850158691406, 27.0, 0.4699999988079071)
    pt3dadd(284.84002685546875, 409.4750061035156, 27.0, 0.6899999976158142)
    Ra = 150.0
}
NeuronNanoBranch[0].spine_neck {
    pt3dclear()
    pt3dadd(-33.470001220703125, 7.684999942779541, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 8.055872917175293, 21.0, 0.5998328328132629)
    nseg = 2
    Ra = 150.0
}
NeuronNanoBranch[0].spine_head {
    pt3dclear()
    pt3dadd(-33.470001220703125, 8.055872917175293, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 7.989206314086914, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 7.922539710998535, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 7.855873107910156, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 7.789206504821777, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 7.72253942489624, 21.0, 0.5998328328132629)
    pt3dadd(-33.470001220703125, 7.655872821807861, 21.0, 0.5998328328132629)
    nseg = 7
    Ra = 150.0
}

//////////////////// End of geometry, nseg, Ra ///////////////////////////

//////////////////// Start of distance centre ////////////////////////////

// !! BUG: hardcoded rather than exported

// The distance centre
soma_ref.o(0).sec distance()

//////////////////// End of distance centre //////////////////////////////

//////////////////// Start of DLL check, "Import & Edit" measures ////////

isLoadedFromMainProgram = 1
{ makeSureDeclared("isBaseOrNanoStart", "isLoadedFromMainProgram = 0") }

{ makeSureDeclared("mechsDllUtils") }

strdef libErrMsg, libFileName
libErrMsg = "Please make sure the correct file \"nrnmech.dll\" is present in the same folder with this HOC file."
libFileName = "nrnmech.dll"
if (isLoadedFromMainProgram) {
    mechsDllUtils.ifMissingInThisFolderThenLoadDefaultMechsDllDependingOnCellType()
} else {
    platformId = unix_mac_pc()
    if (platformId == 1) {
        // Assuming NSG supercomputer environment
        libErrMsg = "Please make sure the file \"x86_64/.libs/libnrnmech.so\" was built successfully."
        libFileName = "libnrnmech.so"
    } else if (platformId == 3) {
        // Assuming desktop environment (empty by design)
    } else {
        codeContractViolation()
    }
}

// In contrast to MechTypeHelper, here we check for missing mechs and vars in the local DLL/SO library
begintemplate ReducedMechTypeHelper

    public checkForMissingMechs, getMechIdx, getVarIdx, getVarNameWithIndex, isWeightNetConVar, createMechStd
    
    external isAstrocyteOrNeuron, libErrMsg, libFileName
    external stringsEqual, printMsgAndRaiseError, codeContractViolation
    external eachItemInList
    
    strdef weightVarName
    
    objref mechTypes[1]
    
    objref this
    
    
    proc init() { local mechTypeIdx
        // This NetCon var requires some special logic when the release probability mechanics is enabled
        weightVarName = "weight"
        
        objref mechTypes[2]         // 0: "Distributed Membrane Mechanisms", 1: "Point Processes"
        for mechTypeIdx = 0, 1 {    //
            mechTypes[mechTypeIdx] = new MechanismType(mechTypeIdx)
        }
    }
    
    func checkForMissingMechs() { local enumDmPp, numArgs, i, isAnyMissing localobj notFoundExpMechNames, mechType, expMechNameStr
        strdef what
        
        enumDmPp = $1
        if (enumDmPp == 2) {
            codeContractViolation()
        }
        
        numArgs = numarg()
        
        notFoundExpMechNames = new List()
        
        mechType = mechTypes[enumDmPp]
        // !! it would be better to use Python's set here because:
        //    (a) MechanismType.select has O(n) complexity (see \nrn-master\src\nrniv\nrnmenu.cpp -> MechanismType::select)
        //    (b) "mechType.select(-1)" behaviour is undocumented
        for i = 2, numArgs {
            mechType.select(-1)
            mechType.select($si)
            if (mechType.selected() == -1) {
                notFoundExpMechNames.append(new String($si))
            }
        }
        
        isAnyMissing = (notFoundExpMechNames.count() != 0)
        if (isAnyMissing) {
            if (enumDmPp == 0) {
                what = "membrane mech(s)"
            } else {
                what = "point process(es)"
            }
            printf("\n\n    The following %s are used by this HOC file, but missing in \"%s\":\n\n", what, libFileName)
            for eachItemInList(expMechNameStr, notFoundExpMechNames) {
                printf("        * %s\n", expMechNameStr.s)
            }
        }
        
        return isAnyMissing
    }
    
    // We never hardcode mechIdx in this exported HOC file, but instead stick to mechName and convert it to mechIdx with this func given local DLL/SO library
    // Keep in sync with MechTypeHelper.getMechIdx
    func getMechIdx() { local enumDmPpFk localobj mechType
        strdef mechName
        enumDmPpFk = $1
        mechName = $s2
        if (enumDmPpFk != 2) {
            mechType = mechTypes[enumDmPpFk]
            mechType.select(mechName)
            return mechType.selected()
        } else {
            if (stringsEqual(mechName, "External Value")) {     // !! keep in sync with utils4FakeMech4GapJuncExtValue.mechName and .mechIdx
                return 0                                        //
            } else if (stringsEqual(mechName, "NetCon")) {  // !! keep in sync with utils4FakeMech4SynNetCon.mechName and .mechIdx
                return 1                                    //
            } else {
                codeContractViolation()
            }
        }
    }
    
    // We never hardcode varIdx in this exported HOC file, but instead stick to varName and convert it to varIdx with this func given local DLL/SO library
    func getVarIdx() { local enumDmPpFk, varType, mechIdx, numVars, varIdx localobj mechStd
        strdef mechName, varName, thisVarName, varTypeName
        
        enumDmPpFk = $1
        mechName = $s2
        varType = $3
        varName = $s4
        
        // !! maybe create a Python dict in ctor and use it here for performance
        mechIdx = getMechIdx(enumDmPpFk, mechName)
        mechStd = createMechStd(enumDmPpFk, mechIdx, varType)
        numVars = mechStd.count
        for varIdx = 0, numVars - 1 {
            mechStd.name(thisVarName, varIdx)
            if (stringsEqual(varName, thisVarName)) {
                break
            }
        }
        if (varIdx == numVars) {
            getVarTypeName(varType, varTypeName)
            // !! two imperfections here:
            //    1. this msg is printed for inhom and stoch vars only;
            //       as for homogen vars, we hit an error in MechanismStandard.set with less clear msg: "{varName} not in this property"
            //    2. in contrast to the missing mech names (see checkForMissingMechs), we report only the first missing var name
            printf("\n\n    The following var is used by this HOC file, but the mech defined in \"%s\" doesn't have it:\n\n        \"%s \\ %s \\ %s\"\n\n\n", libFileName, mechName, varTypeName, varName)
            printMsgAndRaiseError(libErrMsg)
        }
        
        return varIdx
    }
    
    // Keep in sync with MechTypeHelper.getVarNameWithIndex
    proc getVarNameWithIndex() { local arraySize, arrayIndex
        strdef varName
        varName = $s1
        arraySize = $2
        arrayIndex = $3
        if (arraySize == 1) {
            $s4 = varName
        } else {
            sprint($s4, "%s[%d]", varName, arrayIndex)
        }
    }
    
    func isWeightNetConVar() {
        strdef varName
        varName = $s1
        return stringsEqual(varName, weightVarName)
    }
    
    objref _fms
    
    obfunc createMechStd() { local enumDmPpFk, mechIdx, varType, mechTypeIdx localobj mechType, fms, nil
        strdef mechName, templName, hocCommand
        
        enumDmPpFk = $1
        mechIdx = $2
        varType = $3
        
        if (enumDmPpFk != 2) {
            mechTypeIdx = enumDmPpFk    // 0: "Distributed Membrane Mechanisms", 1: "Point Processes"
            mechType = new MechanismType(mechTypeIdx)
            mechType.select(mechIdx)
            mechType.selected(mechName)
            return new MechanismStandard(mechName, varType)
        } else {
            if (mechIdx == 0) {         // !! keep in sync with utils4FakeMech4GapJuncExtValue.mechIdx
                templName = "FakeMechanismStandardForExtValue"
            } else if (mechIdx == 1) {  // !! keep in sync with utils4FakeMech4SynNetCon.mechIdx
                templName = "FakeMechanismStandardForNetCon"
            } else {
                codeContractViolation()
            }
            sprint(hocCommand, "_fms = new %s()", templName)
            execute(hocCommand, this)
            fms = _fms
            _fms = nil
            return fms
        }
    }
    
    // All next staff is private
    
    
    // Keep in sync with MechTypeHelper.getVarTypeName
    proc getVarTypeName() { local varType
        varType = $1
        
        if (varType == 1) {
            $s2 = "PARAMETER"
        } else if (varType == 2) {
            $s2 = "ASSIGNED"
        } else if (varType == 3) {
            $s2 = "STATE"
        } else {
            codeContractViolation()
        }
    }
    
endtemplate ReducedMechTypeHelper

objref mth
mth = new ReducedMechTypeHelper()

isAnyPpMissing = mth.checkForMissingMechs(1, "Gap_neuron")
if (isAnyPpMissing) {
    printf("\n\n")
    printMsgAndRaiseError(libErrMsg)
}
// !! for better user experience, we should add two more checks here:
//    1. given mech used in HOC, all referred var names exist in DLL/SO (see the comment in mth.getVarIdx just before printMsgAndRaiseError);
//    2. given mech array var used in HOC, all referred array idxs don't exceed the array size in DLL/SO

{ makeSureDeclared("math", "objref %s", "%s = new ReducedBasicMath()") }
{ makeSureDeclared("rngUtils") }

objref mmAllComps, gjmAllGapJuncSets, smAllSynSets
objref _comp

//////////////////// End of DLL check, "Import & Edit" measures //////////

//////////////////// Start of inhom and stoch library ////////////////////

begintemplate VarLibId
    
    // !! isDmOrTapPart, enumPpRoleOrMinus1, mechName, varTypeIdx, varName, arraySize
    
    public enumDmPpFk, compIdx, mechIdx, varType, varIdx, arrayIndex
    public isGapJuncOrSyn, tapSetIdx    // For taps only ("-1" for biophys vars)
    public isEqual
    
    external mth
    external codeContractViolation
    // external enumArgTypes        // !! maybe export and use this
    
    
    proc init() { local argType5, argType7, enumArgTypes_number, enumArgTypes_strdef
        strdef mechName, varName
        
        argType5 = argtype(5)
        argType7 = argtype(7)
        
        enumArgTypes_number = 0
        enumArgTypes_strdef = 2
        
        enumDmPpFk = $1
        isGapJuncOrSyn = $2     // Must be "-1" for biophys vars
        tapSetIdx = $3          //
        compIdx = $4
        
        if (argType5 == enumArgTypes_number) {
            // Passed in most cases
            mechIdx = $5
        } else if (argType5 == enumArgTypes_strdef) {
            // Passed only in the exported HOC file (see py:GensForInhomAndStochModels._createVarLibIdCtorCall)
            mechName = $s5
            mechIdx = mth.getMechIdx(enumDmPpFk, mechName)
        } else {
            codeContractViolation()
        }
        
        varType = $6
        
        if (argType7 == enumArgTypes_number) {
            // Passed in most cases
            varIdx = $7
        } else if (argType7 == enumArgTypes_strdef) {
            // Passed only in the exported HOC file (except gap junc ext value because its name is dynamic)
            varName = $s7
            varIdx = mth.getVarIdx(enumDmPpFk, mechName, varType, varName)
        } else {
            codeContractViolation()
        }
        
        arrayIndex = $8
        
        if (enumDmPpFk == 0) {
            if (isGapJuncOrSyn != -1 || tapSetIdx != -1) {
                codeContractViolation()
            }
        } else {
            if (isGapJuncOrSyn == -1 || tapSetIdx == -1) {
                codeContractViolation()
            }
        }
    }
    
    func isEqual() { localobj other
        other = $o1
        return (enumDmPpFk == other.enumDmPpFk && isGapJuncOrSyn == other.isGapJuncOrSyn && tapSetIdx == other.tapSetIdx && compIdx == other.compIdx && mechIdx == other.mechIdx && varType == other.varType && varIdx == other.varIdx && arrayIndex == other.arrayIndex)
    }
    
endtemplate VarLibId

begintemplate ReducedInhomAndStochTarget

    public makeInhom, makeStoch, isEqual, applyBiophysInhomogeneity, applyTapInhomogeneity, setPlayIfPossible, stopPlayingVars, onInit, onStep
    public varLibId, isDmOrTapPart, isGapJuncOrSyn, tapSetIdx
    public segmentationHelper, distFuncHelper, boundingHelper, stochFuncHelper
    public isInhom, distFuncCatIdx, distFuncIdx, isStoch, stochFuncCatIdx, stochFuncIdx
    public seh
    
    external mmAllComps, gjmAllGapJuncSets, smAllSynSets
    external mth, rngUtils
    external codeContractViolation
    external eachItemInList, eachSecInList, eachSegmInSecList
    
    // "init" args
    objref varLibId
    isDmOrTapPart = -1
    isGapJuncOrSyn = -1         // For taps only ("-1" for biophys vars)
    tapSetIdx = -1              //
    enumPpRoleOrMinus1 = -1     //
    strdef mechName
    strdef varName
    arraySize = -1
    
    // "make*" args
    objref segmentationHelper, distFuncHelper
    objref boundingHelper, stochFuncHelper
    isInhom = -1
    distFuncCatIdx = -1
    distFuncIdx = -1
    isStoch = -1
    stochFuncCatIdx = -1
    stochFuncIdx = -1
    
    objref list_ref
    objref trgTapSet, allGapJuncs, allSyns, seh
    
    objref baseMechStd, tempMechStd
    
    objref this
    
    
    proc init() { local varTypeIdx localobj comp
    
        varLibId = $o1
        
        isDmOrTapPart = (varLibId.enumDmPpFk == 0)
        isGapJuncOrSyn = varLibId.isGapJuncOrSyn
        tapSetIdx = varLibId.tapSetIdx
        
        comp = getComp()
        
        if (isDmOrTapPart) {
            if (isGapJuncOrSyn != -1 || tapSetIdx != -1) {
                codeContractViolation()
            }
            list_ref = comp.list_ref
        } else {
            if (isGapJuncOrSyn == -1) {
                codeContractViolation()
            }
            if (isGapJuncOrSyn) {
                trgTapSet = gjmAllGapJuncSets.o(tapSetIdx)
                allGapJuncs = trgTapSet.allGapJuncs
            } else {
                trgTapSet = smAllSynSets.o(tapSetIdx)
                allSyns = trgTapSet.allSyns
                seh = trgTapSet.seh
            }
        }
        
        // !! rename enumPpRoleOrMinus1 to enumTapPartOrMinus1
        if (varLibId.enumDmPpFk == 0) {
            enumPpRoleOrMinus1 = -1
        } else if (varLibId.enumDmPpFk < 3) {
            enumPpRoleOrMinus1 = comp.enumPpRole
        } else {
            codeContractViolation()
        }
        
        varTypeIdx = varLibId.varType - 1
        baseMechStd = comp.mechStds[varLibId.mechIdx][varTypeIdx]
        
        // !! need to test if using the "Fake*" templates with "in-set-out" workflow we still achieve better performance
        //    than "sprint"-ing and executing a HOC-command for direct var assignment
        tempMechStd = mth.createMechStd(varLibId.enumDmPpFk, varLibId.mechIdx, varLibId.varType)
        
        tempMechStd.name(mechName)
        arraySize = tempMechStd.name(varName, varLibId.varIdx)
    }
    
    proc makeInhom() {
        segmentationHelper = $o1
        distFuncHelper = $o2
        distFuncCatIdx = $3
        distFuncIdx = $4
        isInhom = 1
        setIsPlayable()
    }
    
    proc makeStoch() {
        boundingHelper = $o1
        stochFuncHelper = $o2
        stochFuncCatIdx = $3
        stochFuncIdx = $4
        isStoch = 1
        setIsPlayable()
    }
    
    func isEqual() { localobj otherVarLibId
        otherVarLibId = $o1
        return varLibId.isEqual(otherVarLibId)
    }
    
    // Keep in sync with MechComp.applySegmentationAndInhomogeneity
    proc applyBiophysInhomogeneity() { local x, dist, y
    
        if (!isDmOrTapPart || !isInhom || varLibId.varType == -1) { // -1: "GLOBAL"
            codeContractViolation()
        }
        
        distFuncHelper.onJustBeforeFirstSection()
        for eachSecInList(list_ref) {
            distFuncHelper.onJustBeforeNewSection()
            for (x, 0) {
                tempMechStd.in(x)
                dist = distance(x)
                y = distFuncHelper.calculateAt(dist)
                tempMechStd.set(varName, y, varLibId.arrayIndex)
                tempMechStd.out(x)
            }
        }
        distFuncHelper.onJustAfterLastSection()
    }
    
    // Keep in sync with InhomAndStochTarget.restoreInhomogeneity
    proc applyTapInhomogeneity() { localobj comp
        if (isDmOrTapPart || !isInhom) {
            codeContractViolation()
        }
        
        comp = getComp()
        comp.applyInhomogeneity(mechName, varLibId.varType, varName, arraySize, varLibId.arrayIndex, distFuncHelper, trgTapSet)
    }
    
    _x = -1
    
    // Keep in sync with InhomAndStochTarget.setPlayIfPossible
    func setPlayIfPossible() { local homogenValue
        strdef hocCommand
        
        if (!isPlayable) {
            return 0
        }
        
        for eachSegmInSecList(&_x, list_ref) {
            sprint(hocCommand, "stochFuncHelper.rng.play(&%s(_x))", varName)
            execute(hocCommand, this)
        }
        
        homogenValue = baseMechStd.get(varName, varLibId.arrayIndex)
        distFuncHelper.setMeanOnStartPlaying(homogenValue)
        
        return 1
    }
    
    // Keep in sync with InhomAndStochTarget.stopPlayingVars
    proc stopPlayingVars() {
        if (!isPlayable) {
            return
        }
        
        // NEURON docs say: "To disconnect the Random object from its list of variables, either the variables or the Random object must be destroyed."
        // But actually it doesn't seem like there's any way to destroy the "played" Random object without dire consequences.
        
        // !! BUG: Hanging here, and the same effect if we just assign "nil" to stochFuncHelper.rng
        //         No hanging if we don't call stochFuncHelper.rng.play upstream
        //         It looks like we have only two options to disable the "play" effect:
        //         1. "create" all sections in list_ref from scratch (replacing the old sections) - and only after this we can destroy the old RNG
        //         2. Adjust RNG to produce constant and copy the generator to some storage just to keep alive while we replace stochFuncHelper.rng
        //            (If we play the same var with multiple RNG-s, only the last one has visible effect)
        //            But after this, we won't be able to make the var inhomogeneous
        //         Alternatively, we could use Vector.play() and Vector.play_remove() instead of Random.play(),
        //         but this requires some troublesome orchestration and looks like not giving an advantage compared to the non-played mode in our case
        stochFuncHelper.rng = rngUtils.getFor_stochFunc_withUniqueSeed()
        
        distFuncHelper.resetMeanOnStopPlaying()
    }
    
    // Keep in sync with InhomAndStochTarget.onInit
    proc onInit() {
        if (!isStoch) {
            return
        }
        
        // One unused value to set up the generator and the colourizer
        boundingHelper.generateFirstBoundedValue(stochFuncHelper)
        
        if (!isDmOrTapPart && !isGapJuncOrSyn) {
            // For synapses, stochastic vars can hold the values from the previous simulation for a long time before the first synaptic event on this simulation,
            // and this is why we restore the base values here for reproducibility of the experiments
            // Notice that for biophysics and gap junctions, stochastic vars change their values on each iteration, so there is no need to restore their base values here
            makeStepOrRestoreBaseValues(0)
        }
    }
    
    proc onStep() {
        makeStepOrRestoreBaseValues(1)
    }
    
    // All next staff is private
    
    
    // Keep in sync with InhomAndStochTarget.makeStepOrRestoreBaseValues and "applyInhomogeneity"
    // !! maybe BUG: (ASSIGNED or STATE) and (isInhom and isStoch) => the inhom model is applied on each iter;
    //               maybe the correct behaviour would be to ignore the inhom model (especially if VerbatimDistFunc) and just to take the current value and add the noise to it
    proc makeStepOrRestoreBaseValues() { local isStepOrRestore, isStoch_, homogenValue
        
        isStepOrRestore = $1
        
        if (isStepOrRestore) {
            isStoch_ = isStoch
            
            if (isPlayable) {
                return
            }
            if (!isStoch_) {
                if (isInhom) {
                    return
                } else {
                    codeContractViolation()
                }
            }
        } else {
            isStoch_ = 0
        }
        
        if (isInhom) {
            distFuncHelper.onJustBeforeFirstSection()
        } else {
            homogenValue = baseMechStd.get(varName, varLibId.arrayIndex)
        }
        
        if (isDmOrTapPart) {
            dmStep(isStoch_, homogenValue)
        } else {
            if (isGapJuncOrSyn) {
                gapJuncPartStep(isStoch_, homogenValue)
            } else {
                synPartStepOrRestore(isStepOrRestore, isStoch_, homogenValue)
            }
        }
        
        if (isInhom) {
            distFuncHelper.onJustAfterLastSection()
        }
    }
    
    proc dmStep() { local isStoch_, homogenValue, x, dist, value
        
        isStoch_ = $1
        homogenValue = $2
        
        for eachSecInList(list_ref) {
            if (isInhom) {
                distFuncHelper.onJustBeforeNewSection()
            }
            for (x, 0) {
                // The base value
                if (isInhom) {
                    dist = distance(x)
                    value = distFuncHelper.calculateAt(dist)
                } else {
                    value = homogenValue
                }
                
                // The additive noise
                if (isStoch_) {
                    value += boundingHelper.generateNextBoundedValue(stochFuncHelper)
                }
                
                // This approach is 20-30% faster than "sprint"-ing a HOC-command
                // of type "varName(x) = value" or "varName[varLibId.arrayIndex](x) = value" and then "execute"-ing it
                tempMechStd.in(x)
                tempMechStd.set(varName, value, varLibId.arrayIndex)
                tempMechStd.out(x)
            }
        }
    }
    
    // !! code dup. with proc synPartStepOrRestore
    proc gapJuncPartStep() { local isStoch_, homogenValue, value localobj prevSec_ref, gapJunc, gapJuncPart, nil
        
        isStoch_ = $1
        homogenValue = $2
        
        if (varLibId.enumDmPpFk == 0) {
            codeContractViolation()
        }
        
        prevSec_ref = nil
        for eachItemInList(gapJunc, allGapJuncs) {
            if (gapJunc.sec_ref != prevSec_ref && isInhom) {
                distFuncHelper.onJustBeforeNewSection()
            }
            
            gapJuncPart = gapJunc.getPointProcess(enumPpRoleOrMinus1)
            
            // The base value
            if (isInhom) {
                value = distFuncHelper.calculateAt(gapJunc.dist)
            } else {
                value = homogenValue
            }
            
            // The additive noise
            if (isStoch_) {
                value += boundingHelper.generateNextBoundedValue(stochFuncHelper)
            }
            
            // !! if gapJuncPart is an External Value, then see the comment for tempMechStd in ctor
            tempMechStd.in(gapJuncPart)
            tempMechStd.set(varName, value, varLibId.arrayIndex)
            tempMechStd.out(gapJuncPart)
            
            prevSec_ref = gapJunc.sec_ref
        }
    }
    
    // !! code dup. with proc gapJuncPartStep
    proc synPartStepOrRestore() { local isStepOrRestore, isStoch_, homogenValue, isWeightVar, value localobj prevSec_ref, syn, synPart, nil
        
        isStepOrRestore = $1
        isStoch_ = $2
        homogenValue = $3
        
        isWeightVar = mth.isWeightNetConVar(varName)
        prevSec_ref = nil
        for eachItemInList(syn, allSyns) {
            if (syn.sec_ref != prevSec_ref && isInhom) {
                distFuncHelper.onJustBeforeNewSection()
            }
            
            if (isStepOrRestore && !syn.sefwPp.isAnyEventsOnThisIter) {
                prevSec_ref = syn.sec_ref
                continue
            }
            
            synPart = syn.getPointProcess(enumPpRoleOrMinus1)
            
            // The base value
            if (isInhom) {
                value = distFuncHelper.calculateAt(syn.dist)
            } else {
                value = homogenValue
            }
            
            // The additive noise
            if (isStoch_) {
                value += boundingHelper.generateNextBoundedValue(stochFuncHelper)
            }
            
            // !! if synPart is a NetCon, then see the comment for tempMechStd in ctor
            tempMechStd.in(synPart)
            tempMechStd.set(varName, value, varLibId.arrayIndex)
            tempMechStd.out(synPart)
            
            if (varLibId.enumDmPpFk == 2 && isWeightVar) {
                syn.sefwNetCon.weight = value
                // Here we could also have similar logic to sync the value from "syn.netCon.@release_probability" to "syn.sefwPp.release_probability",
                // but it's not needed because the button "Define stoch model" is hidden for "@release_probability"
            }
            
            prevSec_ref = syn.sec_ref
        }
    }
    
    // Keep in sync with InhomAndStochTarget.setIsPlayable
    proc setIsPlayable() {
        if (!isStoch) {
            isPlayable = 0
            return          // Just a shortcut because boundingHelper used below is nil
        }
        isPlayable = (!isInhom && stochFuncCatIdx == 0 && (stochFuncIdx == 0 || stochFuncIdx == 1) && boundingHelper.isUntouched())
        
        // !! not implemented - see the comment in stopPlayingVars
        isPlayable = 0
    }
    
    obfunc getComp() { local compIdx localobj allTapSets
        
        compIdx = varLibId.compIdx
        
        if (isDmOrTapPart) {
            return mmAllComps.o(compIdx)
        } else {
            if (isGapJuncOrSyn) {
                allTapSets = gjmAllGapJuncSets
            } else {
                allTapSets = smAllSynSets
            }
            return allTapSets.o(tapSetIdx).allComps.o(compIdx)
        }
    }
    
endtemplate ReducedInhomAndStochTarget

begintemplate ReducedInhomAndStochLibrary

    public onInhomCreate, onStochApply, applyAllBiophysInhomModels, applyAllInhomModelsInTheTapSet, isAnyStochVarsForSynsInTheSet, isAnyStochVars
    public activeSpecVars
    
    external eachItemInList
    external codeContractViolation
    
    objref activeSpecVars
    
    
    proc init() {
        activeSpecVars = new List()
    }
    
    // in: varLibId, segmentationHelper, distFuncHelper, distFuncCatIdx, distFuncIdx
    proc onInhomCreate() { localobj actSpecVar
        actSpecVar = createActiveSpecVar($o1)
        actSpecVar.makeInhom($o2, $o3, $4, $5)
    }
    
    // in: varLibId, boundingHelper, stochFuncHelper, stochFuncCatIdx, stochFuncIdx
    proc onStochApply() { localobj actSpecVar
        actSpecVar = findOrCreateActiveSpecVar($o1)
        actSpecVar.makeStoch($o2, $o3, $4, $5)
    }
    
    proc applyAllBiophysInhomModels() { localobj actSpecVar
        for eachItemInList(actSpecVar, activeSpecVars) {
            if (!actSpecVar.isDmOrTapPart || !actSpecVar.isInhom || actSpecVar.isStoch) {
                codeContractViolation()
            }
            actSpecVar.applyBiophysInhomogeneity()
        }
    }
    
    // !! think about replacing this proc with "applyAllInhomModelsInAllTapSets" (no args, called once just before "Cleanup" paragraph)
    proc applyAllInhomModelsInTheTapSet() { local isGapJuncOrSyn, tapSetIdx localobj actSpecVar
        isGapJuncOrSyn = $1
        tapSetIdx = $2
        for eachItemInList(actSpecVar, activeSpecVars) {
            if (actSpecVar.isDmOrTapPart || !actSpecVar.isInhom || actSpecVar.isGapJuncOrSyn != isGapJuncOrSyn || actSpecVar.tapSetIdx != tapSetIdx) {
                continue
            }
            actSpecVar.applyTapInhomogeneity()
        }
    }
    
    func isAnyStochVarsForSynsInTheSet() { local isFound localobj seh, actSpecVar
        seh = $o1
        isFound = 0
        for eachItemInList(actSpecVar, activeSpecVars) {
            if (actSpecVar.seh != seh) {
                continue    // Bio, gap junc, syn (different set)
            }
            if (actSpecVar.isStoch) {
                // Don't replace with "return 1" because iterators cannot return a value (Segmentation violation)
                isFound = 1
                break
            }
        }
        return isFound
    }
    
    func isAnyStochVars() { local idx
        for idx = 0, activeSpecVars.count() - 1 {
            if (activeSpecVars.o(idx).isStoch) {
                return 1
            }
        }
        return 0
    }
    
    // All next staff is private
    
    
    // in: varLibId
    // out: actSpecVar
    obfunc createActiveSpecVar() { localobj actSpecVar
        actSpecVar = new ReducedInhomAndStochTarget($o1)
        activeSpecVars.append(actSpecVar)
        return actSpecVar
    }
    
    // in: varLibId
    // out: actSpecVar
    obfunc findOrCreateActiveSpecVar() { local idx localobj actSpecVar
        // Not many activeSpecVars-s, so hashless comparison works just fine
        for idx = 0, activeSpecVars.count() - 1 {
            actSpecVar = activeSpecVars.o(idx)
            if (actSpecVar.isEqual($o1)) {
                return actSpecVar
            }
        }
        return createActiveSpecVar($o1)
    }
    
endtemplate ReducedInhomAndStochLibrary

objref inhomAndStochLibrary
inhomAndStochLibrary = new ReducedInhomAndStochLibrary()

objref _vecOfVals, _listOfStrs

//////////////////// End of inhom and stoch library //////////////////////

//////////////////// Start of biophys: Compartments //////////////////////

begintemplate ReducedMechComp

    public initHomogenBiophysics
    public name, list_ref, isMechInserted, mechStds
    
    external math
    external eachSecInList
    
    strdef name
    objref list_ref
    double isMechInserted[1]
    objref mechStds[1][1]
    
    objref mechType
    numMechs = -1
    
    
    proc init() {
        name = $s1
        list_ref = $o2
        
        mechType = new MechanismType(0) // 0: "Distributed Membrane Mechanisms"
        numMechs = mechType.count
        
        double isMechInserted[numMechs]
        objref mechStds[numMechs][3]    // 0: "PARAMETER", 1: "ASSIGNED", 2: "STATE"
    }
    
    // Keep in sync with MechComp.applyHomogenChangesToDirtyMechs in the main program
    proc initHomogenBiophysics() { local morphologyMechIdx, diamVarTypeIdx, mechIdx, varTypeIdx, diamValue localobj mechStd, nil
        strdef diamVarName
        
        morphologyMechIdx = 0
        diamVarTypeIdx = 0
        diamVarName = "diam"
        
        for mechIdx = 0, numMechs - 1 {
            if (!isMechInserted[mechIdx]) {
                continue
            }
            mechType.select(mechIdx)
            for eachSecInList(list_ref) {
                mechType.make()
                for varTypeIdx = 0, 2 {     // 0: "PARAMETER", 1: "ASSIGNED", 2: "STATE"
                    mechStd = mechStds[mechIdx][varTypeIdx]
                    if (mechStd == nil) {
                        continue
                    }
                    if (mechIdx != morphologyMechIdx || varTypeIdx != diamVarTypeIdx) {
                        // Here we assign NaN values to inhom vars, but they will be overwritten shortly downstream
                        mechStd.out()
                    } else {
                        diamValue = mechStd.get(diamVarName)
                        if (!math.isNaN(diamValue)) {
                            diam = diamValue
                        }
                    }
                }
            }
        }
    }
    
endtemplate ReducedMechComp

// "Soma"
obfunc _getListOfSecRefsForComp1() { local idx1, idx2 localobj list_ref
    list_ref = new List()
    soma list_ref.append(new SectionRef())
    return list_ref
}

// "Dendrites"
obfunc _getListOfSecRefsForComp2() { local idx1, idx2 localobj list_ref
    list_ref = new List()
    for idx2 = 0, 51 {
        dendrite[idx2] list_ref.append(new SectionRef())
    }
    return list_ref
}

// "Axon"
obfunc _getListOfSecRefsForComp3() { local idx1, idx2 localobj list_ref
    list_ref = new List()
    for idx2 = 0, 10 {
        axon[idx2] list_ref.append(new SectionRef())
    }
    return list_ref
}

// "Spine Neck"
obfunc _getListOfSecRefsForComp4() { local idx1, idx2 localobj list_ref
    list_ref = new List()
    NeuronNanoBranch[0].spine_neck list_ref.append(new SectionRef())
    return list_ref
}

// "Spine Head"
obfunc _getListOfSecRefsForComp5() { local idx1, idx2 localobj list_ref
    list_ref = new List()
    NeuronNanoBranch[0].spine_head list_ref.append(new SectionRef())
    return list_ref
}

mmAllComps = new List()

_comp = new ReducedMechComp("Soma", _getListOfSecRefsForComp1())
{ mmAllComps.append(_comp) }

_comp = new ReducedMechComp("Dendrites", _getListOfSecRefsForComp2())
{ mmAllComps.append(_comp) }

_comp = new ReducedMechComp("Axon", _getListOfSecRefsForComp3())
{ mmAllComps.append(_comp) }

_comp = new ReducedMechComp("Spine Neck", _getListOfSecRefsForComp4())
{ mmAllComps.append(_comp) }

_comp = new ReducedMechComp("Spine Head", _getListOfSecRefsForComp5())
{ mmAllComps.append(_comp) }

//////////////////// End of biophys: Compartments ////////////////////////

//////////////////// Start of biophys: Homogen vars //////////////////////

// "Soma"
proc _addHomogenVarsInfoToBiophysComp1() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", math.nan)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("capacitance", 1)    // PARAMETER
    mechStd.set("cm", 0.8)    // (uF/cm2)
    comp.mechStds[mechIdxs.x[1]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 8.968609865470852e-05)    // (S/cm2)
    mechStd.set("e_pas", -85.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Dendrites"
proc _addHomogenVarsInfoToBiophysComp2() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", math.nan)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("capacitance", 1)    // PARAMETER
    mechStd.set("cm", 0.8)    // (uF/cm2)
    comp.mechStds[mechIdxs.x[1]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 8.968609865470852e-05)    // (S/cm2)
    mechStd.set("e_pas", -85.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Axon"
proc _addHomogenVarsInfoToBiophysComp3() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", math.nan)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 7.142857142857143e-05)    // (S/cm2)
    mechStd.set("e_pas", -65.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Spine Neck"
proc _addHomogenVarsInfoToBiophysComp4() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", 0.5998328328132629)    // (um)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 7.142857142857143e-05)    // (S/cm2)
    mechStd.set("e_pas", -65.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Spine Head"
proc _addHomogenVarsInfoToBiophysComp5() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", 0.599832832813263)    // (um)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 7.142857142857143e-05)    // (S/cm2)
    mechStd.set("e_pas", -65.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

_comp = mmAllComps.o(0)
_addHomogenVarsInfoToBiophysComp1(_comp)    // "Soma"

_comp = mmAllComps.o(1)
_addHomogenVarsInfoToBiophysComp2(_comp)    // "Dendrites"

_comp = mmAllComps.o(2)
_addHomogenVarsInfoToBiophysComp3(_comp)    // "Axon"

_comp = mmAllComps.o(3)
_addHomogenVarsInfoToBiophysComp4(_comp)    // "Spine Neck"

_comp = mmAllComps.o(4)
_addHomogenVarsInfoToBiophysComp5(_comp)    // "Spine Head"

for eachItemInList(_comp, mmAllComps) {
    _comp.initHomogenBiophysics()
}

//////////////////// Start of biophys: Homogen vars //////////////////////

// "Soma"
proc _addHomogenVarsInfoToBiophysComp1() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", math.nan)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("capacitance", 1)    // PARAMETER
    mechStd.set("cm", 0.8)    // (uF/cm2)
    comp.mechStds[mechIdxs.x[1]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 8.968609865470852e-05)    // (S/cm2)
    mechStd.set("e_pas", -85.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Dendrites"
proc _addHomogenVarsInfoToBiophysComp2() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", math.nan)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("capacitance", 1)    // PARAMETER
    mechStd.set("cm", 0.8)    // (uF/cm2)
    comp.mechStds[mechIdxs.x[1]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 8.968609865470852e-05)    // (S/cm2)
    mechStd.set("e_pas", -85.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Axon"
proc _addHomogenVarsInfoToBiophysComp3() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", math.nan)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 7.142857142857143e-05)    // (S/cm2)
    mechStd.set("e_pas", -65.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Spine Neck"
proc _addHomogenVarsInfoToBiophysComp4() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", 0.5998328328132629)    // (um)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 7.142857142857143e-05)    // (S/cm2)
    mechStd.set("e_pas", -65.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

// "Spine Head"
proc _addHomogenVarsInfoToBiophysComp5() { local idx localobj comp, mechIdxs, mechStd
    comp = $o1
    
    mechIdxs = new Vector(3)
    mechIdxs.x[0] = mth.getMechIdx(0, "morphology")
    mechIdxs.x[1] = mth.getMechIdx(0, "capacitance")
    mechIdxs.x[2] = mth.getMechIdx(0, "pas")
    
    for idx = 0, 2 {
        comp.isMechInserted[mechIdxs.x[idx]] = 1
    }
    
    mechStd = new MechanismStandard("morphology", 1)    // PARAMETER
    mechStd.set("diam", 0.599832832813263)    // (um)
    comp.mechStds[mechIdxs.x[0]][0] = mechStd
    
    mechStd = new MechanismStandard("pas", 1)    // PARAMETER
    mechStd.set("g_pas", 7.142857142857143e-05)    // (S/cm2)
    mechStd.set("e_pas", -65.0)    // (mV)
    comp.mechStds[mechIdxs.x[2]][0] = mechStd
}

_comp = mmAllComps.o(0)
_addHomogenVarsInfoToBiophysComp1(_comp)    // "Soma"

_comp = mmAllComps.o(1)
_addHomogenVarsInfoToBiophysComp2(_comp)    // "Dendrites"

_comp = mmAllComps.o(2)
_addHomogenVarsInfoToBiophysComp3(_comp)    // "Axon"

_comp = mmAllComps.o(3)
_addHomogenVarsInfoToBiophysComp4(_comp)    // "Spine Neck"

_comp = mmAllComps.o(4)
_addHomogenVarsInfoToBiophysComp5(_comp)    // "Spine Head"

for eachItemInList(_comp, mmAllComps) {
    _comp.initHomogenBiophysics()
}

//////////////////// End of biophys: Homogen vars ////////////////////////

//////////////////// End of biophys: Homogen vars ////////////////////////

//////////////////// Start of templates for taps /////////////////////////

begintemplate ReducedTapSet

    public applyInhomogeneityIter, createNewPpAttachedToSection
    
    objref this
    
    
    // Keep in sync with TapSet.applyInhomogeneityIter
    iterator applyInhomogeneityIter() { local tapIdx localobj xmAllTaps, distFuncHelper, prevSec_ref, tap, nil
        xmAllTaps = $o2
        distFuncHelper = $o3
        
        distFuncHelper.onJustBeforeFirstSection()
        {
            prevSec_ref = nil
            for tapIdx = 0, xmAllTaps.count() - 1 {
                tap = xmAllTaps.o(tapIdx)
                if (tap.sec_ref != prevSec_ref) {
                    distFuncHelper.onJustBeforeNewSection()
                }
                $o1 = tap
                iterator_statement
                prevSec_ref = tap.sec_ref
            }
        }
        distFuncHelper.onJustAfterLastSection()
    }
    
    _x = -1
    objref _tempPp
    
    // Keep in sync with MechTypeHelper.createNewPpAttachedToSection
    obfunc createNewPpAttachedToSection() { localobj sec_ref, pp, nil
        strdef mechName, hocCommand
        
        mechName = $s1
        sec_ref = $o2
        _x = $3
        
        sprint(hocCommand, "_tempPp = new %s(_x)", mechName)
        sec_ref.sec {
            execute(hocCommand, this)
        }
        
        pp = _tempPp
        _tempPp = nil
        
        return pp
    }
    
endtemplate ReducedTapSet

objref tapSet
tapSet = new ReducedTapSet()

begintemplate ReducedPPComp

    public name, enumDmPpFk, enumPpRole, mechIdx, mechStds
    
    external mth
    external stringEmpty
    
    strdef name
    enumDmPpFk = -1
    enumPpRole = -1
    mechIdx = -1
    objref mechStds[1][1]   // All nil-s except some col(s) of mechIdx row
    
    
    proc init() { local isGapJuncOrSyn, numMechs localobj mechType
        strdef mechName
        
        isGapJuncOrSyn = $1     // Just a placeholder
        name = $s2
        enumPpRole = $3
        mechName = $s4
        
        if (!stringEmpty(mechName)) {
            mechIdx = mth.getMechIdx(1, mechName)
        } else {
            mechIdx = -1
        }
        
        enumDmPpFk = 1
        
        mechType = new MechanismType(1) // 1: "Point Processes"
        numMechs = mechType.count
        objref mechStds[numMechs][3]    // 0: "PARAMETER", 1: "ASSIGNED", 2: "STATE"
    }
    
endtemplate ReducedPPComp

begintemplate ReducedFakeComp

    public enumDmPpFk, enumPpRole, mechStds
    
    enumDmPpFk = -1
    enumPpRole = -1
    objref mechStds[1][1]
    
    proc init() { local fixedMechIdx, numMechs
        enumPpRole = $1
        fixedMechIdx = $2
        enumDmPpFk = 2
        numMechs = fixedMechIdx + 1
        objref mechStds[numMechs][1]
    }
    
endtemplate ReducedFakeComp

objref _allComps

//////////////////// End of templates for taps ///////////////////////////

//////////////////// Start of templates for gap juncs ////////////////////

begintemplate EnumGapJuncCompIdxs
    
    public extGjPp, extGjExtValue, intGjPp
    
    // Keep in sync with hoc:GapJuncSet.init, py:GensForTaps.createReducedGapJuncComps and py:GensForTaps.initHomogenGapJuncVars
    proc init() {
        extGjPp = 0
        extGjExtValue = 1
        intGjPp = 2
    }
    
endtemplate EnumGapJuncCompIdxs

objref enumGapJuncCompIdxs
enumGapJuncCompIdxs = new EnumGapJuncCompIdxs()


// !! rename to EnumGapJuncParts
begintemplate EnumGapJuncPpRoles
    
    public sngPp, ptrMarkerPp, extValue
    
    proc init() {
        sngPp = 0           // For both ext and int GJs
        ptrMarkerPp = 1     // For int GJs only
        extValue = 2        // For ext GJs only
    }
    
endtemplate EnumGapJuncPpRoles

objref enumGapJuncPpRoles
enumGapJuncPpRoles = new EnumGapJuncPpRoles()

begintemplate GapJunction
    
    public sec_ref, connectionPoint, dist, otherSec_ref, otherConnectionPoint
    public sngPp, ptrMarkerPp, extValue
    public isExtOrInt, getPointProcess, changeLocation, changeStructure, calcAndCacheDist, deployPtrMarkerPp, destroyPtrMarkerPp
    
    external codeContractViolation
    external enumGapJuncPpRoles
    
    // Gap junc PP location info
    objref sec_ref
    connectionPoint = -1
    dist = -1
    
    // The pointer location info (for internal GJs only)
    objref otherSec_ref
    otherConnectionPoint = -1
    
    objref sngPp
    objref ptrMarkerPp      // For internal GJs only
    extValue = -1           // For external GJs only
    
    
    proc init() { local numArg
        numArg = numarg()
        if (numArg == 2) {
            sec_ref = $o1
            connectionPoint = $2
        } else if (numArg == 3) {
            sngPp = $o1
            sec_ref = $o2
            connectionPoint = $3
        } else if (numArg == 4) {
            sec_ref = $o1
            connectionPoint = $2
            otherSec_ref = $o3
            otherConnectionPoint = $4
        } else if (numArg == 5) {
            sngPp = $o1
            sec_ref = $o2
            connectionPoint = $3
            otherSec_ref = $o4
            otherConnectionPoint = $5
        } else {
            codeContractViolation()
        }
        calcAndCacheDist()
        
        // !! remove this assignment
        // !! BUG: not in sync with FakeMechanismStandardForExtValue ctor
        extValue = 12.34        // !! just for test
    }
    
    func isExtOrInt() { localobj nil
        return (otherSec_ref == nil)
    }
    
    // !! rename to getGapJuncPart
    obfunc getPointProcess() { local enumPpRole
        enumPpRole = $1
        if (enumPpRole == enumGapJuncPpRoles.sngPp) {
            return sngPp
        } else if (enumPpRole == enumGapJuncPpRoles.ptrMarkerPp) {
            return ptrMarkerPp
        } else if (enumPpRole == enumGapJuncPpRoles.extValue) {
            return new Pointer(&extValue)
        } else {
            codeContractViolation()
        }
    }
    
    proc changeLocation() { local numArg localobj nil
        numArg = numarg()
        if (numArg != 2 && numArg != 4) {
            codeContractViolation()
        }
        
        sec_ref = $o1
        connectionPoint = $2
        if (numArg == 4) {
            otherSec_ref = $o3
            otherConnectionPoint = $4
        } else {
            otherSec_ref = nil
            otherConnectionPoint = -1
        }
        
        calcAndCacheDist()
    }
    
    proc changeStructure() {
        sngPp = $o1
    }
    
    proc calcAndCacheDist() {
        sec_ref.sec {
            dist = distance(connectionPoint)
        }
    }
    
    proc deployPtrMarkerPp() { localobj nil
        if (ptrMarkerPp != nil) {
            codeContractViolation()
        }
        otherSec_ref.sec {
            ptrMarkerPp = new PointProcessMark(otherConnectionPoint)
        }
    }
    
    proc destroyPtrMarkerPp() { localobj nil
        if (ptrMarkerPp == nil) {
            codeContractViolation()
        }
        ptrMarkerPp = nil
    }
    
endtemplate GapJunction

objref utils4FakeMech4GapJuncExtValue

begintemplate ReducedSeedingDensityHelper
    
    public isUniform, minSeedingDistance, oneLinerPyDistFuncBody
    
    isUniform = -1
    minSeedingDistance = -1
    strdef oneLinerPyDistFuncBody
    
    proc init() {
        isUniform = $1
        minSeedingDistance = $2     // um
        oneLinerPyDistFuncBody = $s3
    }
    
endtemplate ReducedSeedingDensityHelper

begintemplate ReducedGapJuncSet

    public createGapJuncStruc, initAllHomogenVars
    public allGapJuncs, allComps, isExtOrInt, isAllOrSomeSecsSeeded, selected_ref, maxNumGapJuncsPerSec, maxRadiusForIntGapJuncs, isCrissCrossForIntGapJuncs, seedingDensityHelper
    
    external mth, tapSet
    external codeContractViolation
    external enumGapJuncCompIdxs, enumGapJuncPpRoles
    external eachItemInList
    
    objref allGapJuncs, allComps
    isExtOrInt = -1
    isAllOrSomeSecsSeeded = -1
    objref selected_ref
    maxNumGapJuncsPerSec = -1
    maxRadiusForIntGapJuncs = -1
    isCrissCrossForIntGapJuncs = -1
    objref seedingDensityHelper
    
    objref this
    
    
    proc init() {
        allGapJuncs = $o1
        allComps = $o2
        isExtOrInt = $3
        isAllOrSomeSecsSeeded = $4
        selected_ref = $o5
        maxNumGapJuncsPerSec = $6
        maxRadiusForIntGapJuncs = $7
        isCrissCrossForIntGapJuncs = $8
        seedingDensityHelper = $o9
    }
    
    objref _gapJunc
    objref _sngPp
    _otherConnectionPoint = -1  // For internal GJs only
    
    // Keep in sync with GapJuncSet.applyChangesToStrucIfNeeded
    proc createGapJuncStruc() { local doesHavePtr localobj nil
        strdef mechName, ppPtrName, dmVarNameWithIndex, hocCommand
        
        mechName = $s1
        doesHavePtr = $2            // pyObj.ms_doesGapJuncHavePtr(mechName)
        ppPtrName = $s3             // pyObj.ms_getGapJuncPtrName(mechName)
        dmVarNameWithIndex = $s4    // pyObj.ms_getGapJuncExtVarNameWithIndex(mechName)
        
        if (allGapJuncs.count() == 0) {
            return
        }
        
        if (doesHavePtr) {
            if (isExtOrInt) {
                sprint(hocCommand, "setpointer _sngPp.%s, _gapJunc.extValue", ppPtrName)
            } else {
                sprint(hocCommand, "setpointer _sngPp.%s, %s(_otherConnectionPoint)", ppPtrName, dmVarNameWithIndex)
            }
        }
        
        for eachItemInList(_gapJunc, allGapJuncs) {
            _sngPp = tapSet.createNewPpAttachedToSection(mechName, _gapJunc.sec_ref, _gapJunc.connectionPoint)
            if (doesHavePtr) {
                if (isExtOrInt) {
                    execute(hocCommand, this)
                } else {
                    _otherConnectionPoint = _gapJunc.otherConnectionPoint
                    _gapJunc.otherSec_ref {
                        execute(hocCommand, this)
                    }
                }
            }
            _gapJunc.changeStructure(_sngPp)
        }
        
        _gapJunc = nil
        _sngPp = nil
    }
    
    // Keep in sync with GapJuncSet.applyChangesToDirtyHomogenVars
    proc initAllHomogenVars() { local mechIdx, fixedMechIdx
        strdef mechName
        
        mechName = $s1
        fixedMechIdx = $2   // utils4FakeMech4GapJuncExtValue.mechIdx
        
        mechIdx = mth.getMechIdx(1, mechName)
        
        if (isExtOrInt) {
            initHomogenVars(enumGapJuncCompIdxs.extGjPp, mechIdx, enumGapJuncPpRoles.sngPp)
            initHomogenVars(enumGapJuncCompIdxs.extGjExtValue, fixedMechIdx, enumGapJuncPpRoles.extValue)
        } else {
            initHomogenVars(enumGapJuncCompIdxs.intGjPp, mechIdx, enumGapJuncPpRoles.sngPp)
        }
    }
    
    // All next staff is private
    
    
    // Keep in sync with GapJuncSet.ifMechDirtyThenApplyHomogenChanges
    proc initHomogenVars() { local compIdx, mechIdx, enumPpRole, isPPorEV, maxVarType, varType, varTypeIdx localobj comp, gapJunc, ppOrExtVal, compMechStd, nil
        
        compIdx = $1
        mechIdx = $2
        enumPpRole = $3
        
        if (enumPpRole == enumGapJuncPpRoles.ptrMarkerPp) {
            codeContractViolation()
        }
        
        isPPorEV = (compIdx != enumGapJuncCompIdxs.extGjExtValue)
        if (isPPorEV) {
            maxVarType = 3
        } else {
            maxVarType = 1
        }
        
        comp = allComps.o(compIdx)
        
        for eachItemInList(gapJunc, allGapJuncs) {
            ppOrExtVal = gapJunc.getPointProcess(enumPpRole)
            for varType = 1, maxVarType {   // 1: "PARAMETER", 2: "ASSIGNED", 3: "STATE"
                varTypeIdx = varType - 1
                compMechStd = comp.mechStds[mechIdx][varTypeIdx]
                if (compMechStd != nil) {
                    // Here we assign NaN values to inhom vars, but they will be overwritten shortly downstream
                    compMechStd.out(ppOrExtVal)
                }
            }
        }
    }
    
endtemplate ReducedGapJuncSet

gjmAllGapJuncSets = new List()

objref _allGapJuncs, _sec_ref, _otherSec_ref, _selected_ref, _seedingDensityHelper, _gapJuncSet

//////////////////// End of templates for gap juncs //////////////////////

//////////////////// Start of GJ set #1: Locations ///////////////////////

_allGapJuncs = new List()
dendrite[1] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
dendrite[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.25))
dendrite[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
dendrite[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
dendrite[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[3] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[4] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[4] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[8] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.35))
dendrite[9] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[11] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.25))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.35))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
dendrite[12] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[13] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[13] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[17] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[17] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.25))
dendrite[17] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[18] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.35))
dendrite[18] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[19] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[19] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[20] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
dendrite[22] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[22] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[22] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[22] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[23] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[23] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[23] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[29] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
dendrite[31] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[31] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[33] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[34] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[36] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[36] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.35))
dendrite[36] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[37] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[37] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[38] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[38] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[38] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
dendrite[38] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
dendrite[38] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[39] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
dendrite[41] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
dendrite[42] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[42] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
dendrite[44] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
dendrite[44] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[45] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
dendrite[48] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
dendrite[49] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[50] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
dendrite[50] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.05))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.25))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.35))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.45))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.75))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
axon[0] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
axon[1] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
axon[1] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.25))
axon[1] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
axon[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.35))
axon[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.55))
axon[2] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))
axon[4] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.25))
axon[4] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.85))
axon[4] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.95))
axon[7] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.15))
axon[7] _allGapJuncs.append(new GapJunction(new SectionRef(), 0.65))

//////////////////// End of GJ set #1: Locations /////////////////////////

//////////////////// Start of GJ set #1: Compartments ////////////////////

_allComps = new List()
{ _allComps.append(new ReducedPPComp(1, "External GJ", enumGapJuncPpRoles.sngPp, "Gap_neuron")) }
{ _allComps.append(new ReducedFakeComp(enumGapJuncPpRoles.extValue, 0)) }
{ _allComps.append(new ReducedPPComp(1, "Internal GJ", enumGapJuncPpRoles.sngPp, "")) }

//////////////////// End of GJ set #1: Compartments //////////////////////

//////////////////// Start of GJ set #1: Homogen vars ////////////////////

// "External GJ"
proc _addHomogenVarsInfoToGapJuncComp1() { local mechIdx localobj comp, mechStd
    comp = $o1
}

// "External GJ"
proc _addHomogenVarsInfoToGapJuncComp2() { local mechIdx localobj comp, mechStd
    comp = $o1
}

// "Internal GJ"
proc _addHomogenVarsInfoToGapJuncComp3() { local mechIdx localobj comp, mechStd
    comp = $o1
}

_comp = _allComps.o(0)
_addHomogenVarsInfoToGapJuncComp1(_comp)    // "External GJ"

_comp = _allComps.o(1)
_addHomogenVarsInfoToGapJuncComp2(_comp)    // "External GJ"

_comp = _allComps.o(2)
_addHomogenVarsInfoToGapJuncComp3(_comp)    // "Internal GJ"

//////////////////// End of GJ set #1: Homogen vars //////////////////////

//////////////////// Start of GJ set #1: "Import & Edit" measures ////////

_selected_ref = nil

_seedingDensityHelper = new ReducedSeedingDensityHelper(1, 29.629589035211456, "1234.5 * exp(-x / 100)")

//////////////////// End of GJ set #1: "Import & Edit" measures //////////

//////////////////// Start of GJ set #1: Main part ///////////////////////

_gapJuncSet = new ReducedGapJuncSet(_allGapJuncs, _allComps, 1, 1, _selected_ref, 10, 20.0, 0, _seedingDensityHelper)

{ _gapJuncSet.createGapJuncStruc("Gap_neuron", 0, "", "") }
{ _gapJuncSet.initAllHomogenVars("Gap_neuron", 0) }

// Ext GJs: Electric / "Gap_neuron" (86 GJs)
{ gjmAllGapJuncSets.append(_gapJuncSet) }

//////////////////// End of GJ set #1: Main part /////////////////////////

//////////////////// Start of templates for synapses /////////////////////

begintemplate EnumSynCompIdxs
    
    public srcPp, netCon, trgPp, sngPp
    
    // Keep in sync with hoc:SynSet.init, py:GeneratorsForMainHocFile._analyzeUsedMechsInSynComps, py:GensForTaps.createReducedSynComps and py:GensForTaps.initHomogenSynVars
    proc init() {
        srcPp = 0
        netCon = 1
        trgPp = 2
        sngPp = 3
    }
    
endtemplate EnumSynCompIdxs

objref enumSynCompIdxs
enumSynCompIdxs = new EnumSynCompIdxs()


// !! rename to EnumSynParts
begintemplate EnumSynPpRoles
    
    public srcPp, netCon, trgPp, sngPp, trgPpOrSngPp
    
    proc init() {
        srcPp = 0
        netCon = 1
        trgPp = 2
        sngPp = 3
        trgPpOrSngPp = 4
    }
    
endtemplate EnumSynPpRoles

objref enumSynPpRoles
enumSynPpRoles = new EnumSynPpRoles()

begintemplate Synapse

    public sec_ref, connectionPoint, dist
    public srcPp, netCon, trgPp, sngPp, sefwPp, sefwNetCon
    public is3Or1Part, getPointProcess, changeLocation, changeStructure, calcAndCacheDist
    
    external codeContractViolation
    external enumSynPpRoles
    
    // Synapse location info
    objref sec_ref
    connectionPoint = -1
    dist = -1
    
    // Synapse structure and vars
    objref srcPp, netCon, trgPp, sngPp, sefwPp, sefwNetCon
    
    
    proc init() { local numArg
        numArg = numarg()
        if (numArg == 2) {
            sec_ref = $o1
            connectionPoint = $2
        } else if (numArg == 3) {
            sngPp = $o1
            sec_ref = $o2
            connectionPoint = $3
        } else if (numArg == 5) {
            srcPp = $o1
            netCon = $o2
            trgPp = $o3
            sec_ref = $o4
            connectionPoint = $5
        } else {
            codeContractViolation()
        }
        calcAndCacheDist()
    }
    
    func is3Or1Part() { localobj nil
        return (netCon != nil)
    }
    
    // !! rename to getSynPart
    obfunc getPointProcess() { local enumPpRoleExt localobj nil
        enumPpRoleExt = $1
        
        if (enumPpRoleExt == enumSynPpRoles.srcPp) {
            return srcPp
        } else if (enumPpRoleExt == enumSynPpRoles.netCon) {
            return netCon
        } else if (enumPpRoleExt == enumSynPpRoles.trgPp) {
            return trgPp
        } else if (enumPpRoleExt == enumSynPpRoles.sngPp) {
            return sngPp
        } else if (enumPpRoleExt == enumSynPpRoles.trgPpOrSngPp) {
            if (is3Or1Part()) {
                return trgPp
            } else {
                return sngPp
            }
        } else {
            codeContractViolation()
        }
    }
    
    proc changeLocation() {
        sec_ref = $o1
        connectionPoint = $2
        calcAndCacheDist()
    }
    
    proc changeStructure() { local numArg localobj nil
        numArg = numarg()
        if (numArg == 1) {
            // sngPp -> Section
            
            netCon = nil        // Destroying old NetCon-s before all connected PPs
            sefwNetCon = nil    //
            
            sngPp = $o1
            
            srcPp = nil
            trgPp = nil
            sefwPp = nil
        } else if (numArg == 3) {
            // srcPp -> netCon -> trgPp -> Section
            
            netCon = $o2        // Destroying old NetCon-s before all connected PPs
            sefwNetCon = nil    //
            
            srcPp = $o1
            trgPp = $o3
            
            sngPp = nil
            sefwPp = nil
        } else if (numArg == 5) {
            // srcPp -> netCon -> sefwPp -> sefwNetCon -> trgPp -> Section
            
            netCon = $o2        // Destroying old NetCon-s before all connected PPs
            sefwNetCon = $o4    //
            
            srcPp = $o1
            sefwPp = $o3
            trgPp = $o5
            
            sngPp = nil
        } else {
            codeContractViolation()
        }
    }
    
    proc calcAndCacheDist() {
        sec_ref.sec {
            dist = distance(connectionPoint)
        }
    }
    
endtemplate Synapse

begintemplate ReducedManagersCommonUtils

    public isMetaVar
    
    external stringStartsWith
    
    // Keep in sync with ManagersCommonUtils.isMetaVar
    func isMetaVar() {
        strdef varName
        varName = $s1
        return stringStartsWith(varName, "@")
    }
    
endtemplate ReducedManagersCommonUtils

objref mcu
mcu = new ReducedManagersCommonUtils()

begintemplate UtilsForFakeMechanismForNetCon

    public getNumVars, getVarNameAndArraySize, getVarUnits, getNetConVar, setNetConVar
    public mechIdx, mechName, numGlobalVars
    public metaMechIdx, metaVarTypeIdx, metaVarName, metaArrayIndex, realMechName, realVarType, realVarName, realArrayIndex
    
    // !! external mth      // !! created only after we need to use it here
    external pyObj
    
    mechIdx = -1
    strdef mechName
    numGlobalVars = -1
    
    metaMechIdx = -1        // Correspond to FakeMechanism*ForNetCon
    metaVarTypeIdx = -1     //
    strdef metaVarName      //
    metaArrayIndex = -1     //
    
    strdef realMechName     // Correspond to SynEventsFilterWatcher
    realVarType = -1        //
    strdef realVarName      //
    realArrayIndex = -1     //
    
    objref _pyUnitsDict, _tempNetCon, this
    _tempValue = -1
    
    
    proc init() { local metaVarType
        strdef pyCommand
        
        mechIdx = 1             // !! keep in sync with ReducedMechTypeHelper.getMechIdx and .createMechStd
        mechName = "NetCon"     //
        numGlobalVars = 0
        
        realMechName = "SynEventsFilterWatcher"     // Keep in sync with proc SynEventsHelper.createNewSynEventsFilterWatcherButTryToInherit
        realVarType = 1
        realVarName = "release_probability"
        realArrayIndex = 0
        
        metaMechIdx = 0
        metaVarType = 1
        metaVarTypeIdx = 0  // !! mth.convertVarTypeToVarTypeIdx(metaVarType)
        sprint(metaVarName, "@%s", realVarName)
        metaArrayIndex = 0
        
        sprint(pyCommand, "{'threshold': 'mV', 'delay': 'ms', 'weight': '', '%s': ''}", metaVarName)
        _pyUnitsDict = pyObj.ev(pyCommand)
    }
    
    func getNumVars() {
        pyObj.pyValuesDict = $o1
        return pyObj.ev("len(pyValuesDict)")
    }
    
    func getVarNameAndArraySize() {
        pyObj.pyValuesDict = $o1
        pyObj.varIdx = $2
        $s3 = pyObj.ev("list(pyValuesDict.keys())[int(varIdx)]")
        return 1
    }
    
    proc getVarUnits() {
        strdef varName
        varName = $s1
        $s2 = _pyUnitsDict.__getitem__(varName)
    }
    
    func getNetConVar() { localobj nil
        strdef varNameWithIndex, hocCommand
        
        _tempNetCon = $o1
        varNameWithIndex = $s2
        
        sprint(hocCommand, "_tempValue = _tempNetCon.%s", varNameWithIndex)
        execute(hocCommand, this)
        
        _tempNetCon = nil
        
        return _tempValue
    }
    
    proc setNetConVar() { localobj nil
        strdef varNameWithIndex, hocCommand
        
        _tempNetCon = $o1
        varNameWithIndex = $s2
        _tempValue = $3
        
        sprint(hocCommand, "_tempNetCon.%s = _tempValue", varNameWithIndex)
        execute(hocCommand, this)
        
        _tempNetCon = nil
    }
    
endtemplate UtilsForFakeMechanismForNetCon


objref utils4FakeMech4SynNetCon
utils4FakeMech4SynNetCon = new UtilsForFakeMechanismForNetCon()

begintemplate FakeMechanismStandardForNetCon

    public count, name, get, set, in, out
    
    external pyObj
    external mth, mcu
    external utils4FakeMech4SynNetCon
    external codeContractViolation
    
    objref pyValuesDict
    
    
    proc init() {
        strdef pyCommand
        sprint(pyCommand, "{'threshold': 10.0, 'delay': 1.0, 'weight': 0.0, '%s': 1.0}", utils4FakeMech4SynNetCon.metaVarName)
        // These default values are consistent with a newly created NetCon
        pyValuesDict = pyObj.ev(pyCommand)
        // !! think about encapsulating "release_probability" into a new (non-standard) varType, e.g. varType == 4 named "Meta"
    }
    
    func count() {
        return utils4FakeMech4SynNetCon.getNumVars(pyValuesDict)
    }
    
    func name() { local numArg, varIdx
        numArg = numarg()
        
        if (numArg == 1) {
            $s1 = utils4FakeMech4SynNetCon.mechName
            return 0
        } else if (numArg == 2) {
            varIdx = $2
            return utils4FakeMech4SynNetCon.getVarNameAndArraySize(pyValuesDict, varIdx, $s1)
        } else {
            codeContractViolation()
        }
    }
    
    func get() { local numArg, arrayIndex
        strdef varName
        
        numArg = numarg()
        if (numArg == 0 || numArg > 2) {
            codeContractViolation()
        }
        
        varName = $s1
        
        if (numArg == 2) {
            arrayIndex = $2     // Just a placeholder
            if (arrayIndex != 0) {
                codeContractViolation()
            }
        }
        
        return pyValuesDict.__getitem__(varName)
    }
    
    proc set() { local numArg, value, arrayIndex
        strdef varName
        
        numArg = numarg()
        if (numArg < 2 || numArg > 3) {
            codeContractViolation()
        }
        
        varName = $s1
        value = $2
        
        if (numArg == 3) {
            arrayIndex = $3     // Just a placeholder
            if (arrayIndex != 0) {
                codeContractViolation()
            }
        }
        
        pyValuesDict.__setitem__(varName, value)
    }
    
    proc in() { local varIdx, arraySize, arrayIndex, value localobj netCon
        strdef varName, varNameWithIndex
        netCon = $o1
        for varIdx = 0, count() - 1 {
            arraySize = name(varName, varIdx)
            if (mcu.isMetaVar(varName)) {
                continue
            }
            for arrayIndex = 0, arraySize - 1 {
                mth.getVarNameWithIndex(varName, arraySize, arrayIndex, varNameWithIndex)
                value = utils4FakeMech4SynNetCon.getNetConVar(netCon, varNameWithIndex)
                set(varName, value, arrayIndex)
            }
        }
    }
    
    proc out() { local varIdx, arraySize, arrayIndex, value localobj netCon
        strdef varName, varNameWithIndex
        netCon = $o1
        for varIdx = 0, count() - 1 {
            arraySize = name(varName, varIdx)
            if (mcu.isMetaVar(varName)) {
                continue
            }
            for arrayIndex = 0, arraySize - 1 {
                value = get(varName, arrayIndex)
                mth.getVarNameWithIndex(varName, arraySize, arrayIndex, varNameWithIndex)
                utils4FakeMech4SynNetCon.setNetConVar(netCon, varNameWithIndex, value)
            }
        }
    }
    
endtemplate FakeMechanismStandardForNetCon

begintemplate SynEventsHelper

    public ifMetaVarThenUpdateStatus, createNewSynEventsFilterWatcherButTryToInherit, isSefwEnabled
    public isMinRPlt1
    
    external mcu, enumSynCompIdxs
    external inhomAndStochLibrary
    external utils4FakeMech4SynNetCon
    
    objref allComps
    
    isMinRPlt1 = -1
    
    objref this
    
    
    proc init() {
        allComps = $o1
    }
    
    proc ifMetaVarThenUpdateStatus() { local minValue
        strdef varName
        varName = $s1
        minValue = $2
        if (mcu.isMetaVar(varName)) {
            isMinRPlt1 = (minValue < 1)
        }
    }
    
    objref _mechStd
    
    proc createNewSynEventsFilterWatcherButTryToInherit() { local wasSefwPresentBefore, is3Or1PartInSynStruc_old, release_probability localobj syn, trgPp, sefwPp, sefwNetCon, nil
    
        syn = $o1
        wasSefwPresentBefore = $2
        is3Or1PartInSynStruc_old = $3
        trgPp = $o4
        
        // Prepare the output point process
        if (wasSefwPresentBefore) {
            sefwPp = syn.sefwPp
        } else {
            _mechStd = allComps.o(enumSynCompIdxs.netCon).mechStds[utils4FakeMech4SynNetCon.metaMechIdx][utils4FakeMech4SynNetCon.metaVarTypeIdx]
            
            if (_mechStd != nil) {
                // This equals NaN if the var was made inhomogen earlier,
                // but we'll restore all inhomogeneities shortly downstream calling inhomAndStochLibrary.onSynStrucChange
                release_probability = _mechStd.get(utils4FakeMech4SynNetCon.metaVarName, utils4FakeMech4SynNetCon.metaArrayIndex)
            } else {
                // We are in the exported nano HOC file, and all NetCon params are default (so its mechStd is nil)
                release_probability = 1
            }
            
            sefwPp = new SynEventsFilterWatcher()     // Keep the name in sync with UtilsForFakeMechanismForNetCon ctor
            sefwPp.release_probability = release_probability
            // The "seed" will be set shortly downstream (once per rank)
        }
        
        // Prepare the output NetCon
        sefwNetCon = new NetCon(sefwPp, trgPp)
        if (wasSefwPresentBefore) {
            createNewFakeMechStdForNetConAndInFrom(syn.sefwNetCon)
        } else {
            if (is3Or1PartInSynStruc_old) {
                createNewFakeMechStdForNetConAndInFrom(syn.netCon)
            } else {
                // We'll use the _mechStd defined above
            }
        }
        if (_mechStd != nil) {
            // This inserts NaN-s for inhomogen vars,
            // but we'll restore all inhomogeneities shortly downstream calling inhomAndStochLibrary.onSynStrucChange
            _mechStd.out(sefwNetCon)
        }
        // The second NetCon has no delay
        sefwNetCon.delay = 0
        
        $o5 = sefwPp
        $o6 = sefwNetCon
        
        _mechStd = nil
    }
    
    func isSefwEnabled() {
        if (isMinRPlt1) {
            return 1
        }
        return inhomAndStochLibrary.isAnyStochVarsForSynsInTheSet(this)     // Do not move to the IF OR for higher performance
    }
    
    // All next staff is private
    
    
    proc createNewFakeMechStdForNetConAndInFrom() { localobj srcNetCon
        srcNetCon = $o1
        execute("_mechStd = new FakeMechanismStandardForNetCon()", this)        // The template is loaded after this file
        _mechStd.in(srcNetCon)
    }
    
endtemplate SynEventsHelper

begintemplate ReducedSpineNeckDiamCache

    public getCachedDiam
    public diamsVec
    
    external isAstrocyteOrNeuron
    external codeContractViolation
    
    objref diamsVec
    
    
    proc init() {
        diamsVec = $o1
        
        if (isAstrocyteOrNeuron) {
            codeContractViolation()
        }
    }
    
    func getCachedDiam() { local spineIdx
        spineIdx = $1
        return diamsVec.x(spineIdx)
    }
    
endtemplate ReducedSpineNeckDiamCache

begintemplate ReducedSynSet

    public createSynStruc, initAllHomogenVars
    public allSyns, allComps, enumSynLoc, randomSynLocP, spineNecks_ref, spineHeads_ref, spineNeckDiamCache, idxForSynSet
    public seh
    
    external tapSet, utils4FakeMech4SynNetCon
    external mth, rngUtils
    external enumSynCompIdxs, enumSynPpRoles
    external eachItemInList
    
    objref allSyns, allComps
    enumSynLoc = -1
    randomSynLocP = -1
    objref spineNecks_ref, spineHeads_ref
    objref spineNeckDiamCache
    idxForSynSet = -1
    
    objref seh
    isSefwEnabled = -1
    
    objref this
    
    
    proc init() { local isMinRPlt1
        allSyns = $o1
        allComps = $o2
        enumSynLoc = $3
        randomSynLocP = $4
        spineNecks_ref = $o5
        spineHeads_ref = $o6
        spineNeckDiamCache = $o7
        idxForSynSet = $8
        isMinRPlt1 = $9
        isSefwEnabled = $10     // We don't call seh.isSefwEnabled() in ReducedSynSet because all stoch models will be applied only downstream
        
        if (isSefwEnabled) {
            execute("seh = new SynEventsHelper(allComps)", this)    // The template is not exported if all syn sets are NetCon-less
            seh.isMinRPlt1 = isMinRPlt1
        }
    }
    
    // Keep in sync with SynSet.applyChangesToStrucIfNeeded
    proc createSynStruc() { local is3Or1PartInSynStruc, srcMechIdx, seed localobj syn, srcPp, trgPp, netCon, sefwPp, sefwNetCon, sngPp
        strdef srcMechName, trgMechName, sngMechName
        
        is3Or1PartInSynStruc = $1
        srcMechName = $s2
        trgMechName = $s3
        sngMechName = $s4
        
        if (is3Or1PartInSynStruc) {
            srcMechIdx = mth.getMechIdx(1, srcMechName)
            for eachItemInList(syn, allSyns) {
                srcPp = createNewSrcPp(syn, srcMechIdx, srcMechName)
                trgPp = tapSet.createNewPpAttachedToSection(trgMechName, syn.sec_ref, syn.connectionPoint)
                if (!isSefwEnabled) {
                    netCon = new NetCon(srcPp, trgPp)
                    syn.changeStructure(srcPp, netCon, trgPp)
                } else {
                    seh.createNewSynEventsFilterWatcherButTryToInherit(syn, 0, 0, trgPp, sefwPp, sefwNetCon)
                    netCon = new NetCon(srcPp, sefwPp)
                    syn.changeStructure(srcPp, netCon, sefwPp, sefwNetCon, trgPp)
                }
            }
            if (isSefwEnabled) {
                // It's enough to set the seed only once per rank (for the last sefwPp in our case)
                seed = rngUtils.getSeedFor_SEFW()
                sefwPp.setSeed(seed)
            }
        } else {
            for eachItemInList(syn, allSyns) {
                sngPp = tapSet.createNewPpAttachedToSection(sngMechName, syn.sec_ref, syn.connectionPoint)
                syn.changeStructure(sngPp)
            }
        }
    }
    
    // Keep in sync with SynSet.applyChangesToDirtyHomogenVars
    proc initAllHomogenVars() { local is3Or1PartInSynStruc, srcMechIdx, trgMechIdx, sngMechIdx
        strdef srcMechName, trgMechName, sngMechName
        
        is3Or1PartInSynStruc = $1
        srcMechName = $s2
        trgMechName = $s3
        sngMechName = $s4
        
        if (is3Or1PartInSynStruc) {
            srcMechIdx = mth.getMechIdx(1, srcMechName)
            trgMechIdx = mth.getMechIdx(1, trgMechName)
            initHomogenVars(enumSynCompIdxs.srcPp, srcMechIdx, enumSynPpRoles.srcPp)
            initHomogenVars(enumSynCompIdxs.netCon, utils4FakeMech4SynNetCon.mechIdx, enumSynPpRoles.netCon)
            initHomogenVars(enumSynCompIdxs.trgPp, trgMechIdx, enumSynPpRoles.trgPp)
        } else {
            sngMechIdx = mth.getMechIdx(1, sngMechName)
            initHomogenVars(enumSynCompIdxs.sngPp, sngMechIdx, enumSynPpRoles.sngPp)
        }
    }
    
    // All next staff is private
    
    
    // Keep in sync with SynSet.createNewSrcPpButTryToInherit
    obfunc createNewSrcPp() { local mechIdx, doesSrcPpRequireSection localobj syn, mechType, pp
        strdef mechName
        
        syn = $o1
        mechIdx = $2
        mechName = $s3
        
        mechType = new MechanismType(1)     // 1: "Point Processes"
        
        doesSrcPpRequireSection = !mechType.is_artificial(mechIdx)
        
        if (!doesSrcPpRequireSection) {
            mechType.select(mechName)
            mechType.make(pp)   // Not located in any section
            return pp
        } else {
            return tapSet.createNewPpAttachedToSection(mechName, syn.sec_ref, syn.connectionPoint)
        }
    }
    
    // Keep in sync with SynSet.ifMechDirtyThenApplyHomogenChanges
    proc initHomogenVars() { local compIdx, mechIdx, enumPpRole, isPPorNC, maxVarType, varType, varTypeIdx localobj comp, syn, sefwPpOrNil, sefwNetConOrNil, ppOrNetCon, compMechStd, nil
        
        compIdx = $1
        mechIdx = $2
        enumPpRole = $3
        
        comp = allComps.o(compIdx)
        
        isPPorNC = (compIdx != enumSynCompIdxs.netCon)
        
        for eachItemInList(syn, allSyns) {
            sefwPpOrNil = nil
            sefwNetConOrNil = nil
            ppOrNetCon = syn.getPointProcess(enumPpRole)
            if (isPPorNC) {
                maxVarType = 3
            } else {
                if (isSefwEnabled) {
                    sefwPpOrNil = syn.sefwPp
                    sefwNetConOrNil = syn.sefwNetCon
                }
                maxVarType = 1
            }
            for varType = 1, maxVarType {   // 1: "PARAMETER", 2: "ASSIGNED", 3: "STATE"
                varTypeIdx = varType - 1
                compMechStd = comp.mechStds[mechIdx][varTypeIdx]
                if (compMechStd != nil) {
                    // Here we assign NaN values to inhom vars, but they will be overwritten shortly downstream
                    compMechStd.out(ppOrNetCon)
                }
            }
            if (sefwPpOrNil != nil) {
                if (compMechStd != nil) {
                    // The same comment regarding NaN values
                    sefwPpOrNil.release_probability = compMechStd.get(utils4FakeMech4SynNetCon.metaVarName)
                } else {
                    // We get here when all NetCon params are default (so its mechStd is nil), but stochasticity is enabled
                    sefwPpOrNil.release_probability = 1
                }
            }
            if (sefwNetConOrNil != nil) {
                if (compMechStd != nil) {
                    // The same comment regarding NaN values
                    compMechStd.out(sefwNetConOrNil)
                }
                sefwNetConOrNil.delay = 0
            }
        }
    }
    
endtemplate ReducedSynSet

smAllSynSets = new List()

objref _allSyns, _spineNecks_ref, _spineHeads_ref, _diamsVec, _spineNeckDiamCache, _synSet

//////////////////// End of templates for synapses ///////////////////////

//////////////////// Start of syn set #1: Locations //////////////////////

_allSyns = new List()
NeuronNanoBranch[0].spine_head _allSyns.append(new Synapse(new SectionRef(), 0.5))

//////////////////// End of syn set #1: Locations ////////////////////////

//////////////////// Start of syn set #1: Compartments ///////////////////

_allComps = new List()
{ _allComps.append(new ReducedPPComp(0, "Source PP", enumSynPpRoles.srcPp, "NetStim")) }
{ _allComps.append(new ReducedFakeComp(enumSynPpRoles.netCon, 1)) }
{ _allComps.append(new ReducedPPComp(0, "Target PP", enumSynPpRoles.trgPp, "Exp2Syn")) }
{ _allComps.append(new ReducedPPComp(0, "Single PP", enumSynPpRoles.sngPp, "")) }

//////////////////// End of syn set #1: Compartments /////////////////////

//////////////////// Start of syn set #1: Homogen vars ///////////////////

isMinRPlt1 = 0

// "Source PP"
proc _addHomogenVarsInfoToSynComp1() { local mechIdx localobj comp, mechStd
    comp = $o1
    
    mechIdx = mth.getMechIdx(1, "NetStim")
    
    mechStd = new MechanismStandard("NetStim", 1)    // PARAMETER
    mechStd.set("interval", 100.0)    // (ms)
    mechStd.set("number", 1000.0)
    mechStd.set("start", 2.0)    // (ms)
    mechStd.set("noise", 1.0)
    comp.mechStds[mechIdx][0] = mechStd
}

// "NetCon"
proc _addHomogenVarsInfoToSynComp2() { local mechIdx localobj comp, mechStd
    comp = $o1
    
    mechIdx = mth.getMechIdx(2, "NetCon")
    
    mechStd = new FakeMechanismStandardForNetCon()
    mechStd.set("threshold", 0.0)    // (mV)
    mechStd.set("delay", 0.0)    // (ms)
    comp.mechStds[mechIdx][0] = mechStd
}

// "Target PP"
proc _addHomogenVarsInfoToSynComp3() { local mechIdx localobj comp, mechStd
    comp = $o1
}

// "Single PP"
proc _addHomogenVarsInfoToSynComp4() { local mechIdx localobj comp, mechStd
    comp = $o1
}

_comp = _allComps.o(0)
_addHomogenVarsInfoToSynComp1(_comp)    // "Source PP"

_comp = _allComps.o(1)
_addHomogenVarsInfoToSynComp2(_comp)    // "NetCon"

_comp = _allComps.o(2)
_addHomogenVarsInfoToSynComp3(_comp)    // "Target PP"

_comp = _allComps.o(3)
_addHomogenVarsInfoToSynComp4(_comp)    // "Single PP"

//////////////////// End of syn set #1: Homogen vars /////////////////////

//////////////////// Start of syn set #1: "Import & Edit" measures ///////

_spineNecks_ref = new List()
NeuronNanoBranch[0].spine_neck _spineNecks_ref.append(new SectionRef())

_spineHeads_ref = new List()
NeuronNanoBranch[0].spine_head _spineHeads_ref.append(new SectionRef())

_diamsVec = new Vector(1)
_diamsVec.x(0) = 0.5998328328132629

_spineNeckDiamCache = new ReducedSpineNeckDiamCache(_diamsVec)

//////////////////// End of syn set #1: "Import & Edit" measures /////////

//////////////////// Start of syn set #1: Main part //////////////////////

_synSet = new ReducedSynSet(_allSyns, _allComps, 0, 0.5, _spineNecks_ref, _spineHeads_ref, _spineNeckDiamCache, 1, isMinRPlt1, 0)

{ _synSet.createSynStruc(1, "NetStim", "Exp2Syn", "") }
{ _synSet.initAllHomogenVars(1, "NetStim", "Exp2Syn", "") }

// Set #1: NetStim -> NetCon -> Exp2Syn -> Section (1 syn)
{ smAllSynSets.append(_synSet) }

//////////////////// End of syn set #1: Main part ////////////////////////

//////////////////// Start of cleanup ////////////////////////////////////

_comp = nil

_vecOfVals = nil
_listOfStrs = nil

_allComps = nil

_allGapJuncs = nil
_sec_ref = nil
_otherSec_ref = nil
_selected_ref = nil
_seedingDensityHelper = nil
_gapJuncSet = nil

_allSyns = nil
_spineNecks_ref = nil
_spineHeads_ref = nil
_diamsVec = nil
_spineNeckDiamCache = nil
_synSet = nil

//////////////////// End of cleanup //////////////////////////////////////

//////////////////// Start of APCount-s //////////////////////////////////

objref apCounts[1]

soma apCounts[0] = new APCount(0.55)
apCounts[0].thresh = 0.0    // (mV)

//////////////////// End of APCount-s ////////////////////////////////////

access soma_ref.o(0).sec