
begintemplate ReducedSynNCComp

    public enumDmPpFk, mechStds
    public applyInhomogeneity
    
    external mth, mcu
    external tapGroup, smAllSyns, seh, utils4FakeMech4SynNetCon
    external codeContractViolation
    
    enumDmPpFk = -1
    objref mechStds[1][1]
    
    
    proc init() {
        enumDmPpFk = 2
        objref mechStds[1][1]
    }
    
    // Keep in sync with SynNCComp.applyInhomogeneity
    proc applyInhomogeneity() { local varType, arraySize, arrayIndex, isMetaVar, isSefwEnabled, isWeightVar, y localobj distFuncHelper, firstNetCon, mechStd, syn, thisPp
        strdef mechName, varName, varNameWithIndex
        
        mechName = $s1  // Just placeholders
        varType = $2    //
        varName = $s3
        arraySize = $4
        arrayIndex = $5
        distFuncHelper = $o6
        
        if (varType != 1) {     // 1: "PARAMETER"
            codeContractViolation()
        }
        
        isMetaVar = mcu.isMetaVar(varName)
        isSefwEnabled = seh.isSefwEnabled()
        
        if (isMetaVar && !isSefwEnabled) {
            return
        }
        
        if (!isMetaVar) {
            mth.getVarNameWithIndex(varName, arraySize, arrayIndex, varNameWithIndex)
            isWeightVar = mth.isWeightNetConVar(varName)
        } else {
            mechStd = new MechanismStandard(seh.realMechName, seh.realVarType)
        }
        
        for tapGroup.applyInhomogeneityIter(syn, smAllSyns, distFuncHelper) {
            y = distFuncHelper.calculateAt(syn.dist)
            if (!isMetaVar) {
                firstNetCon = syn.netCon
                utils4FakeMech4SynNetCon.setNetConVar(firstNetCon, varNameWithIndex, y)
                if (isSefwEnabled && isWeightVar) {
                    syn.sefwNetCon.weight = firstNetCon.weight
                }
            } else {
                thisPp = syn.sefwPp
                mechStd.in(thisPp)
                mechStd.set(seh.realVarName, y, seh.realArrayIndex)
                mechStd.out(thisPp)
            }
        }
    }
    
endtemplate ReducedSynNCComp
