
// !! some code dupl. with MechComp.hoc and major code dupl. with GapJuncGroup.hoc


// Probability for "Random" synapse location:
// 0: "All on Spine Head", 1: "All on Dendrite (just under Spine Neck)"
{ makeSureDeclared("smSynLocP", "smSynLocP = 0.5") }


// A group of synapses (a counterpart of MechComp template)
begintemplate SynGroup

    public is3Or1PartInSynStruc, getPpNameOrEmpty, getMechIdxAndOptionalName, getDistRange, getSecList, reCalcAndCacheDistInSyns, applyChangesToLoc, applyChangesToStrucIfNeeded, applyChangesToDirtyHomogenVars, applyInhomogeneityIter, updateColormaps
    public witheredSpineNeckDiam
    
    external synManagerMainWidget
    external smAllSyns, smAllComps, nanoProximal_ref, nanoDistal_ref
    external mwh, mth, math, mcu, seh, rngUtils, mmIcrHelper, tapGroup
    external capDiam, stringEmpty, stringsEqual, codeContractViolation
    external eachItemInList
    external enumSynCompIdxs, smEnumSynLoc, smSynLocP
    external spineNeckDiamCache, inhomAndStochLibrary
    
    objref randomSynLoc
    objref this
    
    witheredSpineNeckDiam = -1
    
    
    proc init() {
        randomSynLoc = rngUtils.getFor_synLoc()
        
        witheredSpineNeckDiam = capDiam(0)
    }
    
    func is3Or1PartInSynStruc() { localobj nil
        // It's a code contract that all the syns have the same structure
        return (smAllSyns.o(0).netCon != nil)
    }
    
    proc getPpNameOrEmpty() { local enumPpRole
        strdef ppName
        enumPpRole = $1     // 0: "Source PP", 1: "Target PP", 2: "Single PP"
        tapGroup.getPpNameOrEmpty(smAllSyns.o(0), enumPpRole, ppName)
        $s2 = ppName
    }
    
    // !!!! some code dup. with GapJuncGroup.getMechIdxAndOptionalName
    // Returns -1 and "" if there is no PP given role
    func getMechIdxAndOptionalName() { local numArg, enumPpRole
        strdef mechName
        numArg = numarg()
        if (numArg == 0 || numArg > 2) {
            codeContractViolation()
        }
        enumPpRole = $1
        getPpNameOrEmpty(enumPpRole, mechName)
        if (numArg == 2) {
            $s2 = mechName
        }
        if (stringEmpty(mechName)) {
            return -1
        } else {
            return mth.getMechIdx(1, mechName)  // 1: "Point Processes"
        }
    }
    
    func getDistRange() {
        return tapGroup.getDistRange(smAllSyns, &$&1, &$&2)
    }
    
    obfunc getSecList() {
        return tapGroup.getSecList(smAllSyns)
    }
    
    proc reCalcAndCacheDistInSyns() { localobj syn
        for eachItemInList(syn, smAllSyns) {
            syn.calcAndCacheDist()
        }
    }
    
    // Other input: smEnumSynLoc, smSynLocP (taken from the top level)
    // See also: GapJuncGroup.applyChangesToLoc
    proc applyChangesToLoc() { local isReviewAfterApply, distMin, distMax, synIdx, connectionPoint, spineNeckDiam localobj sec_ref, syn, nil
        isReviewAfterApply = $1
        
        if (smEnumSynLoc == 2) {
            randomSynLoc.binomial(1, smSynLocP)     // Bernoulli distribution
        }
        
        distMin = math.inf
        distMax = -1
        for synIdx = 0, smAllSyns.count() - 1 {
            getNewSecRefConnectionPointAndSpineNeckDiam(synIdx, sec_ref, &connectionPoint, &spineNeckDiam)
            syn = smAllSyns.o(synIdx)
            
            syn.changeLocation(sec_ref, connectionPoint)
            nanoProximal_ref.o(synIdx).sec {
                diam = spineNeckDiam
            }
            
            math.updateMinMax(&distMin, &distMax, syn.dist)
        }
        
        synManagerMainWidget.onSynLocChangedHandler(distMin, distMax, isReviewAfterApply)
        
        if (mmIcrHelper != nil) {   // !! can be nil in tests
            mmIcrHelper.scheduleRescan(5)
        }
    }
    
    // Keep in sync with ReducedSynGroup.createSynStruc
    func applyChangesToStrucIfNeeded() { local is3Or1PartInSynStruc_new, srcMechIdx, trgMechIdx, sngMechIdx, isForceNewTrgOrSng, is3Or1PartInSynStruc_old, enumTrgOrSngPpRole_old, isSefwEnabled, isSrcMechNameUnchanged, isSefwPresenceUnchanged, isTrgMechNameUnchanged, seed localobj syn, srcPp, trgPp, netCon, sefwPp, sefwNetCon, sngPp
        strdef srcMechName, trgMechName, sngMechName, trgOrSngMechName_old, srcMechName_old, trgMechName_old, sngMechName_old
        
        is3Or1PartInSynStruc_new = $1
        srcMechIdx = $2
        trgMechIdx = $3
        sngMechIdx = $4
        srcMechName = $s5
        trgMechName = $s6
        sngMechName = $s7
        isForceNewTrgOrSng = $8
        
        is3Or1PartInSynStruc_old = is3Or1PartInSynStruc()
        
        if (is3Or1PartInSynStruc_old) {
            enumTrgOrSngPpRole_old = 1
        } else {
            enumTrgOrSngPpRole_old = 2
        }
        getPpNameOrEmpty(0, srcMechName_old)
        getPpNameOrEmpty(1, trgMechName_old)
        getPpNameOrEmpty(2, sngMechName_old)
        getPpNameOrEmpty(enumTrgOrSngPpRole_old, trgOrSngMechName_old)
        
        if (is3Or1PartInSynStruc_new) {
            isSefwEnabled = seh.isSefwEnabled()
            isSrcMechNameUnchanged = stringsEqual(srcMechName, srcMechName_old)
            isSefwPresenceUnchanged = (isSefwEnabled == isSefwPresentInSynStruc())
            isTrgMechNameUnchanged = stringsEqual(trgMechName, trgMechName_old)
            if (!isForceNewTrgOrSng && isSrcMechNameUnchanged && isSefwPresenceUnchanged && isTrgMechNameUnchanged) {
                return 0
            }
            
            for eachItemInList(syn, smAllSyns) {
                srcPp = createNewSrcPpButTryToInherit(syn, srcMechIdx, srcMechName, isSrcMechNameUnchanged)
                trgPp = createNewTrgOrSngPpButTryToInherit(syn, trgMechIdx, trgMechName, isForceNewTrgOrSng, enumSynCompIdxs.trgPp, enumTrgOrSngPpRole_old, trgOrSngMechName_old)
                if (!isSefwEnabled) {
                    netCon = createNewNetConButTryToInherit(syn, srcPp, trgPp, is3Or1PartInSynStruc_old)
                    syn.changeStructure(srcPp, netCon, trgPp)
                } else {
                    seh.createNewSynEventsFilterWatcherButTryToInherit(syn, isSefwPresenceUnchanged, is3Or1PartInSynStruc_old, trgPp, sefwPp, sefwNetCon)
                    netCon = createNewNetConButTryToInherit(syn, srcPp, sefwPp, is3Or1PartInSynStruc_old)
                    syn.changeStructure(srcPp, netCon, sefwPp, sefwNetCon, trgPp)
                }
            }
            if (isSefwEnabled) {
                // It's enough to set the seed only once per rank (for the last sefwPp in our case)
                seed = rngUtils.getSeedFor_SEFW()
                sefwPp.setSeed(seed)
            }
        } else {
            if (!isForceNewTrgOrSng && stringsEqual(sngMechName, sngMechName_old)) {
                return 0
            }
            for eachItemInList(syn, smAllSyns) {
                sngPp = createNewTrgOrSngPpButTryToInherit(syn, sngMechIdx, sngMechName, isForceNewTrgOrSng, enumSynCompIdxs.sngPp, enumTrgOrSngPpRole_old, trgOrSngMechName_old)
                syn.changeStructure(sngPp)
            }
        }
        
        if (is3Or1PartInSynStruc_new) {
            sngMechName = ""
        } else {
            srcMechName = ""
            trgMechName = ""
        }
        inhomAndStochLibrary.onSynStrucChange(srcMechName_old, trgMechName_old, sngMechName_old, srcMechName, trgMechName, sngMechName)
        
        return 1
    }
    
    // Keep in sync with ReducedSynGroup.initAllHomogenVars
    func applyChangesToDirtyHomogenVars() { local srcMechIdx, trgMechIdx, sngMechIdx, isSmthChanged
        srcMechIdx = $1
        trgMechIdx = $2
        sngMechIdx = $3
        if (is3Or1PartInSynStruc()) {
            isSmthChanged = ifMechDirtyThenApplyHomogenChanges(enumSynCompIdxs.srcPp, srcMechIdx, 0)
            isSmthChanged = ifMechDirtyThenApplyHomogenChanges(enumSynCompIdxs.netCon, 0, -1) || isSmthChanged
            isSmthChanged = ifMechDirtyThenApplyHomogenChanges(enumSynCompIdxs.trgPp, trgMechIdx, 1) || isSmthChanged
        } else {
            isSmthChanged = ifMechDirtyThenApplyHomogenChanges(enumSynCompIdxs.sngPp, sngMechIdx, 2)
        }
        return isSmthChanged
    }
    
    proc updateColormaps() { localobj shape1, shape2
        shape1 = $o1
        shape2 = $o2
        tapGroup.updateColormap(smAllSyns, 3, shape1)
        tapGroup.updateColormap(smAllSyns, 3, shape2)
    }
    
    // All next staff is private
    
    
    // Keep in sync with ReducedSynGroup.createNewSrcPp
    obfunc createNewSrcPpButTryToInherit() { local mechIdx, isSrcMechNameUnchanged, doesSrcPpRequireSection, synCompIdx localobj syn, mechType, outPp
        strdef mechName
        
        syn = $o1
        mechIdx = $2
        mechName = $s3
        isSrcMechNameUnchanged = $4
        
        if (isSrcMechNameUnchanged) {
            return syn.srcPp
        }
        
        doesSrcPpRequireSection = mth.doesPointProcessRequireSection(mechIdx)
        synCompIdx = enumSynCompIdxs.srcPp
        
        if (!doesSrcPpRequireSection) {
            mechType = mth.getMechType(1)
            mechType.select(mechName)
            mechType.make(outPp)    // Not located in any section
            tapGroup.setDefaultVars(synCompIdx, mechIdx, outPp)
            return outPp
        } else {
            return tapGroup.createNewPpAttachedToSectionButTryToInherit(syn.srcPp, synCompIdx, mechIdx, mechName, syn.sec_ref, syn.connectionPoint, 0)
        }
    }
    
    obfunc createNewTrgOrSngPpButTryToInherit() { local mechIdx, isForceNew, synCompIdx, enumPpRole_old, isMechNameUnchanged localobj syn, pp_old
        strdef mechName, mechName_old
        
        syn = $o1
        mechIdx = $2
        mechName = $s3
        isForceNew = $4
        synCompIdx = $5
        enumPpRole_old = $6
        mechName_old = $s7
        
        pp_old = syn.getPointProcess(enumPpRole_old)
        isMechNameUnchanged = stringsEqual(mechName, mechName_old)
        if (!isForceNew && isMechNameUnchanged) {
            return pp_old
        } else {
            return tapGroup.createNewPpAttachedToSectionButTryToInherit(pp_old, synCompIdx, mechIdx, mechName, syn.sec_ref, syn.connectionPoint, isMechNameUnchanged)
        }
    }
    
    obfunc createNewNetConButTryToInherit() { local is3Or1PartInSynStruc_old localobj syn, srcPp, nextPp, netCon, mechStd
        syn = $o1
        srcPp = $o2
        nextPp = $o3
        is3Or1PartInSynStruc_old = $4
        
        netCon = new NetCon(srcPp, nextPp)
        if (is3Or1PartInSynStruc_old) {
            mechStd = new FakeMechanismStandardForNetCon()
            mechStd.in(syn.netCon)
            mechStd.out(netCon)
        } else {
            tapGroup.setDefaultVars(enumSynCompIdxs.netCon, 0, netCon)
        }
        
        return netCon
    }
    
    // Keep in sync with ReducedSynGroup.initHomogenVars
    func ifMechDirtyThenApplyHomogenChanges() { local compIdx, mechIdx, enumPpRole, isPPorNC, maxVarType, varType, varTypeIdx, release_probability localobj comp, syn, sefwPpOrNil, sefwNetConOrNil, ppOrNetCon, compMechStd, tempMechStdExt, nil
        strdef mechName
        
        compIdx = $1
        mechIdx = $2
        enumPpRole = $3
        
        comp = smAllComps.o(compIdx)
        
        if (!comp.isMechDirty[mechIdx]) {
            return 0
        }
        
        isPPorNC = (compIdx != enumSynCompIdxs.netCon)
        
        if (isPPorNC) {
            mth.getMechName(1, mechIdx, mechName)
            maxVarType = 3
        } else {
            maxVarType = 1
        }
        
        for eachItemInList(syn, smAllSyns) {
            sefwPpOrNil = nil
            sefwNetConOrNil = nil
            if (isPPorNC) {
                ppOrNetCon = syn.getPointProcess(enumPpRole)
            } else {
                ppOrNetCon = syn.netCon
                if (seh.isSefwEnabled()) {
                    sefwPpOrNil = syn.sefwPp
                    sefwNetConOrNil = syn.sefwNetCon
                }
            }
            for varType = 1, maxVarType {   // 1: "PARAMETER", 2: "ASSIGNED", 3: "STATE"
                varTypeIdx = mth.convertVarTypeToVarTypeIdx(varType)
                compMechStd = comp.mechStds[mechIdx][varTypeIdx]
                if (!comp.isMechVarTypeInhom[mechIdx][varTypeIdx]) {
                    compMechStd.out(ppOrNetCon)
                    tempMechStdExt = compMechStd
                } else {
                    if (isPPorNC) {
                        tempMechStdExt = new MechanismStandard(mechName, varType)
                    } else {
                        tempMechStdExt = new FakeMechanismStandardForNetCon()
                    }
                    tempMechStdExt.in(ppOrNetCon)
                    mcu.copyAllVarsValuesExceptInhom(compMechStd, tempMechStdExt)
                    tempMechStdExt.out(ppOrNetCon)
                }
            }
            if (sefwPpOrNil != nil) {
                release_probability = compMechStd.get(seh.metaVarName)
                if (!math.isNaN(release_probability)) {
                    sefwPpOrNil.release_probability = release_probability
                }
            }
            if (sefwNetConOrNil != nil) {
                tempMechStdExt.out(sefwNetConOrNil)
                sefwNetConOrNil.delay = 0
            }
        }
        
        comp.isMechDirty[mechIdx] = 0
        
        return 1
    }
    
    // !! major code dupl. with proc reseedNeuronSyns
    proc getNewSecRefConnectionPointAndSpineNeckDiam() { local synIdx, synLocIdx, connectionPoint, spineNeckDiam localobj sec_ref, np_ref
        synIdx = $1
        
        if (smEnumSynLoc == 2) {
            synLocIdx = randomSynLoc.repick()
        } else {
            synLocIdx = smEnumSynLoc
        }
        
        if (synLocIdx == 0) {
            // Synapse is connected to the centre of spine_head
            connectionPoint = 0.5
            nanoDistal_ref.o(synIdx).sec {
                sec_ref = new SectionRef()
            }
            spineNeckDiam = spineNeckDiamCache.getCachedDiam(synIdx)
        } else if (synLocIdx == 1) {
            // Synapse is connected to the point on dendrite where spine_neck emerges
            np_ref = nanoProximal_ref.o(synIdx)
            np_ref.sec {
                connectionPoint = parent_connection()
            }
            np_ref.parent {
                sec_ref = new SectionRef()
            }
            spineNeckDiam = witheredSpineNeckDiam
        } else {
            codeContractViolation()
        }
        
        $o2 = sec_ref
        $&3 = connectionPoint
        $&4 = spineNeckDiam
    }
    
    func isSefwPresentInSynStruc() { localobj nil
        // It's a code contract that all the syns have the same structure
        return (smAllSyns.o(0).sefwPp != nil)
    }
    
endtemplate SynGroup

synGroup = new SynGroup()
