
// !! maybe use AltRunControl to call "setIp3ToSomaAndDendrites" from "preRun" to avoid the jump of "ip3i" on the Graph on 1st iteration
isCaWaveSimActive = 0
{ load_file("Utils/CalciumParameters.hoc") }

begintemplate SimCalciumWave
    
    public preShowCheck, show, advance, simDismissHandler
    public biophysJsonFileNameOrEmpty, isCustomProcAdvance, isAltRunControl
    
    // Just a workaround to avoid the error in GraphUtils.parseVarsFromTheGraph
    public TimeDelayCaWave, PeakDuration, PeakIp3
    
    external showCaParameters
    external vBoxCadifusParams
    external addplot
    external removeItemFromList, unmapIfNotNil
    external altRunControlWidget
    external tstop
    external eachSecInList
    external soma_ref, dendrite_ref
    external graphList, fast_flush_list
	external isCaWaveSimActive                      // ADD THIS LINE
    
    strdef biophysJsonFileNameOrEmpty
    isCustomProcAdvance = -1
    isAltRunControl = -1
    
    // UI
    objref vBoxCaWave, vBoxPlotShapeCaWaveCai, vBoxGraphCaWaveCai, plotShapeCaWaveCai, graphCaWaveCai
    
    
    proc init() {
        biophysJsonFileNameOrEmpty = "SimCalcium.json"
        isCustomProcAdvance = 1
        isAltRunControl = 0
    }
    
    func preShowCheck() {
        return 0
    }
    
    // Opens Calcium Wave window.
    proc show() {
		isCaWaveSimActive = 1        // ADD THIS LINE
        initParamsCaWave()
        showCaWaveUi()
        // The set of parameters of Ca stimulations
        showCaParameters()
    }
    
    // Sets ip3i to soma and dendrites.
    proc advance() { local ip3Value
        fadvance()
        
        if ((t > TimeDelayCaWave) && (t < TimeDelayCaWave + PeakDuration)) {
            ip3Value = PeakIp3
        } else {
            ip3Value = ip3i0_ip3_ion    // !! was: 0.0000001
        }
        setIp3ToSomaAndDendrites(ip3Value)
        
        graphCaWaveCai.exec_menu("View = plot")
    }
    
    proc simDismissHandler() {
        isCaWaveSimActive = 0        // ADD THIS LINE
        removeItemFromList(graphList[0], graphCaWaveCai)
        removeItemFromList(fast_flush_list, plotShapeCaWaveCai)
        
        unmapIfNotNil(vBoxCaWave)
        unmapIfNotNil(vBoxPlotShapeCaWaveCai)
        unmapIfNotNil(vBoxGraphCaWaveCai)
        
        unmapIfNotNil(vBoxCadifusParams)
    }
    
    // All next staff is private
    
    
    // Sets initial UI and simulation params.
    proc initParamsCaWave() {
        TimeDelayCaWave = 10
        PeakDuration = 15000
        PeakIp3 = 0.05
    }
    
    // Shows Calcium Wave UI.
    proc showCaWaveUi() {
        vBoxCaWave = new VBox()
        vBoxCaWave.intercept(1)
        {
            xpanel("")
            xlabel("=========== Parameters of waves===========")
            xpvalue("IP3 onset time (ms)", &TimeDelayCaWave, 1)
            xpvalue("IP3 peak duration (ms)", &PeakDuration, 1)
            xpvalue("IP3 peak conc (mM)", &PeakIp3, 1)
            xpvalue("* IP3 base conc", &ip3i0_ip3_ion, 1)
            xlabel("* Will be assigned to GLOBAL \"ip3i0_ip3_ion\"")
            xlabel("=========================================")
            xpvalue("Run time (ms)", &tstop, 1)
            xbutton("Run simulation", "altRunControlWidget.initAndRunHandler()")
            xpanel()
        }
        vBoxCaWave.intercept(0)
        vBoxCaWave.map("Ca wave", 283, 102, -1, -1)
        
        vBoxGraphCaWaveCai = new VBox()
        vBoxGraphCaWaveCai.intercept(1)
        {
            graphCaWaveCai = new Graph(0)
            addplot(graphCaWaveCai, 0)
            graphCaWaveCai.erase_all()
            graphCaWaveCai.size(0,50000,0,0.0001)
            graphCaWaveCai.view(0, 0, 50000, 0.0001, 602, 705, 400, 200)
            graphCaWaveCai.addvar("soma_ref.o(0).sec.cai(0.5)",1,1,0.6, 0.9,2)
            graphCaWaveCai.fastflush()
        }
        vBoxGraphCaWaveCai.intercept(0)
        vBoxGraphCaWaveCai.map("[Ca2+]in vs Time", 602, 705, 400, 200)
        
        vBoxPlotShapeCaWaveCai = new VBox()
        vBoxPlotShapeCaWaveCai.intercept(1)
        {
            plotShapeCaWaveCai = new PlotShape(0)
            fast_flush_list.append(plotShapeCaWaveCai)
            plotShapeCaWaveCai.size(-50,50,-50,50)
            plotShapeCaWaveCai.view(-50, -49.9003, 100, 100, 601, 102, 400.64, 400.32)
            plotShapeCaWaveCai.exec_menu("Shape Plot")
            plotShapeCaWaveCai.exec_menu("View = plot")
            plotShapeCaWaveCai.variable("cai")
            plotShapeCaWaveCai.label(0.12, 0.95, "[Ca2+]i (mM)", 2, 1, 0, 1, 1)
            plotShapeCaWaveCai.show(0)
            plotShapeCaWaveCai.scale(0,0.0006)  // mV, scale of voltage on 3D plots
        }
        vBoxPlotShapeCaWaveCai.intercept(0)
        vBoxPlotShapeCaWaveCai.map("[Ca2+]i", 601, 102, 400.64, 400.32)
    }
    
    proc setIp3ToSomaAndDendrites() { local ip3Value
        ip3Value = $1
        
        for eachSecInList(soma_ref, dendrite_ref) {
            ip3i = ip3Value
        }
    }
    
endtemplate SimCalciumWave
