
proc PotassiumIteration() { codeContractViolation() }

begintemplate SimPotassium
    
    public preShowCheck, show, preRun, preContinue, advance, postRun, simDismissHandler
    public biophysJsonFileNameOrEmpty, isCustomProcAdvance, isAltRunControl
    
    // Just a workaround to avoid the error in GraphUtils.parseVarsFromTheGraph
    public PX, PY, PZ, RFRAP, TimeBegin, Kduration, PX2, KCurrent, DCoef, KpLeak, KResting
    
    external PotassiumIteration
    external mwh, seClampHelper, ecsLibrary
    external altRunControlWidget
    external tstop
    external showExtracellularManagerBaseWidget, applyExtracellularSourcesWithWaitBoxAndUpdateMainUiDiffStatusIndication, removeItemFromList, unmapIfNotNil
    external dendrite_ref
    external graphList, fast_flush_list
    
    strdef biophysJsonFileNameOrEmpty
    isCustomProcAdvance = -1
    isAltRunControl = -1
    
    // UI
    objref vBoxPotassiumMain, vBoxGraphPotassiumSEClamp, vBoxGraphPotassiumIn, vBoxPlotShapeVoltagePotassium, vBoxPlotShapePotassiumIn, vBoxPlotShapePotassiumOut, graphPotassiumSEClamp, graphPotassiumIn, plotShapeVoltagePotassium, plotShapePotassiumIn, plotShapePotassiumOut
    
    
    proc init() {
        biophysJsonFileNameOrEmpty = "SimPotassium.json"
        isCustomProcAdvance = 1
        isAltRunControl = 1
    }
    
    func preShowCheck() {
        return 0
    }
    
    // Opens Potassium simulation window.
    proc show() { local isFirstShow
        
        isFirstShow = $1
        
        initParamsPotassium()
        
        seClampHelper.deployClamp(0)
        
        if (isFirstShow) {
            ko0_k_ion = PotassiumBasic
            
            // Create a default extracellular source of K+ as a static sphere
            ecsLibrary.deleteAll()
            ecsLibrary.addNewSource(0, "K+", new ECSSpatialInfo(1, PX_o, PY_o, PZ_o, R_o), new ECSTemporalInfo(0), new ECSCapacityInfo(1, PotassiumInside - PotassiumBasic))
        }
        
        showExtracellularManagerBaseWidget()
        showPotassiumUi()
    }
    
    func preRun() { local isEnabled
        isEnabled = applyExtracellularSourcesWithWaitBoxAndUpdateMainUiDiffStatusIndication()
        // !! maybe make this check more restrictive and verify that we have at least one K+ source
        if (!isEnabled) {
            mwh.showWarningBox("Cannot proceed without any extracellular sources.")
            return 1
        }
        
        return 0
    }
    
    func preContinue() {
        return 0
    }
    
    proc advance() {
        fadvance()
        PotassiumIteration(PX, PY, RFRAP, TimeBegin, DCoef, Kduration, PX2, KCurrent, KpLeak, PZ, KResting)
        graphPotassiumIn.exec_menu("View = plot")
        graphPotassiumSEClamp.exec_menu("View = plot")
    }
    
    proc postRun() {
        // Empty by design
    }
    
    proc simDismissHandler() {
        
        removeItemFromList(graphList[1], graphPotassiumIn)
        removeItemFromList(graphList[1], graphPotassiumSEClamp)
        removeItemFromList(fast_flush_list, plotShapePotassiumIn)
        removeItemFromList(fast_flush_list, plotShapeVoltagePotassium)
        removeItemFromList(fast_flush_list, plotShapePotassiumOut)
        
        unmapIfNotNil(vBoxPotassiumMain)
        unmapIfNotNil(vBoxGraphPotassiumSEClamp)
        unmapIfNotNil(vBoxGraphPotassiumIn)
        unmapIfNotNil(vBoxPlotShapeVoltagePotassium)
        unmapIfNotNil(vBoxPlotShapePotassiumIn)
        unmapIfNotNil(vBoxPlotShapePotassiumOut)
        
        seClampHelper.removeClamp()
    }
    
    // All next staff is private
    
    
    // Sets initial UI and simulation params.
    proc initParamsPotassium() {
        // Parameter of Potassium release in two places
        PX = 0                // X- Coordinate of the place
        PY = -20              // Y - coordinate of the place
        PZ =0                 // Z - coordinate of the place
        PX2 = 0               // Distance in x-coordinate of another place of release. If you need to define a single place of release just PX2 = 0
        RFRAP = 3.0           // Radius of release
        TimeBegin = 5         // Time of release
        DCoef = 0.60          // diffusion
        KpLeak = 0.1          // Decay time of release
        Kduration = 200       // Duration of potassium input
        KCurrent = 1          // Amplitude of Extra Potassium currentin mM
        KResting = 110 // Resting concentration of potasesium in mM
        
        PX_o = 0              // X-Coordinate of extracellular potassium
        PY_o = 25             // Y-Coordinate of extracellular potassium
        PZ_o = 0              // Z-Coordinate of extracellular potassium
        R_o  = 10                 // radius of extracellular potassium changes
        PotassiumInside = 5       // Extracellular potassium concetration inside the circle
        PotassiumBasic = 3        // Basic extracellular potassium cocnentration
    }
    
    // Shows Potassium simulation UI.
    proc showPotassiumUi() {
        vBoxPotassiumMain = new VBox()
        vBoxPotassiumMain.intercept(1)
        {
            xpanel("")
            xlabel("================= Potassium input =================")
            xpvalue("X coordinate [K]in (um)", &PX, 1)
            xpvalue("Y coordinate [K]in (um)", &PY, 1)
            xpvalue("Z coordinate [K]in (um)", &PZ, 1)
            xpvalue("Potassium [K]in input radius (um)", &RFRAP, 1)
            xpvalue("Potassium [K]in input onset (ms)", &TimeBegin, 1)
            xpvalue("Duration of potassium input (ms)", &Kduration, 1)
            //xpvalue("Distance between two release (um)", &PX2, 1)
            xpvalue("Peak K+ current (mA/cm2)", &KCurrent, 1)
            xpvalue("Diffusion coefficient (um2/ms)", &DCoef, 1)
            xpvalue("K+ leak rate (mA/cm2)", &KpLeak, 1)
            xpvalue("Basal [K+]in concentration (mM)", &KResting, 1)
            xlabel("========= Extracellular potassium distribution =========")
            xbutton("Show ECS manager", "showExtracellularManagerBaseWidget()")
            xlabel("================================================")
            xpanel(625,164)
            
            xpanel("")
            xlabel("============== Voltage clamp of soma ==============")
            xpvalue("Somatic voltage clamp", &seClampHelper.seClamp.amp1, 1)
            xpvalue("Clamp duration", &seClampHelper.seClamp.dur1, 1)
            xlabel("-------------------------------------------------------------------------------------------------")
            xpvalue("Simulation time (ms)", &tstop, 1)
            xbutton("Run simulation", "altRunControlWidget.initAndRunHandler()")
            xpanel(328,129)
        }
        vBoxPotassiumMain.intercept(0)
        vBoxPotassiumMain.map("Potassium settings", 195, 102, -1, -1)
        
        vBoxGraphPotassiumIn = new VBox()
        vBoxGraphPotassiumIn.intercept(1)
        {
            graphPotassiumIn = new Graph(0)
            graphList[1].append(graphPotassiumIn)
            graphPotassiumIn.size(0,150,-3.49246e-010,0.0101)
            graphPotassiumIn.view(0, 110, 150, 120, 602, 705, 400, 200)
            graphPotassiumIn.addvar("dendrite_ref.o(1).sec.ki( 0.05 )", 1, 1, 0.8, 0.9, 2)      // !! fragile: get rid of explicit indices
            graphPotassiumIn.addvar("dendrite_ref.o(51).sec.ki( 0.05 )", 2, 1, 0.8, 0.9, 2)     //
            graphPotassiumIn.yaxis(0)
            graphPotassiumIn.label(0.5, 0.09, "Time (ms)", 2, 1, 0, 1, 1)
            graphPotassiumIn.label(0.1, 0.9, "[K+]in (mM)", 2, 1, 0, 1, 1)
        }
        vBoxGraphPotassiumIn.intercept(0)
        vBoxGraphPotassiumIn.map("[K+]in vs Time", 602, 705, 400, 200)
        
        vBoxGraphPotassiumSEClamp = new VBox()
        vBoxGraphPotassiumSEClamp.intercept(1)
        {
            graphPotassiumSEClamp = new Graph(0)
            graphList[1].append(graphPotassiumSEClamp)
            graphPotassiumSEClamp.size(0,150,-0.015,-5.82077e-010)
            graphPotassiumSEClamp.view(0, -0.015, 150, 0.015, 1145, 705, 400, 200)
            graphPotassiumSEClamp.addexpr("seClampHelper.seClamp.i", 1, 1, 0.8, 0.9, 2)
            graphPotassiumSEClamp.yaxis(0)
            graphPotassiumSEClamp.label(0.5, 0.9, "Time (ms)", 2, 1, 0, 1, 1)
            graphPotassiumSEClamp.label(0.1, 0.09, "Clamp current (nA)", 2, 1, 0, 1, 1)
        }
        vBoxGraphPotassiumSEClamp.intercept(0)
        vBoxGraphPotassiumSEClamp.map("Clamp current vs Time", 1145, 705, 400, 200)
        
        vBoxPlotShapePotassiumIn = new VBox()
        vBoxPlotShapePotassiumIn.intercept(1)
        {
            plotShapePotassiumIn = new PlotShape(0)
            fast_flush_list.append(plotShapePotassiumIn)
            plotShapePotassiumIn.size(-50,50,-50,50)
            plotShapePotassiumIn.view(-50, -49.9003, 100, 100, 601, 102, 400.64, 400.32)
            plotShapePotassiumIn.exec_menu("Shape Plot")
            plotShapePotassiumIn.exec_menu("View = plot")
            plotShapePotassiumIn.variable("ki")
            plotShapePotassiumIn.label(0.1, 0.5, "[K+]in (mM)", 2, 1, 0, 1, 1)
            plotShapePotassiumIn.show(0)
            plotShapePotassiumIn.scale(110,120)
        }
        vBoxPlotShapePotassiumIn.intercept(0)
        vBoxPlotShapePotassiumIn.map("[K+]in", 601, 102, 400.64, 400.32)
        
        vBoxPlotShapeVoltagePotassium = new VBox()
        vBoxPlotShapeVoltagePotassium.intercept(1)
        {
            plotShapeVoltagePotassium = new PlotShape(0)
            fast_flush_list.append(plotShapeVoltagePotassium)
            plotShapeVoltagePotassium.size(-50,50,-50,50)
            plotShapeVoltagePotassium.view(-50, -49.9003, 100, 100, 1145, 102, 400.64, 400.32)
            plotShapeVoltagePotassium.exec_menu("Shape Plot")
            plotShapeVoltagePotassium.exec_menu("View = plot")
            plotShapeVoltagePotassium.variable("v")
            plotShapeVoltagePotassium.label(0.5, 0.09, "Transmembrane Voltage (mV)", 2, 1, 0, 1, 1)
            plotShapeVoltagePotassium.show(0)
            plotShapeVoltagePotassium.scale(-87,-83)
        }
        vBoxPlotShapeVoltagePotassium.intercept(0)
        vBoxPlotShapeVoltagePotassium.map("Transmembrane Voltage", 1145, 102, 400.64, 400.32)
        
        vBoxPlotShapePotassiumOut = new VBox()
        vBoxPlotShapePotassiumOut.intercept(1)
        {
            plotShapePotassiumOut = new PlotShape(0)
            fast_flush_list.append(plotShapePotassiumOut)
            plotShapePotassiumOut.size(-50,50,-50,50)
            plotShapePotassiumOut.view(-50, -49.9003, 100, 100, 1745, 102, 400.64, 400.32)
            plotShapePotassiumOut.exec_menu("Shape Plot")
            plotShapePotassiumOut.exec_menu("View = plot")
            plotShapePotassiumOut.variable("ko")
            plotShapePotassiumOut.label(0.5, 0.09, "[K+]o (mM)", 2, 1, 0, 1, 1)
            plotShapePotassiumOut.show(0)
            plotShapePotassiumOut.scale(0,12)
        }
        vBoxPlotShapePotassiumOut.intercept(0)
        vBoxPlotShapePotassiumOut.map("[K+]o", 1745, 102, 400.64, 400.32)
    }
    
endtemplate SimPotassium


// Updates !!Gluout/Gluin!! values on the cell.
// $1 - X coordinate circle center
// $2 - Y coordinate circle center
// $3 - Radius of a circle
// $4 - TimeBegin
// $5 - Diffusion coefficient
// $6 - duration of potassium input     // !! in fact, $6 is TimeEnd rather than duration
// $7 - PX2
// $8 - Amplitude of external Potassium current
// $9 - Density of potassium current
// $10 - Z coordinate circle center
// $11 - Resting concentration
proc PotassiumIteration() { local tau1, tau2
    Dk_kdifl = $5
    tau2 = $9       // !! not used (in fact, $9 is Kp_kpump)
    tau1 = 10       // !! not used
    forall {
        Dk_kdifl = $5
        Kp_kpump = $9
        Krest_kpump = $11
        if (( (geomMath.dist2D_PtToPt_squared($1, $2, x3d(1), y3d(1))  < $3^2) || (geomMath.dist2D_PtToPt_squared($1+$7, $2, x3d(1), y3d(1))  < $3^2))  && (abs($10-z3d(1)) < 10) && (t > $4)  && (t < $6)) {
        // if (( (geomMath.dist2D_PtToPt_squared($1, $2, x3d(1), y3d(1))  < $3^2) || (geomMath.dist2D_PtToPt_squared($1+$7, $2, x3d(1), y3d(1))  < $3^2))) {
        // ka_kdifl=140 // concentration clamp on the area
            iextra_kdifl = $8
        } else {
            iextra_kdifl = 0
        }
    }
}
