
begintemplate SimSpatialVoltageDistributions
    
    public preShowCheck, show, preRun, preContinue, postRun, dismissHandler
    public biophysJsonFileNameOrEmpty, isCustomProcAdvance, isAltRunControl
    
    // Just a workaround to avoid the error in GraphUtils.parseVarsFromTheGraph
    public Amplitude, DurationPlot
    
    external altRunControlWidget
    external tstop
    external removeItemFromList, unmapIfNotNil
    external soma_ref, dendrite_ref
    external flush_list
    external NumberDendrites
    external enumColours
    
    strdef biophysJsonFileNameOrEmpty
    isCustomProcAdvance = -1
    isAltRunControl = -1
    
    // UI
    objref vBoxSpatialVoltage, graphDendrogramm
    
    // IClamp on soma
    objref currentDendrogramm
    
    
    proc init() {
        biophysJsonFileNameOrEmpty = ""
        isCustomProcAdvance = 0
        isAltRunControl = 1
    }
    
    func preShowCheck() {
        return 0
    }
    
    // Opens Spatial Voltage Distribution simulation window.
    proc show() {
        initParamsSpatialVoltage()
        showSpatialVoltageUi()
    }
    
    func preRun() {
        // !! it would be better to split "proc stimulDendro" into two parts and move the first one to "proc show":
        //    part 1 - creation of currentDendrogramm (it will be destroyed in "proc dismissHandler")
        //    part 2 - initialization of currentDendrogramm based on GUI
        stimulDendro(Amplitude, DurationPlot)
        return 0
    }
    
    func preContinue() {
        return 0
    }
    
    proc postRun() {
        graphDendrogramm.exec_menu("View = plot")
    }
    
    proc dismissHandler() {
        
        removeItemFromList(flush_list, graphDendrogramm)
        
        unmapIfNotNil(vBoxSpatialVoltage)
        
        // Remove IClamp after simulation
        objref currentDendrogramm
    }
    
    // All next staff is private
    
    
    // Sets IClamp params on the soma.
    // $1 - Amplitude
    // $2 - Duration
    proc stimulDendro() {
        soma_ref.o(0).sec {
            currentDendrogramm = new IClamp(0.5)
            currentDendrogramm.del = 0  // ms
            currentDendrogramm.dur = $2 // ms
            currentDendrogramm.amp = $1 // nA
        }
    }
    
    // Inits UI and simulation parameters.
    proc initParamsSpatialVoltage() {
        Amplitude = 1 
        DurationPlot = 10000
        tstop = 10
    }
    
    // Shows Spatial Voltage Distribution window.
    proc showSpatialVoltageUi() { localobj voltagePlot
        vBoxSpatialVoltage = new VBox()
        vBoxSpatialVoltage.intercept(1)
        {
            xpanel("")
            xlabel("Simulation of Voltage spatial distribution")
            xpvalue("Stimulus amplitude (nA)", &Amplitude, 1)
            xpvalue("Duration (ms)", &DurationPlot, 1)
            xpvalue("Computation time (ms)", &tstop, 1)
            xbutton("Run", "altRunControlWidget.initAndRunHandler()")
            xpanel()
            
            graphDendrogramm = new Graph(0)
            flush_list.append(graphDendrogramm)
            graphDendrogramm.size(-25, 80, -86, -80)
            graphDendrogramm.view(-10, -88, 110, 10, 10, 319, 389.7, 318.7)
            graphDendrogramm.label(0.05, 1, "Voltage, mV", 2, 1, 0, 1, 1)
            graphDendrogramm.label(0.5, 0.2, "Distance from soma, um", 2, 1, 0, 1, 1)
            //graphDendrogramm.label(0.9, 0.85, "E", 2, 1, 0, 1, 1)
            graphDendrogramm.yaxis(3)
            graphDendrogramm.xaxis(-2, 80, -86, 2, 0, 0, 1)
            graphDendrogramm.yaxis(-86, -80, -2, 5, 0, 0, 1)
            
            //for i = 0, NumberDendrites-1 {
            // !! maybe use for eachSecInList(dendrite_ref, 1) here, but why to start with 1?
              for i = 1, NumberDendrites-1 {
                voltagePlot = new RangeVarPlot("v")
                soma_ref.o(0).sec voltagePlot.begin(0)
                dendrite_ref.o(i).sec voltagePlot.end(1)
                
                graphDendrogramm.addobject(voltagePlot, enumColours.black, 1)
            }
        }
        vBoxSpatialVoltage.intercept(0)
        vBoxSpatialVoltage.map("Spatial Voltage Distributions")
    }
    
endtemplate SimSpatialVoltageDistributions
