
// Load some test nanogeometry file
isAstrocyteOrNeuron = 0
{ load_file("_MyelinPrologueForTests.hoc") }

{ load_file("../_Code/Managers/CommonLoads.hoc") }
{ load_file("../_Code/Managers/MechManager/MechManager.hoc") }
{ load_file("../_Code/Extracellular/OutsideInDiffusion/ExtracellularManager.hoc") }
{ load_file("../_Code/Simulations/SimManagerLoads.hoc") }

simCatIdx = 4   // "-1" means "don't select anything by default"
simIdx = 13     //

objref simBox
simBox = new VBox()
{ simBox.intercept(1) }
{
    if (simCatIdx != -1) {
        simManager.simCatIdx = simCatIdx
    }
    simManager.createSimulationsPanel()
}
{ simBox.intercept(0) }
{ simBox.map("Manager of simulations", 500, 355, -1, -1) }

{ altRunControlWidget.show() }

{ chdir("..") }     // Without this, getcwd() will return different path compared to the start from "init.hoc"

if (simIdx != -1) {
    simManager.programmaticClick(simIdx)
}

// ── TRPA1 KO experiment panel ────────────────────────────────────────────────
// Defines trpa1Panel object but does NOT call show() automatically —
// that would conflict with IClampHelper inside programmaticClick.
// After BrainCell finishes loading, open the panel manually from the HOC console:
//     trpa1Panel.show()
{ load_file("_Testing/TRPA1_KO_DemyelPanel.hoc") }
